

 <ReactionScheme>
 
    
    
 
    <Specie name="Ca"             id="Ca"            kdiff="174.3" kdiffunit="mu2/s"/>
  
   
	<Specie name="CK"                                  id="CK"                    kdiff="0.32"     kdiffunit="mu2/s"/>
	<Specie name="CKp"                                 id="CKp"                   kdiff="0.017"     kdiffunit="mu2/s"/>
	
	<Specie name="CKCamCa4"                            id="CKCamCa4"              kdiff="0.017"     kdiffunit="mu2/s"/>
	<Specie name="CKpCamCa4"                           id="CKpCamCa4"             kdiff="0.017"     kdiffunit="mu2/s"/>	
	<Specie name="CKpCamCa4SynGap"                     id="CKpCamCa4SynGap"       kdiff="0"     kdiffunit="mu2/s"/>
	
	<Specie name="RasGRF" id="RasGRF"                             kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="CamCa4GRF" id="CamCa4GRF"                             kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="CamCa4GRFRas" id="CamCa4GRFRas"                 kdiff="0"    kdiffunit="mu2/s"/>
	
<!-- CaM from Gq files, with either C or N site binding first -->
    <Specie name="Cam"               id="Cam"               kdiff="11"    kdiffunit="mu2/s"/>
    <Specie name="CamCa2C"           id="CamCa2C"           kdiff="11"    kdiffunit="mu2/s"/>
    <Specie name="CamCa2N"           id="CamCa2N"           kdiff="11"    kdiffunit="mu2/s"/>
	<Specie name="CamCa4"                              id="CamCa4"                kdiff="11"     kdiffunit="mu2/s"/>
	<!-- calcium reaction subset, to adjust for proper basal calcium -->
<!-- calcium stuff first -->
    
    
    <Specie name="pmca"              id="pmca"              kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ncx"               id="ncx"               kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pmcaCa"            id="pmcaCa"            kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ncxCa" id="ncxCa" kdiff="0" kdiffunit="mu2/s"/>
<Specie name="CaOutLeak"      id="CaOutLeak"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Leak"           id="Leak"          kdiff="0"     kdiffunit="mu2/s"/>

<Specie name="CB"            id="CB"            kdiff="0"   kdiffunit="mu2/s"/>
<Specie name="CaB"      id="CaB" kdiff="0" kdiffunit="mu2/s"/>

<Specie name="CaOut"          id="CaOut"         kdiff="174.3" kdiffunit="mu2/s"/>
  <Specie name="Calbin"         id="Calbin"        kdiff="9.3"   kdiffunit="mu2/s"/>
    <Specie name="CalbinC"        id="CalbinC"       kdiff="9.3"   kdiffunit="mu2/s"/>
 
<Specie name="Cabuff"                id="Cabuff"                kdiff="0" kdiffunit="mu2/s"/>
<Specie name="Cbuff"                id="Cbuff"                kdiff="0" kdiffunit="mu2/s"/>
<Specie name="Cbuffslow"                id="Cbuffslow"                kdiff="0" kdiffunit="mu2/s"/>
<Specie name="Caextbuffslow"                id="Caextbuffslow"                kdiff="0" kdiffunit="mu2/s"/>



	
	
	
	
	  




    
    <!-- Calcium binding -->

<!-- control Ca back to level on time  -->
<Reaction name ="ca+cbuff--cabuff" id="ca+cbuff--cabuff">
              <Reactant specieID="Ca"/>
              <Reactant specieID="Cbuff"/>
	      <Product specieID="Cabuff"/>

        <forwardRate> 0.1e-3 </forwardRate>
	<reverseRate> 0.01e-3 </reverseRate>
</Reaction>
    
    <!-- remove exess buff  -->

     
     	






<!--Calmodulin binding to calcium rxns-->

<!--1A) Cam  + 2Ca <-> CamCa2C GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamC_bind" id="CamC_bind">
	<Reactant specieID="Cam"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa2C"/>

	<forwardRate>6e-6</forwardRate>
	<reverseRate>9.1e-3</reverseRate>
	
    </Reaction>
  
<!--2A) CamCa2C  + 2Ca <-> CamCa4 GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamCa2C_bind" id="CamCa2C_bind">
	<Reactant specieID="CamCa2C"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa4"/>

	<forwardRate>0.1e-3</forwardRate>
	<reverseRate>1000e-3</reverseRate>
	
    </Reaction>

<!--1B) Cam  + 2Ca <-> CamCa2N GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamN_bind" id="CamN_bind">
	<Reactant specieID="Cam"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa2N"/>

	<forwardRate>0.1e-3</forwardRate>
	<reverseRate>1000e-3</reverseRate>

    </Reaction>

<!--2B) CamCa2N  + 2Ca <-> CamCa4 GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamCa2N_bind" id="CamCa2N_bind">
	<Reactant specieID="CamCa2N"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa4"/>

	<forwardRate>6e-6</forwardRate>
	<reverseRate>9.1e-3</reverseRate>

    </Reaction>
    
    <!-- New CamKII part -->

  <!--1) CamCa4 + CK <-> CKCamCa4  -->
    <Reaction name = "CK bind" id="CK-Cam_bind">
        <Reactant specieID="CamCa4"                 />
        <Reactant specieID="CK"                     />
        <Product  specieID="CKCamCa4"               />

        <forwardRate> 0.01e-3   </forwardRate>
        <reverseRate> 1.5e-3      </reverseRate>
        <!--0.8 from ode file
	    reverseRate> 0.8e-3      </reverseRate-->
    </Reaction>

<!--2a) 2 CKCamCa4  <-> 1  CKCamCa4 + 1 CKpCamCa4 -->
    <Reaction name = "CKCam bind" id="CKCam_pow2">
        <Reactant specieID="CKCamCa4"  power="2"        />
        <Product  specieID="CKCamCa4"          />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 3.83119676007e-10 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2b)  3 CKCamCa4  <-> 2 CKCamCa4 + 1 CKpCamCa4 -->
    <Reaction name = "CKCam bind" id="CKCam_pow3">
        <Reactant specieID="CKCamCa4"  power="3"        />
        <Product  specieID="CKCamCa4"  power="2"         />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 3.55792141502e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2c) 4 CKCamCa4  <-> 3  CKCamCa4 + 1 CKpCamCa4 -->
    <Reaction name = "CKCam bind" id="CKCam_pow4">
        <Reactant specieID="CKCamCa4"  power="4"        />
        <Product  specieID="CKCamCa4"   power="3"         />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 2.23694832822e-16 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2d)  2 CKpCamCa4 + 2 CKCamCa4 <-> 3 CKpCamCa4 + 1 CKCamCa4-->
    <Reaction name = "CKCam bind" id="CK2_CKpCam_pow2">
        <Reactant specieID="CKpCamCa4"  power="2"        />
        <Reactant specieID="CKCamCa4"  power="2"        />
        <Product  specieID="CKCamCa4"           />
        <Product  specieID="CKpCamCa4" power="3"         />

        <forwardRate> 1.10450093247e-18 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2e)  2 CKpCamCa4 + 2 CKCamCa4 <-> 3 CKpCamCa4 + 1 CKCamCa4-->
    <Reaction name = "CKCam bind" id="CK1_CKpCam_pow2">
        <Reactant specieID="CKpCamCa4"  power="2"        />
        <Reactant specieID="CKCamCa4"         />
        <Product  specieID="CKpCamCa4" power="3"         />

        <forwardRate> 3.0330636368e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2f)  2 CKpCamCa4 + 2 CKCamCa4 <-> 3 CKpCamCa4 + 1 CKCamCa4-->
    <Reaction name = "CKCam bind" id="CK2_CKpCam_pow1">
        <Reactant specieID="CKpCamCa4"   power="2"         />
        <Reactant specieID="CKCamCa4"     power="2"     />
        <Product  specieID="CKpCamCa4" power="3"         />
        <Product  specieID="CKCamCa4"          />

        <forwardRate> 2.39399544094e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

    <!-- CKpCamCa4 <-> CKp + CamCa4 -->
    <Reaction name = "CKp auto" id="CKp_auto">
        <Reactant specieID="CKpCamCa4"              />
        <Product  specieID="CamCa4"                 />
        <Product  specieID="CKp"                    />

        <forwardRate> 0.0008e-3 </forwardRate>
        <reverseRate> 0.01e-3   </reverseRate>
    </Reaction>





    





 
 
 


   
   
   
   
   
   
   
   
        <!--I. *********** Ca pump and buffer rxns  ************* -->
<!-- i: Ca pump high affinity -    Ca + pmca <-> pmcaCa  SAME-->
    <Reaction name = "Ca_pump1a" id="Ca_pump1a">
	<Reactant specieID="Ca"/>
	<Reactant specieID="pmca"/>
	<Product specieID="pmcaCa"/>

	<forwardRate>0.05e-3</forwardRate>
	<reverseRate>9e-3</reverseRate>
    </Reaction>

<!-- ii: Ca pump high affinity -    pmcaCa <-> pmca + CaOut   SAME-->
    <Reaction name = "Ca_pump1b" id="Ca_pump1b">
	<Reactant specieID="pmcaCa"/>
	<Product specieID="pmca"/>
	<Product specieID="CaOut"/>

	<forwardRate>3.0e-3</forwardRate>
	<reverseRate>0</reverseRate>
    </Reaction>

<!-- iii: Ca pump low affinity -    Ca + ncx <-> ncxCa  SAME-->
    <Reaction name = "Ca_pump2a" id="Ca_pump2a">
	<Reactant specieID="Ca"/>
	<Reactant specieID="ncx"/>
	<Product specieID="ncxCa"/>

	<forwardRate>0.011e-3</forwardRate>
	<reverseRate>11.2e-3</reverseRate>
    </Reaction>

<!-- iv: Ca pump low affinity -    ncxCa <-> ncx + CaOut   SAME-->
    <Reaction name = "Ca_pump2b" id="Ca_pump2b">
	<Reactant specieID="ncxCa"/>
	<Product specieID="ncx"/>
	<Product specieID="CaOut"/>

	<forwardRate>5.6e-3</forwardRate>
	<reverseRate>0</reverseRate>
    </Reaction>
<!-- v: Ca leak -    CaOut + Leak <-> CaOutLeak  GQ RXN FILE, Leak is sm only-->
    <Reaction name = "Ca_leak" id="Ca_leak">
	<Reactant specieID="CaOut"/>
	<Reactant specieID="Leak"/>
	<Product specieID="CaOutLeak"/>

        <forwardRate>0.01e-6</forwardRate>
	<reverseRate>0</reverseRate>
    </Reaction>

<!-- vi: Ca leak -    CaOutLeak <-> Ca (inside) + Leak  -->
    <Reaction name = "Ca_leak" id="Ca_leak">
	<Reactant specieID="CaOutLeak"/>
	<Product specieID="Ca"/>
	<Product specieID="Leak"/>

        <forwardRate>0.65e-3</forwardRate>  <!-- 1.1e-3 -->
	<reverseRate>0</reverseRate>
    </Reaction>

<!-- vii: Ca Buffer    Ca + Calbindin <-> calbinC  SAME-->
    <Reaction name = "Ca_buffer" id="Ca_Buffer">
        <Reactant specieID="Ca"/>
        <Reactant specieID="Calbin"/>
        <Product specieID="CalbinC"/>

        <forwardRate>0.028e-3</forwardRate>
        <reverseRate>19.6</reverseRate>
    </Reaction>



 
    
    
    
        
    
      
	 




</ReactionScheme>












