 <ReactionScheme>
   
 
      
    
	 
   
    <Specie name="RasGTP"		 id="RasGTP"                                 kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="Raf1Ras"		 id="Raf1Ras"                                 kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="Raf1"		 id="Raf1"                                 kdiff="0"    kdiffunit="mu2/s"/>
    
    

    
    <Specie name="PP2A"            id="PP2A"           kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="pPla2acPP2A"            id="pPla2acPP2A"           kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="pMEKPP2A"                          id="pMEKPP2A"                kdiff="7"    kdiffunit="mu2/s"/>
    <Specie name="ppMEKPP2A"                         id="ppMEKPP2A"                kdiff="7"    kdiffunit="mu2/s"/>

   
	
   
    <Specie name="Ca"             id="Ca"            kdiff="174.3" kdiffunit="mu2/s"/>
  
    


	
	
	<Specie name="SynGap"                              id="SynGap"                kdiff="5"     kdiffunit="mu2/s"/>
	
	<Specie name="pSynGap"                             id="pSynGap"               kdiff="5"     kdiffunit="mu2/s"/>
	<Specie name="pSynden"                             id="pSynden"               kdiff="0"     kdiffunit="mu2/s"/>
	
	<Specie name="CK"                                  id="CK"                    kdiff="3.6"     kdiffunit="mu2/s"/>
	<Specie name="CKp"                                 id="CKp"                   kdiff="3.6"     kdiffunit="mu2/s"/>
	<Specie name="CKpPP1"                              id="CKpPP1"                kdiff="0"     kdiffunit="mu2/s"/>
	<Specie name="cAMP"           			   id="cAMP"          	      kdiff="86.4"  kdiffunit="mu2/s"/>
	<Specie name="SynGapPSD95"                              id="SynGapPSD95"                kdiff="0"     kdiffunit="mu2/s"/>
	<Specie name="PSD95"                              id="PSD95"                kdiff="0"     kdiffunit="mu2/s"/>
	<Specie name="RasSynGapPSD95"     id="RasSynGapPSD95"    kdiff="0"     kdiffunit="mu2/s"/>
        <Specie name="Rap1SynGapPSD95"     id="Rap1SynGapPSD95"    kdiff="0"     kdiffunit="mu2/s"/>
        <Specie name="CKpCamCa4SynGapPSD95"                              id="CKpCamCa4SynGapPSD95"                kdiff="0"     kdiffunit="mu2/s"/>
	
	<Specie name="CKCamCa4"                            id="CKCamCa4"              kdiff="3.6"     kdiffunit="mu2/s"/>
	<Specie name="CKpCamCa4"                           id="CKpCamCa4"             kdiff="3.6"     kdiffunit="mu2/s"/>	
	<Specie name="CKpCamCa4SynGap"                     id="CKpCamCa4SynGap"       kdiff="0"     kdiffunit="mu2/s"/>
	
	<Specie name="RasGRF" id="RasGRF"                             kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="CamCa4GRF" id="CamCa4GRF"                             kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="CamCa4GRFRas" id="CamCa4GRFRas"                 kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="inactRasGRF" id="inactRasGRF"                             kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="PkcCaDagAAinactRasGRF" id="PkcCaDagAAinactRasGRF"                             kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="PkcCaDaginactRasGRF" id="PkcCaDaginactRasGRF"                             kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="PkcDagAAinactRasGRF" id="PkcDagAAinactRasGRF"                             kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="PkcDaginactRasGRF" id="PkcDaginactRasGRF"                             kdiff="0"    kdiffunit="mu2/s"/>
	
	<Specie name="RasSynGap" id="RasSynGap"                                   kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="RaspSynGap" id="RaspSynGap"                                 kdiff="0"    kdiffunit="mu2/s"/>
	
	<Specie name="RasGDP" id="RasGDP"                                         kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="rasGap" id="rasGap"                                         kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="RasGTPGap" id="RasGTPGap"                                   kdiff="0"    kdiffunit="mu2/s"/>
	
	
	
	
	
<!-- CaM from Gq files, with either C or N site binding first -->
    <Specie name="Cam"               id="Cam"               kdiff="11"    kdiffunit="mu2/s"/>
    <Specie name="CamCa2C"           id="CamCa2C"           kdiff="11"    kdiffunit="mu2/s"/>
    <Specie name="CamCa2N"           id="CamCa2N"           kdiff="11"    kdiffunit="mu2/s"/>
	<Specie name="CamCa4"                              id="CamCa4"                kdiff="11"     kdiffunit="mu2/s"/>
	<!-- calcium reaction subset, to adjust for proper basal calcium -->
<!-- calcium stuff first -->
    
    
    <Specie name="pmca"              id="pmca"              kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ncx"               id="ncx"               kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pmcaCa"            id="pmcaCa"            kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ncxCa" id="ncxCa" kdiff="0" kdiffunit="mu2/s"/>
<Specie name="CaOutLeak"      id="CaOutLeak"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Leak"           id="Leak"          kdiff="0"     kdiffunit="mu2/s"/>

<Specie name="CB"            id="CB"            kdiff="0"   kdiffunit="mu2/s"/>
<Specie name="CaB"      id="CaB" kdiff="0" kdiffunit="mu2/s"/>

<Specie name="CaOut"          id="CaOut"         kdiff="174.3" kdiffunit="mu2/s"/>
  <Specie name="Calbin"         id="Calbin"        kdiff="9.3"   kdiffunit="mu2/s"/>
    <Specie name="CalbinC"        id="CalbinC"       kdiff="9.3"   kdiffunit="mu2/s"/>
 
<Specie name="Cabuff"                id="Cabuff"                kdiff="0" kdiffunit="mu2/s"/>
<Specie name="Cbuff"                id="Cbuff"                kdiff="0" kdiffunit="mu2/s"/>
<Specie name="Cbuffslow"                id="Cbuffslow"                kdiff="0" kdiffunit="mu2/s"/>
<Specie name="CaOutbuffslow"                id="CaOutbuffslow"                kdiff="0" kdiffunit="mu2/s"/>



<Specie name="Rap1SynGap"                          id="Rap1SynGap"            kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="Rap1pSynGap"                         id="Rap1pSynGap"           kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="rap1Gap"                          id="rap1Gap"            kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="Rap1GTPGap"                          id="Rap1GTPGap"            kdiff="0"     kdiffunit="mu2/s"/>

<Specie name="Rap1GTP"                          id="Rap1GTP"            kdiff="0"     kdiffunit="mu2/s"/>

<Specie name="Rap1GDP"                          id="Rap1GDP"            kdiff="0"     kdiffunit="mu2/s"/>

         
     <!-- (Raf1 binds to Ras, step 1) RasGTP + Raf1 <-> RasGTPRaf1 -->
    <Reaction name = "RasGTP+Raf1--Raf1RasGTP" id="RasGTP+Raf1--Raf1Ras">
        <Reactant specieID="RasGTP"           />
        <Reactant  specieID="Raf1"               />
        <Product  specieID="Raf1Ras"               />

	<forwardRate> 0.06e-3   </forwardRate> <!-- 0.06e-3 is Nadias Rates,but Upi uses 0.006e-3 HAVE A LOOK AT THIS RATE AGN,might hv messed up conversion,im using 0.006-->
	<reverseRate> 1e-3   </reverseRate>	<!-- 1e-3 is original rate but i modified it to 10e-3 -->
	
    </Reaction>

    
      
  <Reaction name ="SynGap+PSD95--cabuff" id="ca+cbuff--cabuff">
              <Reactant specieID="SynGap"/>
              <Reactant specieID="PSD95"/>
	      <Product specieID="SynGapPSD95"/>

        <forwardRate> 1e-6 </forwardRate> <!--4.7nM dissociation constant shown in Elife mary b kennedy-->
	<reverseRate> 4.7e-6 </reverseRate> 
</Reaction>
    
    <Reaction name = "CKpCamCa4+SynGap--CKpCamCa4Gap" id="CKpCamCa4+SynGap--CKpCamCa4Gap">
  <Reactant specieID="CKpCamCa4" />
  <Reactant specieID="SynGapPSD95" />
  <Product specieID="CKpCamCa4SynGapPSD95" />
  

 <forwardRate> 0.3067258192987457e-3</forwardRate>  
  <reverseRate> 0.058715155531797236 </reverseRate>

 </Reaction>

<Reaction name = "CKpCamCa4Gap--CKpCamCa4+pSynGap" id="CKpCamCa4Gap--CKpCamCa4+pSynGap">
  <Reactant specieID="CKpCamCa4SynGapPSD95" />
  <Product specieID="pSynGap" />
  <Product specieID="CKpCamCa4" />
<Product specieID="PSD95" />
  <forwardRate> 0.0006484330410680531</forwardRate>
  <reverseRate> 0 </reverseRate>

 </Reaction>
 
 <Reaction name = "RasGTP+SynGap--RasGap" id="RasGTP+SynGap--RasGap">
  <Reactant specieID="RasGTP" />
  <Reactant specieID="SynGapPSD95" />
  <Product specieID="RasSynGapPSD95" />

 <forwardRate>0.00082e-3  </forwardRate>
 <reverseRate> 0.82e-3  </reverseRate>


</Reaction>

<Reaction name = "RasGap--SynGap+RasGDP" id = "RasGap--SynGap+RasGDP">
  <Reactant specieID="RasSynGapPSD95" />
  <Product specieID="SynGapPSD95" />
  <Product specieID="RasGDP" />
  

 <forwardRate> 0.205e-3 </forwardRate>
  <reverseRate> 0 </reverseRate>

</Reaction>


<!--(Inactivation of Rap by SynGAP) Rap1GTP+SynGap <-> Rap1GTPGap -> SynGap + Rap1GDP -->

<Reaction name = "Rap1GTP+SynGap--Rap1Gap" id="Rap1GTP+SynGap--Rap1Gap">
  <Reactant specieID="Rap1GTP" />
  <Reactant specieID="SynGapPSD95" />
  <Product specieID="Rap1SynGapPSD95" />

  <forwardRate> 0.0032e-3 </forwardRate>
  <reverseRate> 3.2e-3 </reverseRate>
  
</Reaction>

<Reaction name = "Rap1Gap--SynGap+Rap1GDP" id = "Rap1Gap--SynGap+Rap1GDP">
  <Reactant specieID="Rap1SynGapPSD95" />
  <Product specieID="SynGapPSD95" />
  <Product specieID="Rap1GDP" />

 <forwardRate> 0.8e-3 </forwardRate>
  <reverseRate>0</reverseRate>

</Reaction>
    
    
    
    
    
    
    
    
      <!--(Inactivation of Rap by Rap1GAP) Rap1GTP+Rap1GAP <-> Rap1GTPGAP -> Rap1GAP + Rap1GDP -->

<Reaction name = "Rap1GTP+Rap1GAP--Rap1GTPGAP" id="Rap1GTP+Rap1GAP--Rap1GTPGAP">
  <Reactant specieID="Rap1GTP" />
  <Reactant specieID="rap1Gap" />
  <Product specieID="Rap1GTPGap" />

  <forwardRate> 0.2e-3 </forwardRate>
  <reverseRate> 200e-3 </reverseRate>

</Reaction>

<Reaction name = "Rap1GTPGAP--Rap1GAP+Rap1GDP" id = "Rap1GTPGAP--Rap1GAP+Rap1GDP">
  <Reactant specieID="Rap1GTPGap" />
  <Product specieID="rap1Gap" />
  <Product specieID="Rap1GDP" />

  <forwardRate> 2e-3 </forwardRate>
  <reverseRate>  0  </reverseRate>

</Reaction>


<Reaction name = "Rap1GTP+SynGap--Rap1Gap" id="Rap1GTP+SynGap--Rap1Gap">
  <Reactant specieID="Rap1GTP" />
  <Reactant specieID="SynGap" />
  <Product specieID="Rap1SynGap" />

  <forwardRate> 0.0032e-3 </forwardRate>
  <reverseRate> 3.2e-3 </reverseRate>
  
</Reaction>

<Reaction name = "Rap1Gap--SynGap+Rap1GDP" id = "Rap1Gap--SynGap+Rap1GDP">
  <Reactant specieID="Rap1SynGap" />
  <Product specieID="SynGap" />
  <Product specieID="Rap1GDP" />

 <forwardRate> 0.8e-3 </forwardRate>
  <reverseRate>0</reverseRate>

</Reaction>










<Reaction name = "Rap1GTP+pSynGap--Rap1pGap" id="Rap1GTP+pSynGap--Rap1pGap">
  <Reactant specieID="Rap1GTP" />
  <Reactant specieID="pSynGap" />
  <Product specieID="Rap1pSynGap"/>
  
 <forwardRate> 0.00614e-3 </forwardRate>
  <reverseRate> 6.14e-3 </reverseRate>
 
</Reaction>

<Reaction name = "Rap1pGap--pSynGap+Rap1GDP" id = "Rap1pGap--pSynGap+Rap1GDP">
  <Reactant specieID="Rap1pSynGap" />
  <Product specieID="pSynGap" />
  <Product specieID="Rap1GDP" />

   <forwardRate>1.53e-3 </forwardRate>
  <reverseRate> 0 </reverseRate>

</Reaction>

    
    
	 


    
    <!--(Inactivation of Ras by RasGAP) RasGTP+RasGTPGAP <-> RasGTPGAP -> RasGAP + RasGDP -->

<Reaction name = "RasGTP+RasGTPGAP-- RasGTPGAP" id="RasGTP+RasGTPGAP-- RasGTPGAP">
  <Reactant specieID="RasGTP" />
  <Reactant specieID="rasGap" />
  <Product specieID="RasGTPGap" />

  <forwardRate> 0.0495e-3 </forwardRate>
  <reverseRate> 40e-3 </reverseRate>

</Reaction>

<Reaction name = "RasGTPGAP--RasGAP+RasGDP" id = "RasGTPGAP--RasGAP+RasGDP">
  <Reactant specieID="RasGTPGap" />
  <Product specieID="rasGap" />
  <Product specieID="RasGDP" />

  <forwardRate> 10e-3  </forwardRate>
  <reverseRate> 0  </reverseRate>

</Reaction>
	
        <!--I. *********** Ca pump and buffer rxns  ************* -->
<!-- i: Ca pump high affinity -    Ca + pmca <-> pmcaCa  SAME-->
    <Reaction name = "Ca_pump1a" id="Ca_pump1a">
	<Reactant specieID="Ca"/>
	<Reactant specieID="pmca"/>
	<Product specieID="pmcaCa"/>

	<forwardRate>0.05e-3</forwardRate>
	<reverseRate>9e-3</reverseRate>
    </Reaction>

<!-- ii: Ca pump high affinity -    pmcaCa <-> pmca + CaOut   SAME-->
    <Reaction name = "Ca_pump1b" id="Ca_pump1b">
	<Reactant specieID="pmcaCa"/>
	<Product specieID="pmca"/>
	<Product specieID="CaOut"/>

	<forwardRate>3.0e-3</forwardRate>
	<reverseRate>0</reverseRate>
    </Reaction>

<!-- iii: Ca pump low affinity -    Ca + ncx <-> ncxCa  SAME-->
    <Reaction name = "Ca_pump2a" id="Ca_pump2a">
	<Reactant specieID="Ca"/>
	<Reactant specieID="ncx"/>
	<Product specieID="ncxCa"/>

	<forwardRate>0.011e-3</forwardRate>
	<reverseRate>11.2e-3</reverseRate>
    </Reaction>

<!-- iv: Ca pump low affinity -    ncxCa <-> ncx + CaOut   SAME-->
    <Reaction name = "Ca_pump2b" id="Ca_pump2b">
	<Reactant specieID="ncxCa"/>
	<Product specieID="ncx"/>
	<Product specieID="CaOut"/>

	<forwardRate>5.6e-3</forwardRate>
	<reverseRate>0</reverseRate>
    </Reaction>
<!-- v: Ca leak -    CaOut + Leak <-> CaOutLeak  GQ RXN FILE, Leak is sm only-->
    <Reaction name = "Ca_leak" id="Ca_leak">
	<Reactant specieID="CaOut"/>
	<Reactant specieID="Leak"/>
	<Product specieID="CaOutLeak"/>

        <forwardRate>0.01e-6</forwardRate>
	<reverseRate>0</reverseRate>
    </Reaction>

<!-- vi: Ca leak -    CaOutLeak <-> Ca (inside) + Leak  -->
    <Reaction name = "Ca_leak" id="Ca_leak">
	<Reactant specieID="CaOutLeak"/>
	<Product specieID="Ca"/>
	<Product specieID="Leak"/>

        <forwardRate>0.65e-3</forwardRate>  <!-- 1.1e-3 -->
	<reverseRate>0</reverseRate>
    </Reaction>

<!-- vii: Ca Buffer    Ca + Calbindin <-> calbinC  SAME-->
    <Reaction name = "Ca_buffer" id="Ca_Buffer">
        <Reactant specieID="Ca"/>
        <Reactant specieID="Calbin"/>
        <Product specieID="CalbinC"/>

        <forwardRate>0.028e-3</forwardRate>
        <reverseRate>19.6</reverseRate>
    </Reaction>

	
	<!--Calmodulin binding to calcium rxns-->

<!--1A) Cam  + 2Ca <-> CamCa2C GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamC_bind" id="CamC_bind">
	<Reactant specieID="Cam"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa2C"/>

	<forwardRate>6e-6</forwardRate>
	<reverseRate>9.1e-3</reverseRate>
	
    </Reaction>
  
<!--2A) CamCa2C  + 2Ca <-> CamCa4 GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamCa2C_bind" id="CamCa2C_bind">
	<Reactant specieID="CamCa2C"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa4"/>

	<forwardRate>0.1e-3</forwardRate>
	<reverseRate>1000e-3</reverseRate>
	
    </Reaction>

<!--1B) Cam  + 2Ca <-> CamCa2N GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamN_bind" id="CamN_bind">
	<Reactant specieID="Cam"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa2N"/>

	<forwardRate>0.1e-3</forwardRate>
	<reverseRate>1000e-3</reverseRate>

    </Reaction>

<!--2B) CamCa2N  + 2Ca <-> CamCa4 GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamCa2N_bind" id="CamCa2N_bind">
	<Reactant specieID="CamCa2N"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa4"/>

	<forwardRate>6e-6</forwardRate>
	<reverseRate>9.1e-3</reverseRate>

    </Reaction>
    
    <!-- New CamKII part -->

  <!--1) CamCa4 + CK <-> CKCamCa4  -->
    <Reaction name = "CK bind" id="CK-Cam_bind">
        <Reactant specieID="CamCa4"                 />
        <Reactant specieID="CK"                     />
        <Product  specieID="CKCamCa4"               />

        <forwardRate> 0.01e-3   </forwardRate>
        <reverseRate> 1.5e-3      </reverseRate>
        <!--0.8 from ode file
	    reverseRate> 0.8e-3      </reverseRate-->
    </Reaction>

<!--2a) 2 CKCamCa4  <-> 1  CKCamCa4 + 1 CKpCamCa4 -->
    <Reaction name = "CKCam bind" id="CKCam_pow2">
        <Reactant specieID="CKCamCa4"  power="2"        />
        <Product  specieID="CKCamCa4"          />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 3.83119676007e-10 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2b)  3 CKCamCa4  <-> 2 CKCamCa4 + 1 CKpCamCa4 -->
    <Reaction name = "CKCam bind" id="CKCam_pow3">
        <Reactant specieID="CKCamCa4"  power="3"        />
        <Product  specieID="CKCamCa4"  power="2"         />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 3.55792141502e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2c) 4 CKCamCa4  <-> 3  CKCamCa4 + 1 CKpCamCa4 -->
    <Reaction name = "CKCam bind" id="CKCam_pow4">
        <Reactant specieID="CKCamCa4"  power="4"        />
        <Product  specieID="CKCamCa4"   power="3"         />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 2.23694832822e-16 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2d)  2 CKpCamCa4 + 2 CKCamCa4 <-> 3 CKpCamCa4 + 1 CKCamCa4-->
    <Reaction name = "CKCam bind" id="CK2_CKpCam_pow2">
        <Reactant specieID="CKpCamCa4"  power="2"        />
        <Reactant specieID="CKCamCa4"  power="2"        />
        <Product  specieID="CKCamCa4"           />
        <Product  specieID="CKpCamCa4" power="3"         />

        <forwardRate> 1.10450093247e-18 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2e)  2 CKpCamCa4 + 2 CKCamCa4 <-> 3 CKpCamCa4 + 1 CKCamCa4-->
    <Reaction name = "CKCam bind" id="CK1_CKpCam_pow2">
        <Reactant specieID="CKpCamCa4"  power="2"        />
        <Reactant specieID="CKCamCa4"         />
        <Product  specieID="CKpCamCa4" power="3"         />

        <forwardRate> 3.0330636368e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2f)  2 CKpCamCa4 + 2 CKCamCa4 <-> 3 CKpCamCa4 + 1 CKCamCa4-->
    <Reaction name = "CKCam bind" id="CK2_CKpCam_pow1">
        <Reactant specieID="CKpCamCa4"   power="2"         />
        <Reactant specieID="CKCamCa4"     power="2"     />
        <Product  specieID="CKpCamCa4" power="3"         />
        <Product  specieID="CKCamCa4"          />

        <forwardRate> 2.39399544094e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

    <!-- CKpCamCa4 <-> CKp + CamCa4 -->
    <Reaction name = "CKp auto" id="CKp_auto">
        <Reactant specieID="CKpCamCa4"              />
        <Product  specieID="CamCa4"                 />
        <Product  specieID="CKp"                    />

        <forwardRate> 0.0008e-3 </forwardRate>
        <reverseRate> 0.01e-3   </reverseRate>
    </Reaction>





    <!--(activaton of RasGRF) CamCa4+RasGRF->CamCa4RasGRF -->
    <Reaction name = "CamCa4+RasGRF--CamCa4GRF" id="CamCa4+RasGRF--CamCa4GRF">
        <Reactant specieID="CamCa4"           />
        <Reactant specieID="RasGRF"              />
	<Product  specieID="CamCa4GRF"               />

        <forwardRate> 0.06e-3  </forwardRate>
        <reverseRate> 0.924e-3 </reverseRate>
        
    </Reaction>

<!--(active RasGRF activates Ras)CamCa4GRF +RasGDP <-> CamCa4GRFRasGDP <-> CamCa4GRF + RasGTP-->
    <Reaction name = "CamCa4GRF+RasGDP--CamCa4GRFRasGDP" id="CamCa4GRF+RasGDP--CamCa4GRFRasGDP">
        <Reactant specieID="CamCa4GRF"           />
        <Reactant specieID="RasGDP"              />
        <Product  specieID="CamCa4GRFRas"               />

        <forwardRate> 0.0019e-3  </forwardRate>
        <reverseRate> 0.08e-3 </reverseRate>
        
        
    </Reaction>

    <Reaction name = "CamCa4GRFRasGDP--CamCa4GRF+RasGTP" id="CamCa4GRFRasGDP--CamCa4GRF+RasGTP">
        <Reactant specieID="CamCa4GRFRas"               />
        <Product specieID="CamCa4GRF"             />
        <Product specieID="RasGTP"               />

        <forwardRate> 0.02e-3  </forwardRate> 
        <reverseRate> 0 </reverseRate>
       
</Reaction>







 
 <Reaction name = "CKpCamCa4+SynGap--CKpCamCa4Gap" id="CKpCamCa4+SynGap--CKpCamCa4Gap">
  <Reactant specieID="CKpCamCa4" />
  <Reactant specieID="SynGap" />
  <Product specieID="CKpCamCa4SynGap" />

  <forwardRate> 0.3067258192987457e-3</forwardRate>   
  <reverseRate> 0.058715155531797236 </reverseRate>

 </Reaction>


 <Reaction name = "CKpCamCa4Gap--CKpCamCa4+pSynGap" id="CKpCamCa4Gap--CKpCamCa4+pSynGap">
  <Reactant specieID="CKpCamCa4SynGap" />
  <Product specieID="pSynGap" />
  <Product specieID="CKpCamCa4" />

  <forwardRate> 0.0006484330410680531</forwardRate>
  <reverseRate> 0 </reverseRate>

 </Reaction>
 
 
 
 
<Reaction name ="pSynGap--SynGap" id="pSynGap--SynGap">
	  <Reactant specieID="pSynGap"/>
	  <Product specieID="SynGap"/>

        <forwardRate> 1e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
    </Reaction>
  


<Reaction name = "RasGTP+SynGap--RasGap" id="RasGTP+SynGap--RasGap">
  <Reactant specieID="RasGTP" />
  <Reactant specieID="SynGap" />
  <Product specieID="RasSynGap" />

 <forwardRate>0.00082e-3  </forwardRate>
 <reverseRate> 0.82e-3  </reverseRate>


</Reaction>

<Reaction name = "RasGap--SynGap+RasGDP" id = "RasGap--SynGap+RasGDP">
  <Reactant specieID="RasSynGap" />
  <Product specieID="SynGap" />
  <Product specieID="RasGDP" />

 <forwardRate> 0.205e-3 </forwardRate>
  <reverseRate> 0 </reverseRate>

</Reaction>



<Reaction name = "RasGTP+pSynGap--RaspGap" id="RasGTP+pSynGap--RaspGap">
  <Reactant specieID="RasGTP" />
  <Reactant specieID="pSynGap" />
  <Product specieID="RaspSynGap" />
  
  <forwardRate> 0.00112e-3 </forwardRate>
  <reverseRate> 1.112e-3  </reverseRate>

</Reaction>

<Reaction name = "RaspGap--pSynGap+RasGDP" id = "RaspGap--pSynGap+RasGDP">
  <Reactant specieID="RaspSynGap" />
  <Product specieID="pSynGap" />
  <Product specieID="RasGDP" />

  <forwardRate> 0.279e-3  </forwardRate>
  <reverseRate> 0 </reverseRate>

</Reaction>





  <!-- remove exess buff  -->
<Reaction name ="Cbuffslow+Caext--ext" id="Cbuffslow+Caext--ext">
              <Reactant specieID="Cbuffslow"/>
              <Reactant specieID="CaOut"/>
	      <Product specieID="CaOutbuffslow"/>

        <forwardRate>10e-6 </forwardRate>
	<reverseRate> 0 </reverseRate>
</Reaction>



   
    

	
	
	
	
	
	
	
	
	
	
	
	
	
	
	
	
	
	
	
    
      
	 




</ReactionScheme>












