

 <ReactionScheme>
 
    
    
 <Specie name="ERK"                                 id="ERK"                 kdiff="7"    kdiffunit="mu2/s"/>
 <Specie name="ERKpY"                                id="ERKpY"                kdiff="7"    kdiffunit="mu2/s"/>
 <Specie name="ERKpT"                                id="ERKpT"                kdiff="7"    kdiffunit="mu2/s"/>
 <Specie name="ppERK"                               id="ppERK"                kdiff="7"    kdiffunit="mu2/s"/>
 
    <Specie name="Pkc"          	  id="Pkc"           kdiff="6.61"    kdiffunit="mu2/s"/>
    <Specie name="PkcCa"      	 	   id="PkcCa"         kdiff="6.61"    kdiffunit="mu2/s"/>   
    <Specie name="PkcCaRaf1"      	 	   id="PkcCaRaf1"         kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="PkcCaDagAA"   	    id="PkcCaDagAA"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PkcCaDagAARaf1"       id="PkcCaDagAARaf1"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PkcCaDag"   		    id="PkcCaDag"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PkcDagAA"   	    id="PkcDagAA"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PkcDag"   	    id="PkcDag"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PkcDagAARaf1"       id="PkcDagAARaf1"      kdiff="0"     kdiffunit="mu2/s"/>
    
    <Specie name="Pla2"          	  id="Pla2"           kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="Pla2ac"            id="Pla2ac"           kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="Pla2acAPC"            id="Pla2acAPC"           kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="Pla2Ca"            id="Pla2Ca"           kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="pPla2acAPC"            id="pPla2acAPC"           kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="pPla2ac"            id="pPla2ac"           kdiff="0"    kdiffunit="mu2/s"/>
    
    
    <Specie name="ppERKPla2"            id="ppERKPla2"           kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="ppERKPla2ac"            id="ppERKPla2ac"           kdiff="0"    kdiffunit="mu2/s"/>
    
    <Specie name="APC"            id="APC"           kdiff="0"    kdiffunit="mu2/s"/>
  
    
    <Specie name="AA"            id="AA"           kdiff="0"    kdiffunit="mu2/s"/>
      
    
	 
    <Specie name="Raf1" 		id="Raf1"                                             kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="pRaf1"		 id="pRaf1"                                 kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="RasGTP"		 id="RasGTP"                                 kdiff="0"    kdiffunit="mu2/s"/>
    

    <Specie name="pRaf1Ras"		 id="pRaf1Ras"                                 kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="Raf1Ras"		 id="Raf1Ras"                                 kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="PP2A"            id="PP2A"           kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="pPla2acPP2A"            id="pPla2acPP2A"           kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="pMEKPP2A"                          id="pMEKPP2A"                kdiff="7"    kdiffunit="mu2/s"/>
    <Specie name="ppMEKPP2A"                         id="ppMEKPP2A"                kdiff="7"    kdiffunit="mu2/s"/>

    <Specie name="PkcCaDagRaf1"       id="PkcCaDagRaf1"      kdiff="0"     kdiffunit="mu2/s"/>
   
    <Specie name="Raf1RasMEK" id="Raf1RasMEK"                       kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="Raf1RaspMEK" id="Raf1RaspMEK"                     kdiff="0"    kdiffunit="mu2/s"/>
	
    <Specie name="pRaf1RasMEK" id="pRaf1RasMEK"                       kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="pRaf1RaspMEK" id="pRaf1RaspMEK"                     kdiff="0"    kdiffunit="mu2/s"/>
	
   
    <Specie name="Ca"             id="Ca"            kdiff="174.3" kdiffunit="mu2/s"/>
  
    <Specie name="MEK"                               id="MEK"                kdiff="7"    kdiffunit="mu2/s"/>
    <Specie name="pMEK"                              id="pMEK"                kdiff="7"    kdiffunit="mu2/s"/>
    <Specie name="ppMEK"                             id="ppMEK"                kdiff="7"    kdiffunit="mu2/s"/>
    <Specie name="MKP1"                                id="MKP1"                kdiff="7"    kdiffunit="mu2/s"/>
    <Specie name="pERKMKP1"                            id="pERKMKP1"                kdiff="7"    kdiffunit="mu2/s"/>
    <Specie name="ppERKMKP1"                           id="ppERKMKP1"                kdiff="7"    kdiffunit="mu2/s"/>
	
    <Specie name="ppMEKERK"                          id="ppMEKERK"                kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="ppMEKpERK"                         id="ppMEKpERK"                kdiff="0"    kdiffunit="mu2/s"/>

<Specie name="Ebuf"          id="Ebuf"          kdiff="1"      kdiffunit="mu2/s"/>
    <Specie name="E2Ebuf"        id="E2Ebuf"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="E2Out"         id="E2Out"         kdiff="1"      kdiffunit = "mu2/s"/>
	
	<Specie name="STEP"				                 id="STEP"		            kdiff="0"	kdiffunit="mu2/s"/>  
	<Specie name="ppERKSTEP"			    id="ppERKSTEP"		         kdiff="0"       kdiffunit="mu2/s"/>
	<Specie name="pERKSTEP"			             id="pERKSTEP"		         kdiff="0"       kdiffunit="mu2/s"/>
	<Specie name="pERKSTEPp"			             id="pERKSTEPp"		         kdiff="0"       kdiffunit="mu2/s"/>
	<Specie name="STEPp"                             id="STEPp"               kdiff="0"       kdiffunit="mu2/s"/>
	<Specie name="ppERKSTEPp"                        id="ppERKSTEPp"           kdiff="0"       kdiffunit="mu2/s"/>
	<Specie name="PKAcSTEP"                          id="PKAcSTEP"           kdiff="0"       kdiffunit="mu2/s"/>
	<Specie name="PP1STEPp"                          id="PP1STEPp"           kdiff="0"       kdiffunit="mu2/s"/>



	<Specie name="dRaf1Ras" id="dRaf1Ras"                                 kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="dRaf1RasMEK" id="dRaf1RasMEK"                       kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="dRaf1RaspMEK" id="dRaf1RaspMEK"                     kdiff="0"    kdiffunit="mu2/s"/>

	
	<Specie name="dpRaf1Ras" id="dpRaf1Ras"                                 kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="dpRaf1RasMEK" id="dpRaf1RasMEK"                       kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="dpRaf1RaspMEK" id="dpRaf1RaspMEK"                     kdiff="0"    kdiffunit="mu2/s"/>

	<Specie name="bRaf"                                id="bRaf"                              kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="bRafRas" id="bRafRas"                                 kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="bRafRasMEK" id="bRafRasMEK"                       kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="bRafRaspMEK" id="bRafRaspMEK"                     kdiff="0"    kdiffunit="mu2/s"/>
	
	<Specie name="SynGap"                              id="SynGap"                kdiff="0"     kdiffunit="mu2/s"/>
	<Specie name="pSynGap"                             id="pSynGap"               kdiff="5"     kdiffunit="mu2/s"/>
	<Specie name="pSynden"                             id="pSynden"               kdiff="0"     kdiffunit="mu2/s"/>
	
	<Specie name="CK"                                  id="CK"                    kdiff="3.6"     kdiffunit="mu2/s"/>
	<Specie name="CKp"                                 id="CKp"                   kdiff="3.6"     kdiffunit="mu2/s"/>
	<Specie name="CKpPP1"                              id="CKpPP1"                kdiff="0"     kdiffunit="mu2/s"/>
	<Specie name="cAMP"           			   id="cAMP"          	      kdiff="86.4"  kdiffunit="mu2/s"/>
	<Specie name="CamCa4"                              id="CamCa4"                kdiff="0"     kdiffunit="mu2/s"/>
	<Specie name="CKCamCa4"                            id="CKCamCa4"              kdiff="3.6"     kdiffunit="mu2/s"/>
	<Specie name="CKpCamCa4"                           id="CKpCamCa4"             kdiff="3.6"     kdiffunit="mu2/s"/>	
	<Specie name="CKpCamCa4SynGap"                     id="CKpCamCa4SynGap"       kdiff="0"     kdiffunit="mu2/s"/>
	
	<Specie name="RasGRF" id="RasGRF"                             kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="CamCa4GRF" id="CamCa4GRF"                             kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="CamCa4GRFRas" id="CamCa4GRFRas"                 kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="inactRasGRF" id="inactRasGRF"                             kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="PkcCaDagAAinactRasGRF" id="PkcCaDagAAinactRasGRF"                             kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="PkcCaDaginactRasGRF" id="PkcCaDaginactRasGRF"                             kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="PkcDagAAinactRasGRF" id="PkcDagAAinactRasGRF"                             kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="PkcDaginactRasGRF" id="PkcDaginactRasGRF"                             kdiff="0"    kdiffunit="mu2/s"/>
	
	<Specie name="RasSynGap" id="RasSynGap"                                   kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="RaspSynGap" id="RaspSynGap"                                 kdiff="0"    kdiffunit="mu2/s"/>
	
	<Specie name="RasGDP" id="RasGDP"                                         kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="rasGap" id="rasGap"                                         kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="RasGTPGap" id="RasGTPGap"                                   kdiff="0"    kdiffunit="mu2/s"/>
	
	
	
	<!-- Gs coupled Dopamine D1 Receptor; Ligand currently called L,
     Dbuf is used to eliminate injected D -->
    <Specie name="Da"            id="Da"            kdiff="10"     kdiffunit="mu2/s"/>
    <Specie name="Dbuf"          id="Dbuf"          kdiff="1"      kdiffunit="mu2/s"/>
    <Specie name="DaDbuf"        id="DaDbuf"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="DaOut"         id="DaOut"         kdiff="1"      kdiffunit = "mu2/s"/>
    <Specie name="D1R"           id="D1R"           kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="DaD1R"         id="DaD1R"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Gsabg"         id="Gsabg"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="DaD1RGs"       id="DaD1RGs"       kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GsD1R"         id="GsD1R"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAcDaD1RGs"   id="PKAcDaD1RGs"   kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pDaD1RGs"      id="pDaD1RGs"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pGsD1R"        id="pGsD1R"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GsaGTP"        id="GsaGTP"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GsaGDP"        id="GsaGDP"        kdiff="0"     kdiffunit="mu2/s"/>
	
	
	<!-- GPER Molecules -->
	<Specie name="E2"            id="E2"            kdiff="10"     kdiffunit="mu2/s"/>
    <Specie name="GPER"          id="GPER"          kdiff="0"      kdiffunit="mu2/s"/>
    <Specie name="ERa"          id="ERa"          kdiff="0"      kdiffunit="mu2/s"/>
    
    <Specie name="E2GPER"        id="E2GPER"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="E2GPERGs"         id="E2GPERGs"         kdiff="0"      kdiffunit = "mu2/s"/>    
    <Specie name="GsGPER"          id="GsGPER"          kdiff="0"      kdiffunit="mu2/s"/>
    <Specie name="PKAcE2GPERGs"   id="PKAcE2GPERGs"   kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pE2GPERGs"      id="pE2GPERGs"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pGsGPER"        id="pGsGPER"        kdiff="0"     kdiffunit="mu2/s"/>
    
	
	<!-- This is AC5, from Gs model.  May need to add AC1 at some point -->
    <Specie name="AC5"             id="AC5"            kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="AC5Gsa"          id="AC5Gsa"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="AC5GsaATP"       id="AC5GsaATP"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="AC5Ca"           id="AC5Ca"          kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="AC5GsaCa"        id="AC5GsaCa"       kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="AC5GsaCaATP"     id="AC5GsaCaATP"    kdiff="0"     kdiffunit="mu2/s"/>
	
<!-- CaM from Gq files, with either C or N site binding first -->
    <Specie name="Cam"               id="Cam"               kdiff="11"    kdiffunit="mu2/s"/>
    <Specie name="CamCa2C"           id="CamCa2C"           kdiff="11"    kdiffunit="mu2/s"/>
    <Specie name="CamCa2N"           id="CamCa2N"           kdiff="11"    kdiffunit="mu2/s"/>
	
	<!-- calcium reaction subset, to adjust for proper basal calcium -->
<!-- calcium stuff first -->
    
    
    <Specie name="pmca"              id="pmca"              kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ncx"               id="ncx"               kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pmcaCa"            id="pmcaCa"            kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ncxCa" id="ncxCa" kdiff="0" kdiffunit="mu2/s"/>
<Specie name="CaOutLeak"      id="CaOutLeak"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Leak"           id="Leak"          kdiff="0"     kdiffunit="mu2/s"/>

<Specie name="CB"            id="CB"            kdiff="0"   kdiffunit="mu2/s"/>
<Specie name="CaB"      id="CaB" kdiff="0" kdiffunit="mu2/s"/>

<Specie name="CaOut"          id="CaOut"         kdiff="174.3" kdiffunit="mu2/s"/>
  <Specie name="Calbin"         id="Calbin"        kdiff="9.3"   kdiffunit="mu2/s"/>
    <Specie name="CalbinC"        id="CalbinC"       kdiff="9.3"   kdiffunit="mu2/s"/>
 
<Specie name="Cabuff"                id="Cabuff"                kdiff="0" kdiffunit="mu2/s"/>
<Specie name="Cbuff"                id="Cbuff"                kdiff="0" kdiffunit="mu2/s"/>
<Specie name="Cbuffslow"                id="Cbuffslow"                kdiff="0" kdiffunit="mu2/s"/>
<Specie name="Caextbuffslow"                id="Caextbuffslow"                kdiff="0" kdiffunit="mu2/s"/>


<Specie name="Epac"                                id="Epac"                kdiff="10"    kdiffunit="mu2/s"/>
<Specie name="EpacRap1"                            id="EpacRap1"                kdiff="10"    kdiffunit="mu2/s"/>
<Specie name="EpacAMP"                             id="EpacAMP"                kdiff="0"    kdiffunit="mu2/s"/>
  <Specie name="Epac1"          id="Epac1"         kdiff="10"    kdiffunit="mu2/s"/>
    <Specie name="Epac1cAMP"      id="Epac1cAMP"     kdiff="10"    kdiffunit="mu2/s"/>


<Specie name="Rap1SynGap"                          id="Rap1SynGap"            kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="Rap1pSynGap"                         id="Rap1pSynGap"           kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="rap1Gap"                          id="rap1Gap"            kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="Rap1GTPGap"                          id="Rap1GTPGap"            kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="bRafRap1MEK"                    id="bRafRap1MEK"                kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="bRafRap1pMEK"                   id="bRafRap1pMEK"                kdiff="0"    kdiffunit="mu2/s"/>

<Specie name="bRafRap1"                         id="bRafRap1"                kdiff="0"    kdiffunit="mu2/s"/>
<Specie name="Rap1GTP"                          id="Rap1GTP"            kdiff="0"     kdiffunit="mu2/s"/>
<Specie name="Raf1Rap1"                            id="Raf1Rap1"                  kdiff="0"    kdiffunit="mu2/s"/>

<Specie name="Rap1GDP"                          id="Rap1GDP"            kdiff="0"     kdiffunit="mu2/s"/>
<!-- PP1, PP2B, PP2A, CaMKII, PKA, Darpp32 from Gs, since Gq didn't have them -->     
<!-- PP1, PP2B, PP2A are non-diffusible? -->     
    <Specie name="PP2B"           id="PP2B"          kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PP2BCam"        id="PP2BCam"       kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PP2BCamCa2C"    id="PP2BCamCa2C"   kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PP2BCamCa2N"    id="PP2BCamCa2N"   kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PP2BCamCa4"     id="PP2BCamCa4"    kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PP1"            id="PP1"           kdiff="0"     kdiffunit="mu2/s"/>

<!-- PP2A -->
    <Specie name="PP2ABPR72"      id="PP2ABPR72"    kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PP2AB56d"       id="PP2AB56d"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAcPP2AB56d"   id="PKAcPP2AB56d" kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pPP2A"          id="pPP2A"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PP2Acal"        id="PP2Acal"       kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PP2ApRaf1"        id="PP2ApRaf1"       kdiff="0"     kdiffunit="mu2/s"/>
    
	    
      <!-- PKA -->
    <Specie name="PKA"            id="PKA"           kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAcAMP2"       id="PKAcAMP2"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAcAMP4"       id="PKAcAMP4"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAc"           id="PKAc"          kdiff="0.836" kdiffunit="mu2/s"/>
    <Specie name="PKAr"           id="PKAr"          kdiff="0"     kdiffunit="mu2/s"/>
    
    <!-- D32,D32p34 -->
    <Specie name="D32"            id="D32"           kdiff="8.9"   kdiffunit="mu2/s"/>
    <Specie name="D32PKAc"         id="D32PKAc"        kdiff="6.8"   kdiffunit="mu2/s"/>
    <Specie name="D32p34"           id="D32p34"          kdiff="8.8"   kdiffunit="mu2/s"/>
    <Specie name="D32p34PP1"        id="D32p34PP1"       kdiff="0"     kdiffunit="mu2/s"/>

    <Specie name="D32p34PP2BCamCa4" id="D32p34PP2BCamCa4" kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="D32p34PP1PP2BCamCa4" id="D32p34PP1PP2BCamCa4" kdiff="0"  kdiffunit="mu2/s"/>
    <Specie name="D32p34PP1PP2BCamCa2C" id="D32p34PP1PP2BCamCa2C" kdiff="0"  kdiffunit="mu2/s"/>
    <Specie name="D32p34PP2ABPR72"  id="D32p34PP2ABPR72" kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="D32p34PP2AB56d"   id="D32p34PP2AB56d"  kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="D32p34PP1PP2ABPR72" id="D32p34PP1PP2ABPR72" kdiff="0"  kdiffunit="mu2/s"/>
    <Specie name="D32p34PP1PP2AB56d" id="D32p34PP1PP2AB56d"  kdiff="0"  kdiffunit="mu2/s"/>

<!-- D32p75 -->
    <Specie name="Cdk5"           id="Cdk5"          kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Cdk5D32"        id="Cdk5D32"       kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="D32p75"           id="D32p75"          kdiff="8.8"   kdiffunit="mu2/s"/>
    <Specie name="D32p75PKAc"        id="D32p75PKAc"       kdiff="6.8"   kdiffunit="mu2/s"/>
    <Specie name="D32p75PP2ABPR72"  id="D32p75PP2ABPR72"  kdiff="0"   kdiffunit="mu2/s"/>
    <Specie name="D32p75PP2AB56d"   id="D32p75PP2AB56d"   kdiff="0"   kdiffunit="mu2/s"/>
    <Specie name="D32p75PP2Acal"      id="D32p75PP2Acal"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="D32p75pPP2A"      id="D32p75pPP2A"     kdiff="0"     kdiffunit="mu2/s"/>
	
	
    <Specie name="PDE10"          id="PDE10"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PDE10cAMP"      id="PDE10cAMP"     kdiff="0"     kdiffunit="mu2/s"/>
    
    <Specie name="AMP"      id="AMP"     kdiff="0"     kdiffunit="mu2/s"/>
    
    <Specie name="PDE4"          id="PDE4"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PDE4cAMP"      id="PDE4cAMP"     kdiff="0"     kdiffunit="mu2/s"/>
    
    <Specie name="PKAcPDE4"     id="PKAcPDE4"  kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="PKAcPDE4cAMP"  id="PKAcPDE4cAMP"  kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="PDE2"          id="PDE2"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PDE2cAMP"      id="PDE2cAMP"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PDE2cAMP2"      id="PDE2cAMP2"     kdiff="0"     kdiffunit="mu2/s"/>
    
    <Specie name="PKAcPDE10"      id="PKAcPDE10"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PKAcPDE10cAMP"  id="PKAcPDE10cAMP"  kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pPDE10"         id="pPDE10"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pPDE10cAMP"     id="pPDE10cAMP"    kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pPDE10PP2A"      id="pPDE10PP2A"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pPDE10PP2Ac"      id="pPDE10PP2Ac"     kdiff="0"     kdiffunit="mu2/s"/>
	   <Specie name="pPDE4"        id="pPDE4"     kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="pPDE4PP2A"     id="pPDE4PP2A"     kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="pPDE4PP2Ac"     id="pPDE4PP2Ac"     kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="pPDE4cAMP"    id="pPDE4cAMP" kdiff="0" kdiffunit="mu2/s"/>
	
	
 <!-- Gq coupled mGluR or mAChR receptor; ligand currently called Glu,
     GluOut is used to eliminate injected Glu -->
    <Specie name="Glu"            id="Glu"           kdiff="0.1"   kdiffunit="mu2/s"/>
    <Specie name="GluGbuf"        id="GluGbuf"       kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="GluOut"         id="GluOut"        kdiff="1"   kdiffunit="mu2/s"/>
    <Specie name="Gbuf"           id="Gbuf"          kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="MgluR"          id="MgluR"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GluMgluR"       id="GluMgluR"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GluMgluRdesens" id="GluMgluRdesens" kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="MgluRGq"        id="MgluRGq"       kdiff="0"     kdiffunit="mu2/s"/> 
    <Specie name="Gqabg"          id="Gqabg"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GluMgluRGq"     id="GluMgluRGq"    kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GqaGTP"         id="GqaGTP"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="GqaGDP"         id="GqaGDP"        kdiff="0"     kdiffunit="mu2/s"/>
    
    <Specie name="Gbg"           id="Gbg"           kdiff="0"     kdiffunit="mu2/s"/>
    
    <!-- Gq, PLC, Dag, IP3, PKC and 2ag are from Gq model --> 
    <Specie name="Plc"            id="Plc"           kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PlcCa"          id="PlcCa"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PlcCaGqa"       id="PlcCaGqa"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PlcGqa"         id="PlcGqa"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Pip2"           id="Pip2"          kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PlcCaPip2"      id="PlcCaPip2"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PlcCaGqaPip2"   id="PlcCaGqaPip2"  kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Ip3"            id="Ip3"           kdiff="79.6"  kdiffunit="mu2/s"/>
    <Specie name="Dag"            id="Dag"           kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PlcCaGbg"       id="PlcCaGbg"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PlcGbg"         id="PlcGbg"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PlcCaGbgPip2"   id="PlcCaGbgPip2"  kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PlcGbgPip2"   id="PlcGbgPip2"  kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PlcGqaPip2"   id="PlcGqaPip2"  kdiff="0"     kdiffunit="mu2/s"/>

    
    <Specie name="PlcCaGqaGbg"       id="PlcCaGqaGbg"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PlcGqaGbg"         id="PlcGqaGbg"        kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PlcCaGqaGbgPip2"   id="PlcCaGqaGbgPip2"  kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PlcGqaGbgPip2"   id="PlcGqaGbgPip2"  kdiff="0"     kdiffunit="mu2/s"/>

<!-- degradation of Dag, 2ag and IP3 -->
    <Specie name="DagK"           id="DagK"          kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="DagKdag"        id="DagKdag"       kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PA"             id="PA"            kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="2agDegrad"      id="2agDegrad"     kdiff="88.6"  kdiffunit="mu2/s"/>
    <Specie name="Ip3degrad"      id="Ip3degrad"     kdiff="79.6"  kdiffunit="mu2/s"/>
<!-- Production of endocannabinoid -->
    <Specie name="Dgl"            id="Dgl"           kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pDgl"           id="pDgl"          kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CaDgl"          id="CaDgl"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="CapDgl"          id="CapDgl"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="DagCaDgl"       id="DagCaDgl"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="DagCapDgl"       id="DagCapDgl"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="2ag"            id="2ag"           kdiff="88.6"  kdiffunit="mu2/s"/>
    <Specie name="Dgl_CKCamCa4"   id="Dgl_CKCamCa4"   kdiff="0"   kdiffunit="mu2/s"/>
    <Specie name="Dgl_CKpCamCa4"  id="Dgl_CKpCamCa4"  kdiff="0"   kdiffunit="mu2/s"/>
    <Specie name="CaDgl_CKCamCa4"   id="CaDgl_CKCamCa4"   kdiff="0"   kdiffunit="mu2/s"/>
    <Specie name="CaDgl_CKpCamCa4"  id="CaDgl_CKpCamCa4"  kdiff="0"   kdiffunit="mu2/s"/>
    <Specie name="Dgl_CKp"        id="Dgl_CKp"        kdiff="0"   kdiffunit="mu2/s"/>

<!-- Kinases and Phosphatases -->    
    <Specie name="PIkinase"       id="PIkinase"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Ip3degPIk"      id="Ip3degPIk"     kdiff="0"     kdiffunit="mu2/s"/>
    
    <Specie name="E2ERaMgluRdesens" id="E2ERaMgluRdesens" kdiff="0"    kdiffunit="mu2/s"/>
 
<Specie name="E2ERa"            id="E2ERa"            kdiff="0"     kdiffunit="mu2/s"/>
    
    <Specie name="E2ERaMgluR"          id="E2ERaMgluR"         kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="E2ERaMgluRGq"     id="E2ERaMgluRGq"    kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="SynGapPSD95"                              id="SynGapPSD95"                kdiff="0"     kdiffunit="mu2/s"/>
	<Specie name="PSD95"                              id="PSD95"                kdiff="0"     kdiffunit="mu2/s"/>
	<Specie name="RasSynGapPSD95"     id="RasSynGapPSD95"    kdiff="0"     kdiffunit="mu2/s"/>
        <Specie name="Rap1SynGapPSD95"     id="Rap1SynGapPSD95"    kdiff="0"     kdiffunit="mu2/s"/>
        <Specie name="CKpCamCa4SynGapPSD95"                              id="CKpCamCa4SynGapPSD95"                kdiff="0"     kdiffunit="mu2/s"/>
    
	  
	   
    
	  

 <!--GPER Reactions-->
   
   <Reaction name = "E2+GPER-E2GPER" id="E2+GPER-E2GPER">                     
        <Reactant specieID="E2"                      />
        <Reactant specieID="GPER"                      />
        <Product  specieID="E2GPER"                     />

        <forwardRate> 0.3889e-5 </forwardRate>   <!--e-6 are actual rates,tuned to have a peak at 20mins ,susan aronica-->
        <reverseRate> 1.050e-5       </reverseRate>
    </Reaction>
   
   
   <Reaction name = "E2GPER + Gs-E2GPERGs" id="E2+ERa-E2ERa">
        <Reactant specieID="E2GPER"                      />
        <Reactant specieID="Gsabg"                      />
        <Product  specieID="E2GPERGs"                     />

        <forwardRate> 0.03e-03 </forwardRate>       
        <reverseRate> 0.4e-03        </reverseRate>
    </Reaction>
    
    
    
   
 
 
   <Reaction name = "E2GPERGs-E2GPER+GsaGTP+Gbg reac" id="E2GPERGs-E2GPER+GsaGTP+Gbg_id">
        <Reactant specieID="E2GPERGs"                    />
        <Product  specieID="E2GPER"                  />
        <Product  specieID="GsaGTP"                  />
        <Product  specieID="Gbg"                  />

        <forwardRate> 0.025e-3        </forwardRate>   <!--Original Rate is 0.15e-3--><!-- Revised rate is 0.05e-3-->
        <reverseRate> 0          </reverseRate>		<!--Reducing gsagtp production to match susan aronica,10x increase in cAMP which peaks at 20-30min.Also 2x AC at 20mins-->
    </Reaction>

	  
<!--II. *********** Gs coupled receptor, from GS RXN FILE *************-->
   
    <Reaction name = "E2Ebuf--E2+Ebuf" id="E2Ebuf--E2+Ebuf">
        <Reactant specieID="E2Ebuf"                      />
        <Product  specieID="Ebuf"                      />
        <Product  specieID="E2"                     />
        <forwardRate> 20e-03 </forwardRate>
        <reverseRate> 0      </reverseRate>
    </Reaction>
 
    <Reaction name = "E2--E2Out" id="E2--E2Out">
  	<Reactant specieID="E2"/>
        <Product  specieID="E2Out"                   />
        <forwardRate> 1e-3      </forwardRate> <!--1e-5 for yapo bath tuning-->
        <reverseRate> 0.025e-6      </reverseRate> <!-- 0.055e-6 is original rate nadia,0.095e-6 for 20nM basal Da-->
    </Reaction>

  
    <Reaction name = "E2Out+Ebuf--NULL" id="E2Out_buf--NULL">
        <Reactant specieID="E2Out"                      />
        <Reactant specieID="Ebuf"                      />
        <forwardRate> 1e-06 </forwardRate>
        <reverseRate> 0      </reverseRate>
    </Reaction>



<Reaction name = "PkcCa+Dag--PkcCaDag" id="PkcCa+Dag--PkcCaDag">
        <Reactant specieID="Pkc"               />
        <Reactant specieID="Dag"             />
        <Product  specieID="PkcDag"            />

        <forwardRate> 0.06e-6    </forwardRate> <!--reducing by 10x, original 0.6e-6 -->
        <reverseRate>  0.1e-3   </reverseRate> 
    </Reaction>
    
    
    
  <Reaction name = "PkcCa+Dag--PkcCaDag" id="PkcCa+Dag--PkcCaDag">
        <Reactant specieID="PkcDag"               />
        <Reactant specieID="AA"             />
        <Product  specieID="PkcDagAA"            />

        <forwardRate> 0.018e-3   </forwardRate>
        <reverseRate>  2e-3   </reverseRate>
    </Reaction>
    
    <Reaction name = "PkcCaDagAA+Raf1--PkcCaDagRaf1" id="PkcCaDagAA+Raf1--PkcCaDagAARaf1">
        <Reactant specieID="PkcDagAA"           />		
        <Reactant  specieID="Raf1"               />
        <Product  specieID="PkcDagAARaf1"               />

        <forwardRate> 0.02e-1   </forwardRate>  <!--(Original 0.02e-3 Upi)-->
	<reverseRate> 1.068e-3   </reverseRate>
		
    </Reaction>

	<Reaction name = "PkcCaDagRaf1--PkcCaDag+Raf1Ras" id="PkcCaDagAARaf1--PkcCaDagAA--pRaf1">
        <Reactant specieID="PkcDagAARaf1"           />
        <Product  specieID="pRaf1"               />
        <Product  specieID="PkcDagAA"               />

        <forwardRate>  0.267e-3  </forwardRate>
	<reverseRate> 0   </reverseRate>

  </Reaction>	



<Reaction name = "E2" id= "E2">
        <Product  specieID="E2"               />

        <forwardRate>  0.1e-3   </forwardRate>  <!--1e-3 for 100nM-->
        <reverseRate> 0.02e-3         </reverseRate> <!--0.01e-3-->
        
 </Reaction>
    
 
<Reaction name = "E2+ERa-E2ERa" id="E2+ERa-E2ERa">
        <Reactant specieID="E2"                      />
        <Reactant specieID="ERa"                      />
        <Product  specieID="E2ERa"                     />

        <forwardRate> 1e-7 </forwardRate>   <!--Kuiper Kd=0.1nM-->
        <reverseRate>  1e-8     </reverseRate> 
    </Reaction>

<!--1a. Glu or Glu agonist Dhpg: Glu + MgluR <==> GluMgluR
    1st set of rates is for Dhpg, 2nd set of rates for Glu  -->
      <Reaction name = "Glu+MgluR--GluMgluR" id="Glu+MgluR--GluMgluR">
        <Reactant specieID="E2ERa"              />
        <Reactant specieID="MgluR"              />
        <Product  specieID="E2ERaMgluR"         />

        <forwardRate> 0.001e-03 </forwardRate> <!-- increased it 100x-->
  <!--      <reverseRate> 13.2e-03      </reverseRate> -->
	<!-- uncomment below and comment above for Glu (opposite for Dhpg) -->
        <reverseRate> 0.5e-03      </reverseRate>
    </Reaction>

<!--0c. GluMgluR <==> Desensitized, needed for prolonged DHPG application -->
      <Reaction name = "Glu+MgluR-GluMgluRdesens" id="Glu+MgluR-GluMgluRdesens">
        <Reactant specieID="E2ERaMgluR"              />
        <Product  specieID="E2ERaMgluRdesens"         />

        <forwardRate> 0.0125e-03 </forwardRate>
        <reverseRate> 0.001e-03      </reverseRate>
    </Reaction>


    <!--2a. Gqabg + GluMgluR    <-> GluMgluRGq    -->
    <Reaction name = "Gqabg+GluMgluR--GluMgluRGq" id="Gqabg+GluMgluR--GluMgluRGq">
        <Reactant specieID="Gqabg"               />
        <Reactant specieID="E2ERaMgluR"             />
        <Product  specieID="E2ERaMgluRGq"            />

        <forwardRate>  0.009e-03  </forwardRate>
        <reverseRate>   1.36e-03  </reverseRate>
    </Reaction>


   <!--2b. Glu + MgluRGq <-> GluMgluRGq -->
   <Reaction name = "Glu+MgluRGq- -GluMgluRGq" id="Glu+MgluRGq- -GluMgluRGq">
        <Reactant specieID="E2ERa" />
        <Reactant specieID="MgluRGq" />
        <Product specieID="E2ERaMgluRGq" />

        <forwardRate> 0.004e-03 </forwardRate>
        <reverseRate> 26.4e-03      </reverseRate>
	<!-- uncomment below and comment above for Glu (opposite for Dhpg) -->
        <!--reverseRate> 1e-03 </reverseRate-->
   </Reaction>

   <!--3. GabgGluMglu    <-> GqaGTP + GluMgluRGbg -->
    <Reaction name = "GluMgluRGq--GqaGTP+GluMgluRGbg" id="GluMgluRGq--GqaGTP+GluMgluRGbg">
        <Reactant specieID="E2ERaMgluRGq"               />
        <Product specieID="GqaGTP"             />
        <Product specieID="E2ERaMgluR"            /> 
        <Product specieID="Gbg"             />
 
        <forwardRate>  1.5e-03 </forwardRate>
        <reverseRate>   0  </reverseRate>
    </Reaction>


<!--Adding the PKC loop of ERK activation from Bhallas paper

The rxns added are PKC activation of Raf1,ppERK activating pla2 which in turn activates apc to arichadonic acid.Now AA activates pkc-->
           
	<!-- (Raf1 binds to Ras, step 1) RasGTP + Raf1 <-> RasGTPRaf1 -->
    
    
	 <Reaction name = "APC+Pla2ac--Pla2acAPC" id="APC+Pla2ac--Pla2acAPC">
        <Reactant specieID="Pla2ac"           />
        <Reactant  specieID="APC"               />
        <Product  specieID="Pla2acAPC"               />

        <forwardRate> 0.001e-3  </forwardRate>
	<reverseRate> 0.002   </reverseRate>
		
    </Reaction>

     <Reaction name = "Pla2acAPC--AA+pla2ac" id="Pla2acAPC--AA+pla2ac">
        <Reactant specieID="Pla2acAPC"           />
        <Product  specieID="AA"               />
        <Product  specieID="Pla2ac"               />

        <forwardRate>  0.003e-1  </forwardRate>
	<reverseRate> 0   </reverseRate>
		
    </Reaction>
    

    


    <Reaction name = "APC+Pla2ac--Pla2acAPC" id="APC+Pla2ac--Pla2acAPC">
        <Reactant specieID="pPla2ac"           />
        <Reactant  specieID="APC"               />
        <Product  specieID="pPla2acAPC"               />

        <forwardRate> 0.001e-3   </forwardRate>
	<reverseRate> 0.002   </reverseRate>
		
    </Reaction>

     <Reaction name = "pPla2acAPC--AA+pla2ac" id="pPla2acAPC--AA+pla2ac">
        <Reactant specieID="pPla2acAPC"           />
        <Product  specieID="AA"               />
        <Product  specieID="pPla2ac"               />

        <forwardRate>  0.012e-1  </forwardRate>
	<reverseRate> 0   </reverseRate>
		
    </Reaction>
    
    <!-- These are values from Hellgren Kotaleski PKC paper. 2.5 uM affinity -->
    <!-- Pkc + Ca    <->   PkcCa  -->
    <Reaction name = "Pkc+Ca--PkcCa" id="Pkc+Ca--PkcCa">
        <Reactant specieID="Ca"           />
        <Reactant specieID="Pkc"              />
        <Product  specieID="PkcCa"               />

        <forwardRate> 0.020e-03   </forwardRate>
        <reverseRate> 50e-03        </reverseRate>
    </Reaction>
 
<!-- THese are values from Hellgren Kotaleski PKC paper. 10 uM affinity
MUCH slower binding compared to CaDgl  -->
   <!-- PkcCa + Dag    <-> PkcCaDag    -->
    <Reaction name = "PkcCa+Dag--PkcCaDag" id="PkcCa+Dag--PkcCaDag">
        <Reactant specieID="PkcCa"               />
        <Reactant specieID="Dag"             />
        <Product  specieID="PkcCaDag"            />

        <forwardRate> 0.015e-05   </forwardRate>
        <reverseRate>  0.15e-03   </reverseRate>
    </Reaction>

    
    					
     <Reaction name = "AA+PkcCaDag--PkcCaAADag" id="AA+PkcCaDag--PkcCaAADag">
        <Reactant specieID="PkcCaDag"           />
        <Reactant  specieID="AA"               />
        <Product  specieID="PkcCaDagAA"               />     <!--Jeanette persistentPKC -->

        <forwardRate> 0.001e-5   </forwardRate>
	<reverseRate> 0.02e-3   </reverseRate>
		
    </Reaction>


    
    
    
    
 
	<Reaction name = "PkcCaDagAA+Raf1--PkcCaDagRaf1" id="PkcCaDagAA+Raf1--PkcCaDagAARaf1">
        <Reactant specieID="PkcCaDagAA"           />		
        <Reactant  specieID="Raf1"               />
        <Product  specieID="PkcCaDagAARaf1"               />

        <forwardRate> 0.02e-2   </forwardRate>  <!--(Original 0.02e-3,,,Last run 0.02e-2)-->
	<reverseRate> 1.068e-3   </reverseRate>
		
    </Reaction>

	<Reaction name = "PkcCaDagRaf1--PkcCaDag+Raf1Ras" id="PkcCaDagAARaf1--PkcCaDagAA--pRaf1">
        <Reactant specieID="PkcCaDagAARaf1"           />
        <Product  specieID="pRaf1"               />
        <Product  specieID="PkcCaDagAA"               />

        <forwardRate>  0.267e-3  </forwardRate>
	<reverseRate> 0   </reverseRate>

  </Reaction>	
	
<Reaction name = "PkcCaDag+Raf1--PkcCaDagRaf1" id="PkcCaDag+Raf1--PkcCaDagAARaf1">
        <Reactant specieID="PkcCaDag"           />		
        <Reactant  specieID="Raf1"               />
        <Product  specieID="PkcCaDagRaf1"               />

        <forwardRate> 0.02e-4   </forwardRate>  <!--(Original 0.02e-3,,,Last run 0.02e-4)-->
	<reverseRate> 1.068e-3   </reverseRate>
		
    </Reaction>

	<Reaction name = "PkcCaDagRaf1--PkcCaDag+Raf1Ras" id="PkcCaDagAARaf1--PkcCaDagAA--pRaf1">
        <Reactant specieID="PkcCaDagRaf1"           />
        <Product  specieID="pRaf1"               />
        <Product  specieID="PkcCaDag"               />

        <forwardRate>  0.267e-3  </forwardRate>
	<reverseRate> 0   </reverseRate>

  </Reaction>	
  



 
   	
   	
   	

  <Reaction name="PP2A+pRaf1-- PP2ApRaf1" id="PP2A+pRaf1-- PP2ApRaf1">
	<Reactant specieID="PP2A"           />
        <Reactant specieID="pRaf1"               />
        <Product  specieID="PP2ApRaf1"               />

        <forwardRate> 0.1475e-4  </forwardRate> <!--  was upi but this is gallimore -->
	<reverseRate> 1.86e-3   </reverseRate> <!---->
  </Reaction>	

   <Reaction name="PP2ApRaf1-- Raf1" id="PP2ApRaf1-- Raf1">
	<Reactant specieID="PP2ApRaf1"           />
        <Product  specieID="Raf1"               />
        <Product  specieID="PP2A"               />

        <forwardRate>  0.446e-3  </forwardRate> <!--0.446e-3-->
	<reverseRate> 0   </reverseRate>
      

</Reaction>
     
    
     <Reaction name = "ppERK+Pla2--ppERKpla2" id="ppERK+Pla2--ppERKpla2">
        <Reactant specieID="ppERK"           />
        <Reactant  specieID="Pla2ac"               />
        <Product  specieID="ppERKPla2ac"               />

        <forwardRate> 0.260e-3   </forwardRate>
	<reverseRate> 5.33   </reverseRate>
		
    </Reaction>

     <Reaction name = "ppERKpla2--ppERK+pla2ac" id="ppERKpla2--ppERK+pla2ac">
        <Reactant specieID="ppERKPla2ac"           />
        <Product  specieID="ppERK"               />
        <Product  specieID="pPla2ac"               />

        <forwardRate>  1.33  </forwardRate>
	<reverseRate> 0   </reverseRate>
		
    </Reaction>
    
   

     <Reaction name = "Pla2+Ca--Pla2Ca" id="Pla2+Ca--Pla2Ca">
        <Reactant specieID="Pla2"           />
        <Reactant  specieID="Ca"               />
	<Product  specieID="Pla2Ca"  />
	
        <forwardRate> 0.0177e-3   </forwardRate>
	<reverseRate> 0.1545   </reverseRate>
		
    </Reaction>

    <Reaction name = "Pla2Ca+Ca--Pla2Ca" id="Pla2Ca+Ca--Pla2Ca">
        <Reactant specieID="Pla2Ca"           />
        <Reactant  specieID="Ca"               />
        <Product  specieID="Pla2ac"               />     <!--Ca binding to Pla2 ,Gallimore Cell report-->

        <forwardRate> 0.0163e-3   </forwardRate>
	<reverseRate> 0.101   </reverseRate>
	
	
    </Reaction>
	<!-- RasGTP activates Raf1 -->
    
    <!-- (Raf1 binds to Ras, step 1) RasGTP + Raf1 <-> RasGTPRaf1 -->
    <Reaction name = "RasGTP+Raf1--Raf1RasGTP" id="RasGTP+Raf1--Raf1Ras">
        <Reactant specieID="RasGTP"           />
        <Reactant  specieID="Raf1"               />
        <Product  specieID="Raf1Ras"               />

	<forwardRate> 0.06e-3   </forwardRate> <!-- 0.06e-3 is Nadias Rates,but Upi uses 0.006e-3 HAVE A LOOK AT THIS RATE AGN,might hv messed up conversion,im using 0.006-->
	<reverseRate> 1e-3   </reverseRate>	<!-- 1e-3 is original rate but i modified it to 10e-3 -->
	
    </Reaction>

    <!-- RasGTP activates pRaf1 -->
    
    <!-- (Raf1 binds to Ras, step 1) RasGTP + Raf1 <-> RasGTPRaf1 -->
    <Reaction name = "Ras+pRaf1--pRaf1RasGTP" id="RasGTP+pRaf1--pRaf1Ras">
        <Reactant specieID="RasGTP"           />
        <Reactant  specieID="pRaf1"               />
        <Product  specieID="pRaf1Ras"               />

        <forwardRate> 0.6e-3   </forwardRate>	<!--Upis Rates are kf= 60,Kb=0.5//My tweaked rates are Kf=1e-3 and Kb=5e-3-->
	<reverseRate> 0.5e-3   </reverseRate>    
	
    </Reaction>
    
    
   
    
    
    
    
    
   <Reaction name = "AA -> " id = "AA -> NULL">
    	<Reactant specieID="AA"		/>
	<Product specieID="APC"/>
	<forwardRate> 0.4e-5 </forwardRate>  <!-- 0.4e-6 last run value,still reducing slightly-->
	<reverseRate>0</reverseRate>
	
    </Reaction>
       
     
   <Reaction name="PP2A+pPla2ac--Pla2ac" id="PP2A+pPla2ac--Pla2ac">
   <Reactant specieID="pPla2ac"/>
   <Reactant specieID="PP2A"/>
   <Product specieID="pPla2acPP2A"/>

   <forwardRate>1e-6</forwardRate>
   <reverseRate>1.4e-3</reverseRate>
   </Reaction>

 <Reaction name="PP2A+pPla2ac--Pla2ac" id="PP2A+pPla2ac--Pla2ac">
  <Reactant specieID="pPla2acPP2A"/>
  <Product specieID="PP2A"/>
  <Product specieID="Pla2ac"/>

  <forwardRate>0.8e-3</forwardRate>
  <reverseRate>0</reverseRate>
  </Reaction>

     
     
     <Reaction name = "Raf1Ras+Raf1Ras--2Raf1RasGTP" id="Raf1Ras+Raf1Ras--2Raf1RasGTP">
        <Reactant specieID="Raf1Ras"      n="2"     />
        <Product  specieID="dRaf1Ras"               />

        <forwardRate> 0.02e-3   </forwardRate> <!-- 0.02e-3 is nadia rate Raf1Ras dimers-->	
	<reverseRate> 0.5e-3   </reverseRate>
	
      </Reaction>
      
      
      <!-- (pRaf1Ras dimerize) RasGTPpRaf1*2 <-> dpRasGTPRaf1 -->
    <Reaction name = "pRaf1Ras+pRaf1Ras--2pRaf1RasGTP" id="pRaf1Ras+pRaf1Ras--2pRaf1RasGTP">
        <Reactant specieID="pRaf1Ras"      n="2"     />
        <Product  specieID="dpRaf1Ras"               />

        <forwardRate> 0.02e-3   </forwardRate> <!-- pRaf1Ras dimer same rate of formation as raf1ras dimer,previously i did use 10x dimer-->
	<reverseRate> 0.5e-3   </reverseRate>
	
      </Reaction>


      


     
     
     
     
     
     
     
     
     <!--ERK ACTIVATION BY ppMAPKK-->


    <!--ERK ACTIVATION BY ppMAPKK (Included two sites for ERK phosphorylation Y and T)-->


    <!--(ERK phos by ppMAPKK) ppMAPKK+ERK <-> ppMAPKKERK <-> pERK+ppMAPKK-->
    <Reaction name = "ppMAPKK+ERK--ppMAPKKERK" id="ppMAPKK+ERK--ppMAPKKERK">
        <Reactant specieID="ppMEK"           />
        <Reactant specieID="ERK"              />
        <Product  specieID="ppMEKERK"               />

        <forwardRate> 0.032e-3   </forwardRate>
        <reverseRate> 1.200e-3   </reverseRate>
      
    </Reaction>
    
    <Reaction name = "ppMEKERK--pERK+ppMAPKK" id="ppMAPKKERK--pERK+ppMAPKK">
        <Reactant specieID="ppMEKERK"           />
        <Product  specieID="ERKpY"               />
        <Product  specieID="ppMEK"               />

        <forwardRate> 0.3e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
      
    </Reaction>
    
    <!--(ERK phos by ppMAPKK) ppMAPKK+ERK <-> ppMAPKKERK <-> pERK+ppMAPKK-->
    <Reaction name = "ppMAPKK+ERK--ppMAPKKERK" id="ppMAPKK+ERK--ppMAPKKERK">
        <Reactant specieID="ppMEK"           />
        <Reactant specieID="ERK"              />
        <Product  specieID="ppMEKERK"               />

        <forwardRate> 0.032e-3   </forwardRate>
        <reverseRate> 1.200e-3   </reverseRate>
      
    </Reaction>
    
    <Reaction name = "ppMEKERK--pERK+ppMAPKK" id="ppMAPKKERK--pERK+ppMAPKK">
        <Reactant specieID="ppMEKERK"           />
        <Product  specieID="ERKpT"               />
        <Product  specieID="ppMEK"               />

        <forwardRate> 0.3e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
      
    </Reaction>




    
<!--(pERK phos by ppMAPKK) ppMAPKK+pERK <-> ppMAPKKpERK <-> ppERK+ppMAPKK-->
    <Reaction name = "ppMAPKK+pERK--ppMAPKKpERK" id="ppMAPKK+pERK--ppMAPKKpERK">
        <Reactant specieID="ppMEK"           />
        <Reactant specieID="ERKpY"              />
        <Product  specieID="ppMEKpERK"               />

       <forwardRate> 0.032e-3   </forwardRate>
       <reverseRate> 1.200e-3   </reverseRate>
      
    </Reaction>
    <Reaction name = "ppMAPKKpERK--ppERK+ppMAPKK" id="ppMAPKKpERK--ppERK+ppMAPKK">
        <Reactant specieID="ppMEKpERK"           />
        <Product specieID="ppERK"              />
        <Product  specieID="ppMEK"               />

       <forwardRate> 0.3e-3   </forwardRate>
       <reverseRate> 0        </reverseRate>
      
    </Reaction>
    

<!--(pERK phos by ppMAPKK) ppMAPKK+pERK <-> ppMAPKKpERK <-> ppERK+ppMAPKK-->
    <Reaction name = "ppMAPKK+pERK--ppMAPKKpERK" id="ppMAPKK+pERK--ppMAPKKpERK">
        <Reactant specieID="ppMEK"           />
        <Reactant specieID="ERKpT"              />
        <Product  specieID="ppMEKpERK"               />

       <forwardRate> 0.032e-3   </forwardRate>
       <reverseRate> 1.200e-3   </reverseRate>
      
    </Reaction>
    <Reaction name = "ppMAPKKpERK--ppERK+ppMAPKK" id="ppMAPKKpERK--ppERK+ppMAPKK">
        <Reactant specieID="ppMEKpERK"           />
        <Product specieID="ppERK"              />
        <Product  specieID="ppMEK"               />

       <forwardRate> 0.3e-3   </forwardRate>
       <reverseRate> 0        </reverseRate>
      
    </Reaction>
    
    
<!--ERK INACTIVATION BY MKP1 and STEP -->

<!--(ppERK dephos by MKP1) ppERK+MKP1<-> ppERKMKP1 <-> pERK+MKP1-->
    <Reaction name = "ppERK+MKP1--ppERKMKP1" id="ppERK+MKP1--ppERKMKP1">
        <Reactant specieID="ppERK"           />
        <Reactant specieID="MKP1"              />
        <Product  specieID="ppERKMKP1"               />

        <forwardRate> 0.150e-3  </forwardRate>
        <reverseRate> 16e-3  </reverseRate>
        
    </Reaction>
    <Reaction name = "ppERKMKP1--pERK+MKP1" id="ppERKMKP1--pERK+MKP1">
        <Reactant specieID="ppERKMKP1"           />
        <Product  specieID="ERKpY"               />
        <Product  specieID="MKP1"               />

        <forwardRate> 4e-3  </forwardRate>
        <reverseRate> 0  </reverseRate>
        
    </Reaction>
<!--(ppERK dephos by MKP1) ppERK+MKP1<-> ppERKMKP1 <-> pERK+MKP1-->
    <Reaction name = "ppERK+MKP1--ppERKMKP1" id="ppERK+MKP1--ppERKMKP1">
        <Reactant specieID="ppERK"           />
        <Reactant specieID="MKP1"              />
        <Product  specieID="ppERKMKP1"               />

        <forwardRate> 0.150e-3  </forwardRate>
        <reverseRate> 16e-3  </reverseRate>
        
    </Reaction>
    <Reaction name = "ppERKMKP1--pERK+MKP1" id="ppERKMKP1--pERK+MKP1">
        <Reactant specieID="ppERKMKP1"           />
        <Product  specieID="ERKpT"               />
        <Product  specieID="MKP1"               />

        <forwardRate> 4e-3  </forwardRate>
        <reverseRate> 0  </reverseRate>
        
    </Reaction>





<!--(pERK dephos by MKP1) pERK+MKP1<-> pERKMKP1 <-> ERK+MKP1-->
    <Reaction name = "pERK+MKP1--pERKMKP1" id="pERK+MKP1--pERKMKP1">
        <Reactant specieID="ERKpY"           />
        <Reactant specieID="MKP1"              />
        <Product  specieID="pERKMKP1"               />

        <forwardRate> 0.150e-3  </forwardRate>
        <reverseRate> 16e-3  </reverseRate>
        
       
    </Reaction>
    <Reaction name = "pERKMKP1--ERK+MKP1" id="pERKMKP1--ERK+MKP1">
        <Reactant specieID="pERKMKP1"           />
        <Product  specieID="ERK"               />
        <Product  specieID="MKP1"               />

        <forwardRate> 4e-3   </forwardRate>
        <reverseRate> 0   </reverseRate>
       
       </Reaction>

    <!--(pERK dephos by MKP1) pERK+MKP1<-> pERKMKP1 <-> ERK+MKP1-->
    <Reaction name = "pERK+MKP1--pERKMKP1" id="pERK+MKP1--pERKMKP1">
        <Reactant specieID="ERKpT"           />
        <Reactant specieID="MKP1"              />
        <Product  specieID="pERKMKP1"               />

        <forwardRate> 0.150e-3  </forwardRate>
        <reverseRate> 16e-3  </reverseRate>
        
       
    </Reaction>
    <Reaction name = "pERKMKP1--ERK+MKP1" id="pERKMKP1--ERK+MKP1">
        <Reactant specieID="pERKMKP1"           />
        <Product  specieID="ERK"               />
        <Product  specieID="MKP1"               />

        <forwardRate> 4e-3   </forwardRate>
        <reverseRate> 0   </reverseRate>
       
       </Reaction>

       
    <!--ppERK inactivation by STEP(2 separate sites and no order dependance.Earlier STEP only acted on ppERK)-->
       <Reaction name = "ppERK+STEP--ppERKSTEP" id="ppERK+STEP--ppERKSTEP">
	       <Reactant specieID="STEP"		/>
	       <Reactant specieID="ppERK"		/>
	       <Product  specieID="ppERKSTEP"		/>

	       <forwardRate> 0.01e-3   </forwardRate>
               <reverseRate> 2.4e-3   </reverseRate>

	</Reaction>

	 <Reaction name = "ppERKSTEP--pERK+STEP" id="ppERKSTEP--pERK+STEP">
               <Reactant specieID="ppERKSTEP"                />
               <Product specieID="ERKpT"               />
               <Product  specieID="STEP"           />

               <forwardRate> 0.6e-3   </forwardRate>
               <reverseRate> 0   </reverseRate>

        </Reaction>

<!--ppERK inactivation by STEPp (Only 1 site,no differentiation btw Thr and Ty)-->
       <Reaction name = "ppERK+STEPp--ppERKSTEPp" id="ppERK+STEPp--ppERKSTEPp">
               <Reactant specieID="STEPp"                />
               <Reactant specieID="ppERK"               />
               <Product  specieID="ppERKSTEPp"           />

               <forwardRate> 0  </forwardRate>
               <reverseRate> 2.4e-3   </reverseRate>

        </Reaction>

         <Reaction name = "ppERKSTEPp--pERK+STEPp" id="ppERKSTEP--pERK+STEPp">
               <Reactant specieID="ppERKSTEPp"                />
               <Product specieID="ERKpT"               />
               <Product  specieID="STEPp"           />

               <forwardRate> 0.6e-3   </forwardRate>
               <reverseRate> 0   </reverseRate>

        </Reaction>




<!--ERKpY inactivation by STEP(2 separate sites and no order dependance.Earlier STEP only acted on ppERK)-->
       <Reaction name = "pERK+STEP--pERKSTEP" id="pERK+STEP--pERKSTEP">
	       <Reactant specieID="STEP"		/>
	       <Reactant specieID="ERKpY"		/>
	       <Product  specieID="pERKSTEP"		/>

	       <forwardRate> 0.01e-3   </forwardRate>
               <reverseRate> 2.4e-3   </reverseRate>

	</Reaction>

	 <Reaction name = "pERKSTEP--pERK+STEP" id="pERKSTEP--ERK+STEP">
               <Reactant specieID="pERKSTEP"                />
               <Product specieID="ERK"               />
               <Product  specieID="STEP"           />

               <forwardRate> 0.6e-3   </forwardRate>
               <reverseRate> 0   </reverseRate>

        </Reaction>
        <!--ERKpY inactivation by STEPp (Only 1 site,no differentiation btw Thr and Ty)-->
       <Reaction name = "pERK+STEPp--pERKSTEPp" id="pERK+STEPp--pERKSTEPp">
               <Reactant specieID="STEPp"                />
               <Reactant specieID="ERKpY"               />
               <Product  specieID="pERKSTEPp"           />

               <forwardRate> 0  </forwardRate>
               <reverseRate> 2.4e-3   </reverseRate>

        </Reaction>

         <Reaction name = "ppERKSTEPp--pERK+STEPp" id="pERKSTEP--ERK+STEPp">
               <Reactant specieID="ppERKSTEPp"                />
               <Product specieID="ERK"               />
               <Product  specieID="STEPp"           />

               <forwardRate> 0.6e-3   </forwardRate>
               <reverseRate> 0   </reverseRate>

        </Reaction>       
 


     
     
     
      <!--MAPKK ACTIVATION BY Raf1 and praf1rasgtp (dimer)-->
    
<!--(MAPKK phos by Raf1RasGTP) MAPKK + Raf1RasGTP <-> Raf1RasGTPMAPKK <-> pMAPKK + Raf1RasGTP-->
    <Reaction name = "MAPKK+Raf1Ras--Raf1RasMAPKK" id="MAPKK+Raf1Ras--Raf1RasMAPKK">
        <Reactant specieID="MEK"           />
        <Reactant specieID="dRaf1Ras"              />
        <Product  specieID="dRaf1RasMEK"               />

        <forwardRate> 0.094286255e-3  </forwardRate>  <!--5x of nadias rates-->
        <reverseRate> 2.4e-3  </reverseRate>
      
    </Reaction>
    <Reaction name = "Raf1RasMAPKK--pMAPKK+Raf1Ras" id="Raf1RasMAPKK--pMAPKK+Raf1Ras">
        <Reactant specieID="dRaf1RasMEK"           />
        <Product  specieID="pMEK"               />
        <Product  specieID="dRaf1Ras"               />

        <forwardRate> 0.6e-3 </forwardRate>
        <reverseRate> 0  </reverseRate>
      
    </Reaction>
    
    <!--(pMAPKK phos by Raf1RasGTP) pMAPKK + Raf1RasGTP <-> Raf1RasGTPMAPKK <-> ppMAPKK + Raf1RasGTP-->
    
    <Reaction name = "pMAPKK+Raf1Ras--Raf1RaspMAPKK" id="pMAPKK+Raf1Ras--Raf1RaspMAPKK">
        <Reactant specieID="pMEK"           />
        <Reactant specieID="dRaf1Ras"              />
        <Product  specieID="dRaf1RaspMEK"               />

      <forwardRate> 0.094286255e-3  </forwardRate>
        <reverseRate> 2.4e-3  </reverseRate>
      
    </Reaction>
    <Reaction name = "Raf1RaspMAPKK--ppMAPKK+Raf1Ras" id="Raf1RaspMAPKK--ppMAPKK+Raf1Ras">
        <Reactant specieID="dRaf1RaspMEK"           />
        <Product  specieID="ppMEK"               />
        <Product  specieID="dRaf1Ras"               />

        <forwardRate> 0.6e-3   </forwardRate>
        <reverseRate> 0  </reverseRate>
      
    </Reaction>


<!--(MAPKK phos by pRaf1RasGTP) MAPKK + pRaf1RasGTP <-> paf1RasGTPMAPKK <-> pMAPKK + pRaf1RasGTP-->
    <Reaction name = "MAPKK+pRaf1Ras--pRaf1RasMAPKK" id="MAPKK+pRaf1Ras--pRaf1RasMAPKK">
        <Reactant specieID="MEK"           />
        <Reactant specieID="dpRaf1Ras"              />
        <Product  specieID="dpRaf1RasMEK"               />

        <forwardRate>  0.094286255e-3 </forwardRate>    <!--0.018857251e-3-->
        <reverseRate> 2.4e-3  </reverseRate>
      
    </Reaction>
    <Reaction name = "dpRaf1RasMAPKK--pMAPKK+dpRaf1Ras" id="dpRaf1RasMAPKK--pMAPKK+dpRaf1Ras">
        <Reactant specieID="dpRaf1RasMEK"           />
        <Product  specieID="pMEK"               />
        <Product  specieID="dpRaf1Ras"               />

        <forwardRate> 0.6e-3 </forwardRate>
        <reverseRate> 0  </reverseRate>
      
    </Reaction>
    
    <!--(pMAPKK phos by Raf1RasGTP) pMAPKK + Raf1RasGTP <-> Raf1RasGTPMAPKK <-> ppMAPKK + Raf1RasGTP-->
    
    <Reaction name = "pMAPKK+pRaf1Ras--pRaf1RaspMAPKK" id="pMAPKK+pRaf1Ras--pRaf1RaspMAPKK">
        <Reactant specieID="pMEK"           />
        <Reactant specieID="dpRaf1Ras"              />
        <Product  specieID="dpRaf1RaspMEK"               />

      <forwardRate> 0.094286255e-3  </forwardRate>
        <reverseRate> 2.4e-3  </reverseRate>
      
    </Reaction>
    <Reaction name = "dpRaf1RaspMAPKK--ppMAPKK+dpRaf1Ras" id="dpRaf1RaspMAPKK--ppMAPKK+dpRaf1Ras">
        <Reactant specieID="dpRaf1RaspMEK"           />
        <Product  specieID="ppMEK"               />
        <Product  specieID="dpRaf1Ras"               />

        <forwardRate> 0.6e-3   </forwardRate>
        <reverseRate> 0  </reverseRate>
      
    </Reaction>

	 <!--MAPKK ACTIVATION BY bRafRasGTP-->
    
<!--(MAPKK phos by bRafRasGTP) MAPKK + bRafRasGTP <-> bRafRasGTPMAPKK <-> pMAPKK + bRafRasGTP-->
    <Reaction name = "MAPKK+bRafRas--bRafRasMAPKK" id="MAPKK+bRafRas--bRafRasMAPKK">
        <Reactant specieID="MEK"           />
        <Reactant specieID="bRafRas"              />
        <Product  specieID="bRafRasMEK"               />

        <forwardRate> 0.00628575e-3  </forwardRate>
        <reverseRate> 0.8e-3  </reverseRate>
      
    </Reaction>
    <Reaction name = "bRafRasMAPKK--pMAPKK+bRafRas" id="bRafRasMAPKK--pMAPKK+bRafRas">
        <Reactant specieID="bRafRasMEK"           />
        <Product  specieID="pMEK"               />
        <Product  specieID="bRafRas"               />

        <forwardRate> 0.2e-3   </forwardRate>
        <reverseRate> 0  </reverseRate>
      
    </Reaction>
    
    <!--(pMAPKK phos by bRaf1RasGTP) pMAPKK + bRafRasGTP <-> bRafRasGTPMAPKK <-> ppMAPKK + bRafRasGTP-->
    
    <Reaction name = "pMAPKK+bRafRas--bRaf1RaspMAPKK" id="pMAPKK+bRafRasGTP--bRafRaspMAPKK">
        <Reactant specieID="pMEK"           />
        <Reactant specieID="bRafRas"              />
        <Product  specieID="bRafRaspMEK"               />

     <forwardRate> 0.00628575e-3  </forwardRate>
        <reverseRate> 0.8e-3  </reverseRate>
      
      
    </Reaction>
    <Reaction name = "bRafRaspMAPKK--ppMAPKK+bRafRas" id="bRafRaspMAPKK--ppMAPKK+bRafRas">
        <Reactant specieID="bRafRaspMEK"           />
        <Product  specieID="ppMEK"               />
        <Product  specieID="bRafRas"               />

        <forwardRate> 0.2e-3   </forwardRate>
        <reverseRate> 0  </reverseRate>
      
    </Reaction>

<!--MAPKK INACTIVATION BY PP2A-->
    
<!--(ppMAPKK dephos by PP2A) ppMAPKK+PP2A <-> ppMAPKKPP2A <-> pMAPKK+PP2A-->
    <Reaction name = "ppMAPKK+PP2A--ppMAPKKPP2A" id="ppMAPKK+PP2A--ppMAPKKPP2A">
        <Reactant specieID="ppMEK"           />
        <Reactant specieID="PP2A"              />
        <Product  specieID="ppMEKPP2A"               />
                    

        <forwardRate> 0.0019168e-3  </forwardRate>
        <reverseRate> 24.000000e-3  </reverseRate>
       
    </Reaction>
    <Reaction name = "ppMAPKKPP2A--pMAPKK+PP2A" id="ppMAPKKPP2A--pMAPKK+PP2A">
        <Reactant specieID="ppMEKPP2A"           />
        <Product  specieID="pMEK"               />
        <Product  specieID="PP2A"               />

        <forwardRate> 6e-3   </forwardRate>
        <reverseRate> 0  </reverseRate>
       
    </Reaction>

<!--(pMAPKK dephos by PP2A) pMAPKK+PP2A <-> pMAPKKPP2A <-> MAPKK+PP2A-->
    <Reaction name = "pMAPKK+PP2A--pMAPKKPP2A" id="pMAPKK+PP2A--pMAPKKPP2A">
        <Reactant specieID="pMEK"           />
        <Reactant specieID="PP2A"              />
        <Product  specieID="pMEKPP2A"               />

       <forwardRate> 0.0019168e-3  </forwardRate>
        <reverseRate> 24.000000e-3  </reverseRate>
       
    </Reaction>
    <Reaction name = "pMAPKKPP2A--MAPKK+PP2A" id="pMAPKKPP2A--pMAPKK+PP2A">
        <Reactant specieID="pMEKPP2A"           />
        <Product  specieID="MEK"               />
        <Product  specieID="PP2A"               />

        <forwardRate> 6e-3   </forwardRate>
        <reverseRate> 0  </reverseRate>
       
    </Reaction>


   
   
  <!-- RasGTP binding to bRaf -->
   
  <!-- (bRaf bind to  RasGTP) RasGTP + bRaf <-> bRafRasGTP -->
    <Reaction name = "RasGTP+Raf1--bRafRas" id="RasGTP+bRaf--bRafRas">
        <Reactant specieID="RasGTP"           />
        <Reactant  specieID="bRaf"               />
        <Product  specieID="bRafRas"               />

        <forwardRate> 0.006e-3   </forwardRate>
	<reverseRate> 0.5e-3   </reverseRate>
    </Reaction>


    
    <!--(Inactivation of Ras by RasGAP) RasGTP+RasGTPGAP <-> RasGTPGAP -> RasGAP + RasGDP -->

<Reaction name = "RasGTP+RasGTPGAP-- RasGTPGAP" id="RasGTP+RasGTPGAP-- RasGTPGAP">
  <Reactant specieID="RasGTP" />
  <Reactant specieID="rasGap" />
  <Product specieID="RasGTPGap" />

  <forwardRate> 0.0495e-3 </forwardRate>
  <reverseRate> 40e-3 </reverseRate>

</Reaction>

<Reaction name = "RasGTPGAP--RasGAP+RasGDP" id = "RasGTPGAP--RasGAP+RasGDP">
  <Reactant specieID="RasGTPGap" />
  <Product specieID="rasGap" />
  <Product specieID="RasGDP" />

  <forwardRate> 10e-3  </forwardRate>
  <reverseRate> 0  </reverseRate>

</Reaction>
 
     <!--STEP phosphorylation by PKAc and inactivation by PP1-->

	<Reaction name = "PKAc+STEP--PKAcSTEP"  id="PKAc+STEP--PKAcSTEP">
	    <Reactant specieID="PKAc"		/>
	    <Reactant specieID="STEP"		/>
	    <Product  specieID="PKAcSTEP"	/>

	    <forwardRate> 0.014e-3  </forwardRate>
            <reverseRate> 40e-3  </reverseRate>
    </Reaction>

    <Reaction name = "PKAcSTEP--PKAc+pSTEP"  id="PKAcSTEP--PKAc+pSTEP">
            <Reactant specieID="PKAcSTEP"           />
            <Product  specieID="STEPp"           />
            <Product  specieID="PKAc"       />

            <forwardRate> 10e-3  </forwardRate>
            <reverseRate> 0  </reverseRate>
    </Reaction>
	    
    <!--Dephosphorylation of STEP-->
     <Reaction name = "PP1+STEPp--PP1STEPp"  id="PP1+STEPp--PP1STEPp">
            <Reactant specieID="PP1"           />
            <Reactant specieID="STEPp"           />
            <Product  specieID="PP1STEPp"       />

            <forwardRate> 0.0029e-4  </forwardRate>
            <reverseRate>  32e-3  </reverseRate>
    </Reaction>


     <Reaction name = "PP1STEPp--PP1+STEP"  id="PP1STEPp--PP1+STEP">
            <Reactant specieID="PP1STEPp"           />
            <Product specieID="STEP"           />
            <Product  specieID="PP1"       />

            <forwardRate> 8e-3  </forwardRate>
            <reverseRate> 0  </reverseRate>
    </Reaction>

    
    <!-- Calcium binding -->

<!-- control Ca back to level on time  -->
<Reaction name ="ca+cbuff--cabuff" id="ca+cbuff--cabuff">
              <Reactant specieID="Ca"/>
              <Reactant specieID="Cbuff"/>
	      <Product specieID="Cabuff"/>

        <forwardRate> 0.1e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
</Reaction>
    
    
    
     
     	






<!--Calmodulin binding to calcium rxns-->

<!--1A) Cam  + 2Ca <-> CamCa2C GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamC_bind" id="CamC_bind">
	<Reactant specieID="Cam"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa2C"/>

	<forwardRate>6e-6</forwardRate>
	<reverseRate>9.1e-3</reverseRate>
	
    </Reaction>
  
<!--2A) CamCa2C  + 2Ca <-> CamCa4 GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamCa2C_bind" id="CamCa2C_bind">
	<Reactant specieID="CamCa2C"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa4"/>

	<forwardRate>0.1e-3</forwardRate>
	<reverseRate>1000e-3</reverseRate>
	
    </Reaction>

<!--1B) Cam  + 2Ca <-> CamCa2N GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamN_bind" id="CamN_bind">
	<Reactant specieID="Cam"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa2N"/>

	<forwardRate>0.1e-3</forwardRate>
	<reverseRate>1000e-3</reverseRate>

    </Reaction>

<!--2B) CamCa2N  + 2Ca <-> CamCa4 GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamCa2N_bind" id="CamCa2N_bind">
	<Reactant specieID="CamCa2N"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa4"/>

	<forwardRate>6e-6</forwardRate>
	<reverseRate>9.1e-3</reverseRate>

    </Reaction>
    
    <!-- New CamKII part -->

  <!--1) CamCa4 + CK <-> CKCamCa4  -->
    <Reaction name = "CK bind" id="CK-Cam_bind">
        <Reactant specieID="CamCa4"                 />
        <Reactant specieID="CK"                     />
        <Product  specieID="CKCamCa4"               />

        <forwardRate> 0.01e-3   </forwardRate>
        <reverseRate> 1.5e-3      </reverseRate>
        <!--0.8 from ode file
	    reverseRate> 0.8e-3      </reverseRate-->
    </Reaction>

<!--2a) 2 CKCamCa4  <-> 1  CKCamCa4 + 1 CKpCamCa4 -->
    <Reaction name = "CKCam bind" id="CKCam_pow2">
        <Reactant specieID="CKCamCa4"  power="2"        />
        <Product  specieID="CKCamCa4"          />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 3.83119676007e-10 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2b)  3 CKCamCa4  <-> 2 CKCamCa4 + 1 CKpCamCa4 -->
    <Reaction name = "CKCam bind" id="CKCam_pow3">
        <Reactant specieID="CKCamCa4"  power="3"        />
        <Product  specieID="CKCamCa4"  power="2"         />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 3.55792141502e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2c) 4 CKCamCa4  <-> 3  CKCamCa4 + 1 CKpCamCa4 -->
    <Reaction name = "CKCam bind" id="CKCam_pow4">
        <Reactant specieID="CKCamCa4"  power="4"        />
        <Product  specieID="CKCamCa4"   power="3"         />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 2.23694832822e-16 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2d)  2 CKpCamCa4 + 2 CKCamCa4 <-> 3 CKpCamCa4 + 1 CKCamCa4-->
    <Reaction name = "CKCam bind" id="CK2_CKpCam_pow2">
        <Reactant specieID="CKpCamCa4"  power="2"        />
        <Reactant specieID="CKCamCa4"  power="2"        />
        <Product  specieID="CKCamCa4"           />
        <Product  specieID="CKpCamCa4" power="3"         />

        <forwardRate> 1.10450093247e-18 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2e)  2 CKpCamCa4 + 2 CKCamCa4 <-> 3 CKpCamCa4 + 1 CKCamCa4-->
    <Reaction name = "CKCam bind" id="CK1_CKpCam_pow2">
        <Reactant specieID="CKpCamCa4"  power="2"        />
        <Reactant specieID="CKCamCa4"         />
        <Product  specieID="CKpCamCa4" power="3"         />

        <forwardRate> 3.0330636368e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2f)  2 CKpCamCa4 + 2 CKCamCa4 <-> 3 CKpCamCa4 + 1 CKCamCa4-->
    <Reaction name = "CKCam bind" id="CK2_CKpCam_pow1">
        <Reactant specieID="CKpCamCa4"   power="2"         />
        <Reactant specieID="CKCamCa4"     power="2"     />
        <Product  specieID="CKpCamCa4" power="3"         />
        <Product  specieID="CKCamCa4"          />

        <forwardRate> 2.39399544094e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

    <!-- CKpCamCa4 <-> CKp + CamCa4 -->
    <Reaction name = "CKp auto" id="CKp_auto">
        <Reactant specieID="CKpCamCa4"              />
        <Product  specieID="CamCa4"                 />
        <Product  specieID="CKp"                    />

        <forwardRate> 0.0008e-3 </forwardRate>
        <reverseRate> 0.01e-3   </reverseRate>
    </Reaction>

<!-- CKp + PP1 <-> CKpPP1 --> 
    <Reaction name = "CKp_bind" id="CKp_bind">
	<Reactant specieID="CKp"/>
        <Reactant specieID="PP1"/>
	<Product specieID="CKpPP1"/>

	<forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>

    <!-- CKpPP1 -> PP1 + CK -->
    <Reaction name = "CKpPP1_reac" id="CKpPP1_reac">
	<Reactant specieID="CKpPP1"/>
	<Product specieID="PP1"/>
        <Product specieID="CK"/>

	<forwardRate> 0.086e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
    </Reaction>



    <!--(activaton of RasGRF) CamCa4+RasGRF->CamCa4RasGRF -->
    <Reaction name = "CamCa4+RasGRF--CamCa4GRF" id="CamCa4+RasGRF--CamCa4GRF">
        <Reactant specieID="CamCa4"           />
        <Reactant specieID="RasGRF"              />
	<Product  specieID="CamCa4GRF"               />

        <forwardRate> 0.06e-3  </forwardRate>
        <reverseRate> 0.924e-3 </reverseRate>
        
    </Reaction>

<!--(active RasGRF activates Ras)CamCa4GRF +RasGDP <-> CamCa4GRFRasGDP <-> CamCa4GRF + RasGTP-->
    <Reaction name = "CamCa4GRF+RasGDP--CamCa4GRFRasGDP" id="CamCa4GRF+RasGDP--CamCa4GRFRasGDP">
        <Reactant specieID="CamCa4GRF"           />
        <Reactant specieID="RasGDP"              />
        <Product  specieID="CamCa4GRFRas"               />

        <forwardRate> 0.0019e-3  </forwardRate>
        <reverseRate> 0.08e-3 </reverseRate>
        
        
    </Reaction>

    <Reaction name = "CamCa4GRFRasGDP--CamCa4GRF+RasGTP" id="CamCa4GRFRasGDP--CamCa4GRF+RasGTP">
        <Reactant specieID="CamCa4GRFRas"               />
        <Product specieID="CamCa4GRF"             />
        <Product specieID="RasGTP"               />

        <forwardRate> 0.02e-3  </forwardRate> 
        <reverseRate> 0 </reverseRate>
       
</Reaction>

  
   
   
   
   
   
   <!--II. *********** Gs coupled receptor, from GS RXN FILE *************-->
    <!--0a. Injected DaDbuf dissociates to Dbuf (external) and Da: DaDbuf -> Da + Dbuf  -->
    <Reaction name = "DaDbuf--Da+Dbuf" id="DaDbuf--Da+Dbuf">
        <Reactant specieID="DaDbuf"                      />
        <Product  specieID="Dbuf"                      />
        <Product  specieID="Da"                     />
        <forwardRate> 20e-03 </forwardRate>
        <reverseRate> 0      </reverseRate>
    </Reaction>
    
  <!--0b. Da or Da Agonist is extruded  -->
   <Reaction name = "Da--DaOut" id="Da--DaOut">
  	<Reactant specieID="Da"/>
        <Product  specieID="DaOut"                   />
        <forwardRate> 1e-3      </forwardRate> <!--1e-5 for yapo bath tuning-->
        <reverseRate> 0.095e-6      </reverseRate> <!-- 0.055e-8 is original rate nadia-->
    </Reaction>

   <!--0c. excess DaOut eliminated to prevent baseline shift: DaOut + Dbuf  <->  DaOutbuf  -->
    <Reaction name = "DaOut+Dbuf--NULL" id="DaOut_buf--NULL">
        <Reactant specieID="DaOut"                      />
        <Reactant specieID="Dbuf"                      />
        <forwardRate> 1e-06 </forwardRate>
        <reverseRate> 0      </reverseRate>
    </Reaction>
    
  <!--1a. Da + D1R        <-> DaD1R      Kd=3000  source: Sunahara et al. Nature 1991-->
    <Reaction name = "Da+D1R--DaD1R" id="Da+D1R--DaD1R">
        <Reactant specieID="Da"                      />
        <Reactant specieID="D1R"                      />
        <Product  specieID="DaD1R"                     />

        <forwardRate> 0.00166667e-03 </forwardRate>
        <reverseRate> 5e-03        </reverseRate>
    </Reaction>
   <!-- 2a. DaD1R + Gsabg     <-> DaD1RGs      Kd=11.666667   source: Zhuang J Neurosci 2000-->
    <Reaction name = "DaD1R+Gs--DaD1RGs" id="DaD1R+Gs--DaD1RGs">
        <Reactant specieID="DaD1R"                     />
        <Reactant specieID="Gsabg"                      />
        <Product  specieID="DaD1RGs"                    />

        <forwardRate> 0.03e-03 </forwardRate>
        <reverseRate> 0.4e-03  </reverseRate>
    </Reaction>
    <!-- 1b. Gsabg + D1R       <-> GsD1R         Kd=35   source: PMR-->
    <Reaction name = "Gsabg+D1R--GsD1R" id="Gsabg+D1R--GsD1R">
        <Reactant specieID="Gsabg"                      />
        <Reactant specieID="D1R"                      />
        <Product  specieID="GsD1R"                     />

        <forwardRate> 0.01e-03 </forwardRate>
        <reverseRate> 0.4e-03  </reverseRate>
    </Reaction>
    <!-- 2b. GsD1R + Da       < - > DaD1RGs       Kd=1000   source: Falkenburger J Gen Phys off-rate, Dreyer J Neurosci-->
    <Reaction name = "GsD1R+Da--DaD1RGs" id="GD1R+Da--DaD1RGs">
        <Reactant specieID="GsD1R"                     />
        <Reactant specieID="Da"                      />
        <Product  specieID="DaD1RGs"                    />

        <forwardRate> 0.005e-03 </forwardRate>
        <reverseRate> 5e-03        </reverseRate>
    </Reaction>

    <!-- 3.  DaD1RGs <-> DaD1R + GsaGTP +Gbg-->
        <Reaction name = "DaD1RGs-DaD1R+GsaGTP+Gbg reac" id="DaD1RGs-DaD1R+GsaGTP+Gbg_id">
        <Reactant specieID="DaD1RGs"                    />
        <Product  specieID="DaD1R"                  />
        <Product  specieID="GsaGTP"                  />
        <Product  specieID="Gbg"                  />

        <forwardRate> 0.15e-03        </forwardRate>
        <reverseRate> 0.0           </reverseRate>
    </Reaction>


   
   
   
   
   
   
   
   
   
        <!--I. *********** Ca pump and buffer rxns  ************* -->
<!-- i: Ca pump high affinity -    Ca + pmca <-> pmcaCa  SAME-->
    <Reaction name = "Ca_pump1a" id="Ca_pump1a">
	<Reactant specieID="Ca"/>
	<Reactant specieID="pmca"/>
	<Product specieID="pmcaCa"/>

	<forwardRate>0.05e-3</forwardRate>
	<reverseRate>9e-3</reverseRate>
    </Reaction>

<!-- ii: Ca pump high affinity -    pmcaCa <-> pmca + CaOut   SAME-->
    <Reaction name = "Ca_pump1b" id="Ca_pump1b">
	<Reactant specieID="pmcaCa"/>
	<Product specieID="pmca"/>
	<Product specieID="CaOut"/>

	<forwardRate>3.0e-3</forwardRate>
	<reverseRate>0</reverseRate>
    </Reaction>

<!-- iii: Ca pump low affinity -    Ca + ncx <-> ncxCa  SAME-->
    <Reaction name = "Ca_pump2a" id="Ca_pump2a">
	<Reactant specieID="Ca"/>
	<Reactant specieID="ncx"/>
	<Product specieID="ncxCa"/>

	<forwardRate>0.011e-3</forwardRate>
	<reverseRate>11.2e-3</reverseRate>
    </Reaction>

<!-- iv: Ca pump low affinity -    ncxCa <-> ncx + CaOut   SAME-->
    <Reaction name = "Ca_pump2b" id="Ca_pump2b">
	<Reactant specieID="ncxCa"/>
	<Product specieID="ncx"/>
	<Product specieID="CaOut"/>

	<forwardRate>5.6e-3</forwardRate>
	<reverseRate>0</reverseRate>
    </Reaction>
<!-- v: Ca leak -    CaOut + Leak <-> CaOutLeak  GQ RXN FILE, Leak is sm only-->
    <Reaction name = "Ca_leak" id="Ca_leak">
	<Reactant specieID="CaOut"/>
	<Reactant specieID="Leak"/>
	<Product specieID="CaOutLeak"/>

        <forwardRate>0.01e-6</forwardRate>
	<reverseRate>0</reverseRate>
    </Reaction>

<!-- vi: Ca leak -    CaOutLeak <-> Ca (inside) + Leak  -->
    <Reaction name = "Ca_leak" id="Ca_leak">
	<Reactant specieID="CaOutLeak"/>
	<Product specieID="Ca"/>
	<Product specieID="Leak"/>

        <forwardRate>0.65e-3</forwardRate>  <!-- 1.1e-3 -->
	<reverseRate>0</reverseRate>
    </Reaction>

<!-- vii: Ca Buffer    Ca + Calbindin <-> calbinC  SAME-->
    <Reaction name = "Ca_buffer" id="Ca_Buffer">
        <Reactant specieID="Ca"/>
        <Reactant specieID="Calbin"/>
        <Product specieID="CalbinC"/>

        <forwardRate>0.028e-3</forwardRate>
        <reverseRate>19.6</reverseRate>
    </Reaction>



 <!--Epac pathway to activate Rap1-->
    
   <!--(Epac binding) Epac + cAMP <-> EpacAMP-->
    <Reaction name = "Epac+cAmp--EpacAMP" id="Epac+cAMP--EpacAMP">
        <Reactant specieID="Epac"           />
        <Reactant  specieID="cAMP"               />
        <Product  specieID="EpacAMP"               />

        <forwardRate> 0.000121e-3   </forwardRate>
        <reverseRate> 0.1452e-3   </reverseRate>
     
     
</Reaction> 
<!--(Epac(GEF) activates Rap1) Epacamp + Rap1<-> EpacRap1 <-> Epacamp + Rap1GTP-->
    <Reaction name = "EpacAMP+Rap1GDP--EpacRap1" id="EpacAMP+Rap1--EpacRap1">
        <Reactant specieID="EpacAMP"           />
        <Reactant specieID="Rap1GDP"              />
        <Product  specieID="EpacRap1"               />

       <forwardRate> 0.0012e-3   </forwardRate>
       <reverseRate> 0.960e-3   </reverseRate>
     
    </Reaction> 
    <Reaction name = "EpacRap1--EpacAMP+Rap1GTP" id="EpacRap1--EpacAMP+Rap1GTP">
        <Reactant specieID="EpacRap1"           />
        <Product  specieID="EpacAMP"               />
        <Product  specieID="Rap1GTP"               />

        <forwardRate> 0.24e-3  </forwardRate>
        <reverseRate> 0         </reverseRate>
     
     
    </Reaction>

 <!--1) Epac1-camps + cAMP <-> Epac1-camps_cAMP -->
    <Reaction name = "PKA_bind" id="PKA_bind">
	<Reactant specieID="Epac1"/>
        <Reactant specieID="cAMP"/>
	<Product specieID="Epac1cAMP"/>

        <forwardRate>0.033e-6</forwardRate>
	<reverseRate>0.08e-3</reverseRate>
	<Q10>0.2</Q10>
    </Reaction>


<!-- ******* PKA from Asia Hippo Model ********* -->     
    <!--1) PKA + 2camp <-> rap1gtpPKAcAMP2 -->
    <Reaction name = "PKA_bind" id="PKA_bind">
	<Reactant specieID="PKA"/>
        <Reactant specieID="cAMP" n="2"/>
	<Product specieID="PKAcAMP2"/>


        <forwardRate> 0.261e-6 </forwardRate>
	<reverseRate> 0.060e-3 </reverseRate>
    </Reaction>

    <!--2) PKAcAMP2 + 2cAMP <-> PKAcAMP4 -->
    <Reaction name = "PKAcAMP2_bind" id="PKAcAMP2_bind">
	<Reactant specieID="PKAcAMP2"/>
        <Reactant specieID="cAMP" n="2"/>
	<Product specieID="PKAcAMP4"/>

	<forwardRate> 0.35e-6 </forwardRate>
	<reverseRate> 0.6e-3 </reverseRate>
    </Reaction>

<!--3) PKAcAMP4 <-> 2PKAr(as dimer) + 2PKAc(monomers) -->
    <Reaction name = "PKAcAMP4_diss" id="PKAcAMP4_diss">
	<Reactant specieID="PKAcAMP4"/>
	<Product specieID="PKAr" />
	<Product specieID="PKAc" n="2"/>  

	<forwardRate> 0.24e-3 </forwardRate>
	<reverseRate> 0.0255e-3 </reverseRate>
    </Reaction>
    
    <!-- production of cAMP to mimic AC production 
    <Reaction name = "cAMP" id= "cAMP">
          <Product  specieID="cAMP"               />

        <forwardRate>  12e-1   </forwardRate>  <!-12e-1 for 60nM basal cAMP->
 </Reaction> -->
     <!-- Production of a basal GsaGTP so as to have a basal of 60nM of cAMP
    <Reaction name = "GsaGTP" id= "GsaGTP">
          <Product  specieID="GsaGTP"               />

        <forwardRate>  10e-4   </forwardRate>  instead of producing cAMP directly,i now produce gsatp to get the same basal cAMP of 60nM
 </Reaction>-->
    
    <!-- D32 + PKAc    <-> D32PKAc      Km=3.7uM    (in xpp: k20=0.0027 k_20=8 v20=2, Kd=) -->
    <Reaction name = "D32+PKAc--D32PKAc reac" id="D32+PKAc--D32PKAc_id">
        <Reactant specieID="D32"                    />
        <Reactant specieID="PKAc"                   />
        <Product  specieID="D32PKAc"                 />

        <forwardRate> 0.0027e-03      </forwardRate>
        <reverseRate> 8.0e-03         </reverseRate>
    </Reaction>

    <!-- D32PKAc            -> PKAc + D32p34  (in xpp: v20=2) -->
    <Reaction name = "D32PKAc--PKAc+D32p34 reac" id="D32PKAc--PKAc+D32p34_id">
        <Reactant specieID="D32PKAc"                 />
        <Product  specieID="PKAc"                   />
        <Product  specieID="D32p34"                   />

        <forwardRate> 2.0e-03         </forwardRate>
        <reverseRate> 0.0             </reverseRate>
    </Reaction>
    
     <!-- D32p34 + PP1    <-> D32p34PP1       (in xpp: k21=0.4 k_21=0.58, Kd=) -->
    <Reaction name = "D32p34+PP1--D32p34pp1 reac" id="D32p34+PP1--D32p34pp1_id">
        <Reactant specieID="D32p34"                   />
        <Reactant specieID="PP1"                    />
        <Product  specieID="D32p34PP1"                />

        <forwardRate> 0.4e-03         </forwardRate>
        <reverseRate> 0.58e-3      </reverseRate> <!--0.58e-3-->
    </Reaction>
    
   

<!-- Rap1GTP activates bRaf -->
    <!-- (bRaf activation) Rap1GTP + bRaf <-> bRafRap1 -->
    <Reaction name = "Rap1GTP+bRaf--bRafRap1" id="Rap1GTP+bRaf--bRafRap1">
        <Reactant specieID="Rap1GTP"           />
        <Reactant  specieID="bRaf"               />
        <Product  specieID="bRafRap1"               />

	<forwardRate> 0.06e-3   </forwardRate>
	
       <reverseRate> 1e-3   </reverseRate>
    </Reaction>


 <!-- Rap1GTP forms an inactif complex with Raf1 -->
    <!-- (Raf1 complex with Rap1) Rap1GTP + Raf1 <-> Raf1Rap1 -->
    <Reaction name = "Rap1GTP+Raf1--Raf1Rap1" id="Rap1GTP+Raf1--Raf1Rap1">
        <Reactant specieID="Rap1GTP"           />
        <Reactant  specieID="Raf1"               />
        <Product  specieID="Raf1Rap1"               />

	<forwardRate> 0.006e-3   </forwardRate>
	 <!--forwardRate> 0   </forwardRate-->
       <reverseRate> 0.5e-3   </reverseRate>
    </Reaction>
    
    
      <!--(Inactivation of Rap by Rap1GAP) Rap1GTP+Rap1GAP <-> Rap1GTPGAP -> Rap1GAP + Rap1GDP -->

<Reaction name = "Rap1GTP+Rap1GAP--Rap1GTPGAP" id="Rap1GTP+Rap1GAP--Rap1GTPGAP">
  <Reactant specieID="Rap1GTP" />
  <Reactant specieID="rap1Gap" />
  <Product specieID="Rap1GTPGap" />

  <forwardRate> 0.2e-3 </forwardRate>
  <reverseRate> 200e-3 </reverseRate>

</Reaction>

<Reaction name = "Rap1GTPGAP--Rap1GAP+Rap1GDP" id = "Rap1GTPGAP--Rap1GAP+Rap1GDP">
  <Reactant specieID="Rap1GTPGap" />
  <Product specieID="rap1Gap" />
  <Product specieID="Rap1GDP" />

  <forwardRate> 2e-3 </forwardRate>
  <reverseRate>  0  </reverseRate>

</Reaction>



<!--MAPKK ACTIVATION BY bRafRap1GTP-->
    
<!--(MAPKK phos by bRafRap1) MAPKK + bRafRap1GTP <-> bRafRap1GTPMAPKK <-> pMAPKK + bRafRap1GTP-->
    <Reaction name = "MAPKK+bRafRap1--bRafRap1MAPKK" id="MAPKK+bRafRap1--bRafRap1MAPKK">
        <Reactant specieID="MEK"           />
        <Reactant specieID="bRafRap1"              />
        <Product  specieID="bRafRap1MEK"               />

        <forwardRate> 0.00942863e-3  </forwardRate>
	<reverseRate> 1.2e-3  </reverseRate>
	
    </Reaction>
    
    <Reaction name = "bRafRap1MAPKK--pMAPKK+bRafRap1" id="bRafRap1MAPKK--pMAPKK+bRafRap1">
        <Reactant specieID="bRafRap1MEK"           />
        <Product  specieID="pMEK"               />
        <Product  specieID="bRafRap1"               />

        <forwardRate> 0.3e-3 </forwardRate>
        <reverseRate> 0      </reverseRate>
      
    </Reaction>

<!--(pMAPKK phos by bRafRap1) pMAPKK + bRafRap1 <-> bRafRap1pMAPKK <-> ppMAPKK + bRafRap1-->
    <Reaction name = "pMAPKK+bRafRap1--bRafRap1pMAPKK" id="pMAPKK+bRafRap1--bRafRap1pMAPKK">
        <Reactant specieID="pMEK"           />
        <Reactant specieID="bRafRap1"              />
        <Product  specieID="bRafRap1pMEK"               />

        <forwardRate> 0.00942863e-3  </forwardRate>
	<!-- forwardRate> 0 </forwardRate-->
        <reverseRate> 1.2e-3  </reverseRate>
	
    </Reaction>
    <Reaction name = "bRafRap1pMAPKK--ppMAPKK+bRafRap1" id="bRafRap1pMAPKK--ppMAPKK+bRafRap1">
        <Reactant specieID="bRafRap1pMEK"           />
        <Product  specieID="ppMEK"               />
        <Product  specieID="bRafRap1"               />

         <forwardRate> 0.3e-3 </forwardRate>
        <reverseRate> 0      </reverseRate>
 
    </Reaction>
    
    
    <!-- 19)  PKAc + PDE4 -> PKAcPDE4 -->
    <Reaction name = "PDE4 phosp1" id="phospPDE41">
        <Reactant specieID="PKAc"            />
        <Reactant specieID="PDE4"           />
        <Product  specieID="PKAcPDE4"       />
        <forwardRate> 0.25e-6  </forwardRate>
        <reverseRate> 0.08e-3    </reverseRate>
    </Reaction>

    <!-- 20)  PKAcPDE4 -> PKAc + pPDE4 -->
    <Reaction name = "PDE4 phosp2" id="phospPDE42">
        <Reactant specieID="PKAcPDE4"       />
        <Product  specieID="pPDE4"          />
        <Product  specieID="PKAc"            />
        <forwardRate> 0.02e-3    </forwardRate>
        <reverseRate> 0            </reverseRate>
    </Reaction>

   <!-- 21)  PKAc + PDE4cAMP -> PKAcPDE4cAMP -->
    <Reaction name = "PDE4cAMP phosp1" id="phospPDE41cAMP">
        <Reactant specieID="PKAc"            />
        <Reactant specieID="PDE4cAMP"           />
        <Product  specieID="PKAcPDE4cAMP"       />
        <forwardRate> 0.25e-6  </forwardRate>
        <reverseRate> 0.08e-3    </reverseRate>
    </Reaction>

    <!-- 22)  PKAcPDE4cAMP -> PKAc + pPDE4cAMP -->
    <Reaction name = "PDE4cAMP phosp2" id="phospPDE42cAMP">
        <Reactant specieID="PKAcPDE4cAMP"       />
        <Product  specieID="pPDE4cAMP"          />
        <Product  specieID="PKAc"            />
        <forwardRate> 0.02e-3    </forwardRate>
        <reverseRate> 0            </reverseRate>
    </Reaction>

    <!-- 23,24)  pPDE4 +PP2ABPR72 -> PDE4 
    Resjo Biochem J 1999, Mol Pharmacol. 2008 De Arcangelis-->
    <Reaction name = "PDE4 d_phosp1" id="dphospPDE4a">
        <Reactant specieID="pPDE4"          />
        <Reactant specieID="PP2ABPR72"          />
        <Product  specieID="pPDE4PP2A"           />
        <forwardRate> 0.024e-06     </forwardRate>
        <reverseRate> 0.0096e-3            </reverseRate>
    </Reaction>

    <Reaction name = "PDE4 d_phosp2" id="dphospPDE4b">
        <Reactant specieID="pPDE4PP2A"           />
        <Product specieID="PDE4"          />
        <Product specieID="PP2ABPR72"          />
        <forwardRate> 0.0024e-03     </forwardRate>
        <reverseRate> 0            </reverseRate>
    </Reaction>

    <!-- 25,26)  pPDE4 +PP2Acal -> PDE4
    Resjo Biochem J 1999, Mol Pharmacol. 2008 De Arcangelis-->
    <Reaction name = "PDE4 d_phosp1" id="dphospPDE4a">
        <Reactant specieID="pPDE4"          />
        <Reactant specieID="PP2Acal"          />
        <Product  specieID="pPDE4PP2Ac"           />
        <forwardRate> 0.048e-06     </forwardRate>
        <reverseRate> 0.0192e-3            </reverseRate>
    </Reaction>

    <Reaction name = "PDE4 d_phosp2" id="dphospPDE4b">
        <Reactant specieID="pPDE4PP2Ac"           />
        <Product specieID="PDE4"          />
        <Product specieID="PP2Acal"          />
        <forwardRate> 0.0048e-03     </forwardRate>
        <reverseRate> 0            </reverseRate>
    </Reaction>
<!-- slower than previous,  based on A. Chay and cAMP decay. Km=120nM-->
    <!--1a. PKAc + PDE10 -> PKAcPDE10 -->
    <Reaction name = "PDE10 phosp1" id="phospPDE101">
        <Reactant specieID="PKAc"                   />
        <Reactant specieID="PDE10"                  />
        <Product  specieID="PKAcPDE10"              />

        <forwardRate> 0.25e-06    </forwardRate>
        <reverseRate> 0.024e-03    </reverseRate>
    </Reaction>

    <!--2a. PKAcPDE10 -> PKAc + pPDE10 -->
    <Reaction name = "PDE10 phosp2" id="phospPDE102">
        <Reactant specieID="PKAcPDE10"              />
        <Product  specieID="pPDE10"                 />
        <Product  specieID="PKAc"                   />

        <forwardRate> 0.006e-03    </forwardRate>
        <reverseRate> 0             </reverseRate>
    </Reaction>

   <!--1b. PKAc + PDE10cAMP -> PKAcPDE10cAMP -->
    <Reaction name = "PDE10cAMP phosp1" id="phospPDE10cAMP1">
        <Reactant specieID="PKAc"                  />
        <Reactant specieID="PDE10cAMP"             />
        <Product  specieID="PKAcPDE10cAMP"         />

        <forwardRate> 0.25e-06    </forwardRate>
        <reverseRate> 0.024e-03    </reverseRate>
    </Reaction>

    <!--2b. PKAcPDE10cAMP -> PKAc + pPDE10cAMP -->
    <Reaction name = "PDE10cAMP phosp2" id="phospPDE10cAMP2">
        <Reactant specieID="PKAcPDE10cAMP"         />
        <Product  specieID="pPDE10cAMP"            />
        <Product  specieID="PKAc"                  />

        <forwardRate> 0.006e-03    </forwardRate>
        <reverseRate> 0             </reverseRate>
    </Reaction>
     <!-- 23,24)  pPDE10 +PP2ABPR72 -> PDE10 -->
    <Reaction name = "PDE10 d_phosp1" id="dphospPDE10a">
        <Reactant specieID="pPDE10"          />
        <Reactant specieID="PP2ABPR72"          />
        <Product  specieID="pPDE10PP2A"           />
        <forwardRate> 0.024e-06     </forwardRate>
        <reverseRate> 0.0096e-3            </reverseRate>
    </Reaction>

    <Reaction name = "PDE10 d_phosp2" id="dphospPDE10b">
        <Reactant specieID="pPDE10PP2A"           />
        <Product specieID="PDE10"          />
        <Product specieID="PP2ABPR72"          />
        <forwardRate> 0.0024e-03     </forwardRate>
        <reverseRate> 0            </reverseRate>
    </Reaction>

    <!-- 25,26)  pPDE10 +PP2Acal -> PDE10 -->
    <Reaction name = "PDE10 d_phosp1" id="dphospPDE10a">
        <Reactant specieID="pPDE10"          />
        <Reactant specieID="PP2Acal"          />
        <Product  specieID="pPDE10PP2Ac"           />
        <forwardRate> 0.048e-06     </forwardRate>
        <reverseRate> 0.0192e-3            </reverseRate>
    </Reaction>

    <Reaction name = "PDE10 d_phosp2" id="dphospPDE10b">
        <Reactant specieID="pPDE10PP2Ac"           />
        <Product specieID="PDE10"          />
        <Product specieID="PP2Acal"          />
        <forwardRate> 0.0048e-03     </forwardRate>
        <reverseRate> 0            </reverseRate>
    </Reaction>
   
    
    
    
    
    
    
    
    <!-- Cam or CamC2N or CamC2C or CamCa4 binding to PP2B.  Check rates for microscopic reversibility -->
     <!--4x) Cam    +   PP2B     <->  PP2BCam     (in xpp: k33a=1 k_33a=3)  -->
    <Reaction name = "Cam+PP2B--PP2BCam reac" id="Cam+PP2B--PP2BCam_id">
        <Reactant specieID="Cam"                    />
        <Reactant specieID="PP2B"                   />
        <Product  specieID="PP2BCam"                />

        <forwardRate> 0.0046e-3       </forwardRate>
        <reverseRate> 0.0012e-3      </reverseRate>
    </Reaction>

    <!--4C) CamCa2C    +   PP2B     <->  PP2BCamCa2C (in xpp: k33c=1 k_33c=0.3) -->
    <Reaction name = "CamCa2C+PP2B--PP2BCamCa2C reac" id="CamCa2C+PP2B--PP2BCamCa2C_id">
        <Reactant specieID="CamCa2C"                 />
        <Reactant specieID="PP2B"                   />
        <Product  specieID="PP2BCamCa2C"             />

        <forwardRate> 0.046e-3       </forwardRate>
        <reverseRate> 0.0012e-3      </reverseRate>
    </Reaction>

    <!--4N) CamCa2N    +   PP2B     <->  PP2BCamCa2N (in xpp: k33c=1 k_33c=0.3) -->
    <Reaction name = "CamCa2N+PP2B--PP2BCamCa2N reac" id="CamCa2N+PP2B--PP2BCamCa2N_id">
        <Reactant specieID="CamCa2N"                 />
        <Reactant specieID="PP2B"                   />
        <Product  specieID="PP2BCamCa2N"             />

        <forwardRate> 0.046e-3       </forwardRate>
        <reverseRate> 0.0012e-3      </reverseRate>
    </Reaction>

    <!--5xC) PP2BCam    +   Ca2      <->  PP2BCamCa2C -->
    <Reaction name = "PP2BCam+Ca2--PP2BCamCa2C reac" id="PP2BCam+Ca2--PP2BCamCa2C_id">
        <Reactant specieID="PP2BCam"                />
        <Reactant specieID="Ca"        n="2"        />
        <Product  specieID="PP2BCamCa2C"             />

        <forwardRate> 6.0e-06       </forwardRate>
        <reverseRate> 0.91e-03      </reverseRate>
    </Reaction>

    <!--5xN) PP2BCam    +   Ca2      <->  PP2BCamCa2N -->
    <Reaction name = "PP2BCam+Ca2--PP2BCamCa2N reac" id="PP2BCam+Ca2--PP2BCamCa2N_id">
        <Reactant specieID="PP2BCam"                />
        <Reactant specieID="Ca"        n="2"        />
        <Product  specieID="PP2BCamCa2N"             />

        <forwardRate> 0.1e-03       </forwardRate>
        <reverseRate> 100e-03      </reverseRate>
    </Reaction>

    <!--7x) CamCa4    +  PP2B     <->  PP2BCamCa4 -->
    <Reaction name = "CamCa4+PP2B--PP2BCamCa4 reac" id="CamCa4+PP2B--PP2BCamCa4_id">
        <Reactant specieID="CamCa4"                 />
        <Reactant specieID="PP2B"                   />
        <Product  specieID="PP2BCamCa4"             />

        <forwardRate> 0.046e-3       </forwardRate>
        <reverseRate> 0.0012e-3      </reverseRate>
    </Reaction>

  <!-- PP2BCamCa2 +  Ca2     <->  PP2BCamCa4, either N site or C site -->
    <!--4N) N site binding -->
    <Reaction name = "PP2BCamCa2C+Ca2--PP2BCamCa4 reac" id="PP2BCamCa2+Ca2--PP2BCamCa4_id">
        <Reactant specieID="PP2BCamCa2C"             />
        <Reactant specieID="Ca"        n="2"        />
        <Product  specieID="PP2BCamCa4"             />

        <forwardRate> 0.1e-03       </forwardRate>
        <reverseRate> 1000e-03      </reverseRate>
    </Reaction>

    <!--4C) C site binding -->
    <Reaction name = "PP2BCamCa2N+Ca2--PP2BCamCa4 reac" id="PP2BCamCa2N+Ca2--PP2BCamCa4_id">
        <Reactant specieID="PP2BCamCa2N"             />
        <Reactant specieID="Ca"        n="2"        />
        <Product  specieID="PP2BCamCa4"             />

        <forwardRate> 6.0e-06       </forwardRate>
        <reverseRate> 9.1e-03      </reverseRate>
    </Reaction>
    
    
    <!--PKA phosphorylation of PP2AB-->
    <!--PKAc + PP2AB56d    <->  PKAcPP2AB56d    Km=172nM  (in xpp: k27=0.0025 k_27=0.3) -->
    <Reaction name = "PKAc+PP2A--PKAcPP2AB56d reac" id="PKAc+PP2A--PKAcPP2AB56d_id">
        <Reactant specieID="PP2AB56d"          />
        <Reactant specieID="PKAc"               />
        <Product  specieID="PKAcPP2AB56d"      />

        <forwardRate> 0.00125e-03      </forwardRate>
        <reverseRate> 0.185e-03         </reverseRate>
    </Reaction>

    <!--PKAcPP2AB56d        ->  PKAc + pPP2A(_B56d)   (in xpp: v27=0.1) -->
    <Reaction name = "PKAcPP2AB56d--PKAc+pPP2A reac" id="PKAcPP2AB56d--PKAc+pPP2A_id">
        <Reactant specieID="PKAcPP2AB56d"  />
        <Product  specieID="PKAc"           />
        <Product  specieID="pPP2A"          />

        <forwardRate> 0.03e-03         </forwardRate>
        <reverseRate> 0.0             </reverseRate>
    </Reaction>

    <!--pPP2A(_B56d)           ->  PP2AB56d           (in xpp: v28=0.004) -->
    <Reaction name = "pPP2A--PP2A reac" id="pPP2A--PP2Aid">
        <Reactant specieID="pPP2A"          />
        <Product  specieID="PP2AB56d"      />

        <forwardRate> 0.02e-03       </forwardRate>
        <reverseRate> 0.0             </reverseRate>
    </Reaction>


	<!--PP2ABPR72  + Ca         ->  PP2Acal(_BPR72)      (in xpp: kf4=0.022, kb4=0.11)  -->
    <!-- binding updated from paper measuring binding -->
    <Reaction name = "PP2ABPR72+Ca--PP2Acal reac" id="PP2Acal3+Ca--PP2Acal_id">
        <Reactant specieID="PP2ABPR72"         />
        <Reactant specieID="Ca"                 />
        <Product  specieID="PP2Acal"              />

        <forwardRate> 0.02e-6         </forwardRate>
        <reverseRate> 0.1e-3           </reverseRate>
    </Reaction>



<!-- ******* PP2B dephos of DARPP32 *********** -->
    <!-- D32p34 + PP2BCamCa4  <-> D32p34PP2BCamCa4   King et al. 1984 Km=1.6uM -->
    <Reaction name = "D32p34+PP2BCamCa4--D32p34PP2BCamCa4 reac" id="D32p34+PP2BCamCa4--D32p34PP2BCamCa4_id">
        <Reactant specieID="D32p34"                   />
        <Reactant specieID="PP2BCamCa4"             />
        <Product  specieID="D32p34PP2BCamCa4"         />

        <forwardRate> 4.0e-06       </forwardRate>
        <reverseRate> 4.0e-03         </reverseRate>
    </Reaction>

    <!-- D32p34PP2BCamCa4     -> D32 + PP2BCamCa4   King, Hemmings: Vmax =0.2-1/sec-->
    <Reaction name = "D32p34PP2BCamCa4--PP2BCamCa4+D32 reac" id="D32p34PP2BCamCa4--PP2BCamCa4+D32_id">
        <Reactant specieID="D32p34PP2BCamCa4"         />
        <Product  specieID="PP2BCamCa4"             />
        <Product  specieID="D32"                    />

        <forwardRate> 1e-03         </forwardRate>
        <reverseRate> 0.0             </reverseRate>
    </Reaction>

    <!-- D32p34PP1 + PP2BCamCa4    <-> D32p34PP1PP2BCamCa4  (in xpp: k36=0.001 k_36=2, Kd=2.5 uM) -->
    <Reaction name = "D32p34PP1+PP2BCamCa4--D32p34PP1PP2BCamCa4 reac" id="D32p34pp1+PP2BCamCa4--D32p34PP1PP2BCamCa4_id">
        <Reactant specieID="D32p34PP1"                />
        <Reactant specieID="PP2BCamCa4"             />
        <Product  specieID="D32p34PP1PP2BCamCa4"      />

        <forwardRate> 4.0e-06      </forwardRate>
        <reverseRate> 4.0e-03       </reverseRate>
    </Reaction>

    <!-- D32p34PP1PP2BCamCa4        -> PP1PP2BCamCa4  +  D32  (in xpp: v36=0.5) -->
    <Reaction name = "D32p34PP1PP2BCamCa4--PP1+PP2BCamCa4+D32 reac" id="D32p34PP1PP2BCamCa4--PP1+PP2BCamCa4+D32_id">
        <Reactant specieID="D32p34PP1PP2BCamCa4"      />
        <Product  specieID="PP2BCamCa4"             />
        <Product  specieID="PP1"                    />
        <Product  specieID="D32"                    />

        <forwardRate> 1e-03      </forwardRate>
        <reverseRate> 0.0             </reverseRate>
    </Reaction>

    <!--1/10th the activity compared to Ca4: Shifman ... Kennedy  PNAS 2006 (for CamKII)-->
    <Reaction name = "D32p34PP1+PP2BCamCa2C--D32p34PP1PP2BCamCa2C reac" id="D32p34pp1+PP2BCamCa2C--D32p34PP1PP2BCamCa2C_id">
        <Reactant specieID="D32p34PP1"                />
        <Reactant specieID="PP2BCamCa2C"             />
        <Product  specieID="D32p34PP1PP2BCamCa2C"      />

        <forwardRate> 0.10e-06      </forwardRate>
        <reverseRate> 0.40e-03       </reverseRate>
    </Reaction>

    <!-- D32p34PP1PP2BCamCa2C        -> PP1PP2BCamCa2C  +  D32  (in xpp: v36=0.5) -->
    <Reaction name = "D32p34PP1PP2BCamCa2C--PP1+PP2BCamCa2C+D32 reac" id="D32p34PP1PP2BCamCa2C--PP1+PP2BCamCa2C+D32_id">
        <Reactant specieID="D32p34PP1PP2BCamCa2C"      />
        <Product  specieID="PP2BCamCa2C"             />
        <Product  specieID="PP1"                    />
        <Product  specieID="D32"                    />

        <forwardRate> 0.1e-03      </forwardRate>
        <reverseRate> 0.0             </reverseRate>
    </Reaction>
    
    <!-- ******* PP2A dephos of DARPP32 *********** -->
    <!-- D32p34 + PP2ABPR72    <-> D32p34PP2ABPR72       (in xpp: k22b=0.0001 k_22b=2, Kd=) -->
    <!-- these are ~15x faster than xpp model, slower than Oliveira -->
    <!-- rates taken from StriatumCRCNS/StochasticSP1/PKAspace/MSPNreactionsPP2AslowPKAdiff.xml  -->
     <Reaction name = "D32p34+PP2ABPR72--D32p34PP2ABPR72 reac" id="D32p34+PP2ABPR72--D32p34PP2ABPR72_id">
        <Reactant specieID="D32p34"                   />
        <Reactant specieID="PP2ABPR72"             />
        <Product  specieID="D32p34PP2ABPR72"         />

        <forwardRate> 1.52e-06        </forwardRate>
        <reverseRate> 0.056           </reverseRate>
    </Reaction>

    <!-- D32p34PP2ABPR72            -> D32 + PP2ABPR72  (in xpp: v22b=0.5) -->
    <Reaction name = "D32p34PP2ABPR72--PP2ABPR72+D32 reac" id="D32p34PP2ABPR72--PP2ABPR72+D32_id">
        <Reactant specieID="D32p34PP2ABPR72"         />
        <Product  specieID="PP2ABPR72"             />
        <Product  specieID="D32"                    />

        <forwardRate> 0.014           </forwardRate>
        <reverseRate> 0.0             </reverseRate>
    </Reaction>

    <!-- D32p34 + PP2AB56d    <-> D32p34PP2AB56d       (in xpp: k22b=0.0001 k_22b=2, Kd=) -->
    <!-- these are ~15x faster than xpp model #######, slower than Oliveira -->
    <!-- rates taken from StriatumCRCNS/StochasticSP1/PKAspace/MSPNreactionsPP2AslowPKAdiff.xml  -->
    <Reaction name = "D32p34+PP2AB56d--D32p34PP2AB56d reac" id="D32p34+PP2AB56d--D32p34PP2AB56d_id">
        <Reactant specieID="D32p34"                   />
        <Reactant specieID="PP2AB56d"              />
        <Product  specieID="D32p34PP2AB56d"          />

        <forwardRate> 1.52e-06        </forwardRate>
        <reverseRate> 0.056           </reverseRate>
    </Reaction>

    <!-- D32p34PP2AB56d            -> D32 + PP2AB56d  (in xpp: v22b=0.5) -->
    <Reaction name = "D32p34PP2AB56d--PP2AB56d+D32 reac" id="D32p34PP2AB56d--PP2AB56d+D32_id">
        <Reactant specieID="D32p34PP2AB56d"          />
        <Product  specieID="PP2AB56d"              />
        <Product  specieID="D32"                    />

        <forwardRate> 0.014           </forwardRate>
        <reverseRate> 0.0             </reverseRate>
    </Reaction>

    <!-- D32p34pp1 + PP2ABPR72  <-> D32p34PP1PP2ABPR72 -> D32 + PP1 + PP2ABPR72  (in xpp: k36b=0.0001 k_36b=2, Kd=) -->
    <Reaction name = "D32p34pp1+PP2ABPR72--D32p34PP1PP2ABPR72 reac" id="D32p34pp1+PP2ABPR72--D32p34PP1PP2ABPR72_id">
        <Reactant specieID="D32p34PP1"                 />
        <Reactant specieID="PP2ABPR72"              />
        <Product  specieID="D32p34PP1PP2ABPR72"       />

        <forwardRate> 0.36e-06        </forwardRate>
        <reverseRate> 0.0146          </reverseRate>
    </Reaction>

    <!-- D32p34PP1PP2ABPR72          -> PP1PP2ABPR72 + D32 (in xpp: v36b=0.5) -->
    <Reaction name = "D32p34PP1PP2ABPR72--PP1+PP2ABPR72+D32 reac" id="D32p34PP1PP2ABPR72--PP1+PP2ABPR72+D32_id">
        <Reactant specieID="D32p34PP1PP2ABPR72"      />
        <Product  specieID="PP2ABPR72"             />
	<Product  specieID="PP1"                    />
        <Product  specieID="D32"                    />

        <forwardRate> 0.00336          </forwardRate>  	<!-- 0.00336-->
        <reverseRate> 0.0             </reverseRate>
    </Reaction>

    <!-- D32p34pp1 + PP2AB56d  <-> D32p34PP1PP2AB56d -> D32 + PP1 + PP2AB56d   -->
    <Reaction name = "D32p34pp1+PP2AB56d--D32p34PP1PP2AB56d reac" id="D32p34pp1+PP2AB56d--D32p34PP1PP2AB56d_id">
        <Reactant specieID="D32p34PP1"                />
        <Reactant specieID="PP2AB56d"              />
        <Product  specieID="D32p34PP1PP2AB56d"       />

        <forwardRate> 0.36e-06        </forwardRate>
        <reverseRate> 0.0146          </reverseRate>
    </Reaction>

    <!-- D32p34PP1PP2AB56d          -> PP1PP2AB56d + D32 (in xpp: v36b=0.5) -->
    <Reaction name = "D32p34PP1PP2AB56d--PP1+PP2AB56d+D32 reac" id="D32p34PP1PP2AB56d--PP1+PP2AB56d+D32_id">
        <Reactant specieID="D32p34PP1PP2AB56d"       />
        <Product  specieID="PP2AB56d"              />
        <Product  specieID="PP1"                    />
        <Product  specieID="D32"                    />

        <forwardRate> 0.00336         </forwardRate>   	<!-- 0.00336-->
        <reverseRate> 0.0             </reverseRate>
    </Reaction>
    
    <!-- phos D32 on T75, which then inhibits PKAc -->
    <!-- Cdk5   +   D32  <->    Cdk5D32     (in xpp: k23=0.00045 k_23=2) -->
    <Reaction name = "Cdk5+D32--Cdk5D32 reac" id="Cdk5+D32--Cdk5D32_id">
        <Reactant specieID="Cdk5"               />
        <Reactant specieID="D32"                />
        <Product  specieID="Cdk5D32"            />

        <forwardRate> 0.0045e-03     </forwardRate>
        <reverseRate> 40e-3        </reverseRate>
    </Reaction>

    <!-- Cdk5D32        -> D32p75 + Cdk5 (in xpp: v23=0.5) -->
    <!-- rates and quantities adjusted to achieve 10 uM D32p75 at basal -->
    <Reaction name = "Cdk5D32--D32p75+Cdk5 reac" id="Cdk5D32--D32p75+Cdk5_id">
        <Reactant specieID="Cdk5D32"            />
        <Product  specieID="D32p75"               />
        <Product  specieID="Cdk5"               />

        <forwardRate> 10e-3         </forwardRate>
        <reverseRate> 0.0             </reverseRate>
    </Reaction>

    <!--D32p75  +  PKAc  <->  DP75PKA   (in xpp: k24=0.00037 k_24=1) Kd=2.7uM -->
    <Reaction name = "D32p75+PKAc--D32p75PKAc reac" id="D32p75+PKAc--D32p75PKAc_id">
        <Reactant specieID="D32p75"               />
        <Reactant specieID="PKAc"               />
        <Product  specieID="D32p75PKAc"               />

        <forwardRate> 0.00037e-03     </forwardRate>
        <reverseRate> 1.0e-03         </reverseRate>
    </Reaction>

<!-- dephos of D32p75 on PP2A(both BPR75 and B56d), phosphoPP2A, and Ca bound PP2A -->
    <!--D32p75 + pPP2A(_B56d) <-> D32p75pPP2A(_B56d)  (must faster than in xpp: k25=0.0004 k_25=12)-->
    <Reaction name = "D32p75+pPP2A--D32p75pPP2A reac" id="D32p75+pPP2A--D32p75pPP2Aid">
        <Reactant specieID="D32p75"           />
        <Reactant specieID="pPP2A"          />
        <Product  specieID="D32p75pPP2A"       />

        <forwardRate> 0.015e-03        </forwardRate>
        <reverseRate> 168e-3          </reverseRate>
    </Reaction>

    <!--D32p75pPP2A(_B56d)        -> D32  + pPP2A(_B56d) (in xpp: v25=3) -->
    <Reaction name = "D32p75pPP2A--D32+pPP2A reac" id="D32p75pPP2A--D32+pPP2Aid">
        <Reactant specieID="D32p75pPP2A"       />
        <Product  specieID="D32"            />
        <Product  specieID="pPP2A"          />

        <forwardRate> 42e-3           </forwardRate>
        <reverseRate> 0.0             </reverseRate>
    </Reaction>

    <!--D32p75 + PP2ABPR72 <-> D32p75PP2ABPR72   (much faster than in xpp: k26=0.0001 k_26=6.4) -->
     <Reaction name = "D32p75+PP2ABPR72--D32p75PP2ABPR72 reac" id="D32p75+PP2ABPR72--D32p75PP2ABPR72_id">
        <Reactant specieID="D32p75"                   />
        <Reactant specieID="PP2ABPR72"             />
        <Product  specieID="D32p75PP2ABPR72"         />

        <forwardRate> 0.0023e-3          </forwardRate>
        <reverseRate> 84e-3           </reverseRate>
    </Reaction>

    <!--D32p75PP2ABPR72        -> D32  + PP2ABPR72       (in xpp: v26=1.6) -->
    <Reaction name = "D32p75PP2ABPR72--D32+PP2ABPR72 reac" id="D32p75PP2ABPR72--D32+PP2ABPR72_id">
        <Reactant specieID="D32p75PP2ABPR72"         />
        <Product  specieID="D32"                    />
        <Product  specieID="PP2ABPR72"             />

        <forwardRate> 21e-3           </forwardRate>
        <reverseRate> 0.0             </reverseRate>
    </Reaction>

    <!--D32p75 + PP2AB56d <-> D32p75PP2AB56d   (must faster than in xpp: k26=0.0001 k_26=6.4) -->
     <Reaction name = "D32p75+PP2AB56d--D32p75PP2AB56d reac" id="D32p75+PP2AB56d--D32p75PP2AB56d_id">
        <Reactant specieID="D32p75"                   />
        <Reactant specieID="PP2AB56d"              />
        <Product  specieID="D32p75PP2AB56d"          />

        <forwardRate> 0.0023e-3          </forwardRate>
        <reverseRate> 84e-3           </reverseRate>
    </Reaction>

    <!--D32p75PP2AB56d        -> D32  + PP2AB56d       (in xpp: v26=1.6) -->
    <Reaction name = "D32p75PP2AB56d--D32+PP2AB56d reac" id="D32p75PP2AB56d--D32+PP2AB56d_id">
        <Reactant specieID="D32p75PP2AB56d"          />
        <Product  specieID="D32"                    />
        <Product  specieID="PP2AB56d"              />

        <forwardRate> 21e-3           </forwardRate>
        <reverseRate> 0.0             </reverseRate>
    </Reaction>

    <!--D32p75  +  PP2Acal(_BPR72) -> D32p75PP2Acal(_BPR72)  (must faster than in xpp: k25c=0.0004 k_25c=12 v25c=3) -->
     <Reaction name = "D32p75+PP2Acal--D32p75PP2Acal reac" id="D32p75+PP2Acal--D32p75PP2A_id">
        <Reactant specieID="D32p75"               />
        <Reactant specieID="PP2Acal"              />
        <Product  specieID="D32p75PP2Acal"           />

        <forwardRate> 0.015e-03        </forwardRate>
        <reverseRate> 168e-3           </reverseRate>
    </Reaction>

    <!--D32p75PP2Acal(_BPR72)  ->  D32 +  PP2Acal(_BPR72) -->
    <Reaction name = "D32p75PP2Acal-D32+PP2Acal reac" id="D32p75PP2Acal-D32+PP2Acal_id">
        <Reactant specieID="D32p75PP2Acal"           />
        <Product  specieID="PP2Acal"              />
        <Product  specieID="D32"                />

        <forwardRate> 42e-3           </forwardRate>
        <reverseRate> 0.0             </reverseRate>
    </Reaction>

<!--cAMP Buffer-->
<!--VII. *****************PDE10 *******************************-->
    <!--1. PDE10 + cAMP    <-> PDE10cAMP         (in xpp: KfPDE10=    KbPDE10=  ) -->
    <Reaction name = "PDE10+cAMP--PDE10cAMP" id="PDE10+cAMP--PDE10cAMP_id">
        <Reactant specieID="PDE10"                  />
        <Reactant specieID="cAMP"                   />
        <Product  specieID="PDE10cAMP"              />

        <forwardRate> 0.084e-3        </forwardRate>
        <reverseRate> 16.8e-3        </reverseRate>
    </Reaction>
    <!--2. PDE10cAMP        -> PDE10 + AMP       (in xpp: V_PDE10=18) -->
    <Reaction name = "PDE10cAMP--PDE10+AMP" id="PDE10cAMP--PDE10+AMP_id">
        <Reactant specieID="PDE10cAMP"              />
        <Product  specieID="PDE10"                  />
        <Product  specieID="AMP"                    />

        <forwardRate> 4.2e-3         </forwardRate>
        <reverseRate> 0.0           </reverseRate>
    </Reaction>

<!--IX. *****************pPDE10 activity *******************************-->
    <!--1. pPDE10 + cAMP    <-> pPDE10cAMP          -->
    <Reaction name = "pPDE10+cAMP--pPDE10cAMP" id="pPDE10+cAMP--pPDE10cAMP_id">
        <Reactant specieID="pPDE10"                 />
        <Reactant specieID="cAMP"                   />
        <Product  specieID="pPDE10cAMP"             />

        <forwardRate>  0.336e-3      </forwardRate>
        <reverseRate>  67.2e-3        </reverseRate>
    </Reaction>

    <!--2. pPDE10cAMP        -> pPDE10 + AMP       source: -->
    <Reaction name = "pPDE10cAMP--pPDE10+AMP" id="pPDE10cAMP--pPDE10+AMP_id">
        <Reactant specieID="pPDE10cAMP"             />
        <Product  specieID="pPDE10"                 />
        <Product  specieID="AMP"                    />

        <forwardRate>  16.8e-3        </forwardRate>
        <reverseRate>  0.0          </reverseRate>
    </Reaction>
    
    <!-- PDE2 buff for cAMP, two steps-->
<Reaction name = "PDE2+cAMP--PDE2cAMP" id="PDE2+cAMP--PDE2cAMP">
        <Reactant specieID="PDE2"                  />
        <Reactant specieID="cAMP"                   />
        <Product  specieID="PDE2cAMP"              />

        <forwardRate> 0.00002e-3        </forwardRate>
	<reverseRate> 0.5e-3        </reverseRate>
     
</Reaction>

 <Reaction name = "PDE2cAMP+cAMP--PDE2cAMP2" id="PDE2cAMP+cAMP--PDE2cAMP2">
        <Reactant specieID="PDE2cAMP"              />
        <Reactant specieID="cAMP"                   />
	<Product specieID="PDE2cAMP2"              />
        <forwardRate> 0.0059e-3         </forwardRate>
        <reverseRate> 0.5e-3           </reverseRate>
    </Reaction>
  
    <Reaction name = "PDE2cAMP2--PDE2cAMP+AMP" id="PDE2cAMP2--PDE2cAMP+AMP">
	<Reactant specieID="PDE2cAMP2"              />
        <Product specieID="PDE2cAMP"              />
        <Product  specieID="AMP"                    />
        <forwardRate> 5.4e-3         </forwardRate>
        <reverseRate> 0.0           </reverseRate>
    </Reaction>
    
<!-- PDE4 buff for cAMP cAMP + PDE4  <-> PDE4cAMP -->
    <Reaction name = "PDE4 enzyme1" id="PDE4bind">
        <Reactant specieID="PDE4"           />
        <Reactant specieID="cAMP"            />
        <Product  specieID="PDE4cAMP"       />
        <forwardRate> 0.0216e-03  </forwardRate>
        <reverseRate> 68.95e-03    </reverseRate>
    </Reaction>

    <!--  PDE4cAMP -> AMP + PDE4 -->
    <Reaction name = "PDE4 actvcomp" id="PDE4cat">
        <Reactant specieID="PDE4cAMP"       />
        <Product  specieID="PDE4"           />
        <Product  specieID="AMP"             />
        <forwardRate> 17.233e-03    </forwardRate>
        <reverseRate> 0            </reverseRate>
</Reaction>
 <!-- 17)  cAMP + pPDE4  <-> pPDE4cAMP -->
    <Reaction name = "pPDE4 enzyme1" id="pPDE4bind">
        <Reactant specieID="pPDE4"           />
        <Reactant specieID="cAMP"             />
        <Product  specieID="pPDE4cAMP"       />
        <forwardRate> 0.0864e-03   </forwardRate>
        <reverseRate> 275.8e-3  </reverseRate>
    </Reaction>

    <!-- 18)  pPDE4cAMP -> AMP + pPDE4 -->
    <Reaction name = "pPDE4 actvcomp" id="pPDE4cat">
        <Reactant specieID="pPDE4cAMP"       />
        <Product  specieID="pPDE4"           />
        <Product  specieID="AMP"              />
        <forwardRate> 68.932e-3   </forwardRate>
        <reverseRate> 0            </reverseRate>
    </Reaction>

<!--III. *********** Gq coupled receptor, from GQ RXN FILE *************-->
<!--0a. Glu or Glu Agonist is extruded -->
    <!--0a. Injected DaDbuf dissociates to Dbuf (external) and Da: DaDbuf -> Da + Dbuf  -->
    <Reaction name = "Glubuf--Glu+Gbuf" id="GluGbuf--Glu+Gbuf">
        <Reactant specieID="GluGbuf"                      />
        <Product  specieID="Gbuf"                      />
        <Product  specieID="Glu"                     />
        <forwardRate> 20e-03 </forwardRate>
        <reverseRate> 0      </reverseRate>
    </Reaction>
    
    <!--0b. GluOut    Glu <-> GluOut>  -->
  <Reaction name = "Glu--GluOut" id="Glu--GluOut">
  	<Reactant specieID="Glu"/>
	<Product specieID="GluOut"/>

  	<forwardRate>1.2e-3</forwardRate>
  	<reverseRate>0.06e-6</reverseRate>
  </Reaction>
  
  <!--0c. GluOut eliminated to prevent baseline shift: GluOut + Gbuf <-> Null -->
    <Reaction name = "GluOut-buf reac" id="Glu-buf_id">
        <Reactant specieID="GluOut"                      />
        <Reactant specieID="Gbuf"                      />

        <forwardRate> 1e-6      </forwardRate>
        <reverseRate> 0      </reverseRate>
    </Reaction>
    
   <!--0c. GluMgluR <==> Desensitized, needed for prolonged DHPG application -->
      <Reaction name = "Glu+MgluR--GluMgluRdesens" id="Glu+MgluR--GluMgluRdesens">
        <Reactant specieID="GluMgluR"              />
        <Product  specieID="GluMgluRdesens"         />

        <forwardRate> 0.0625e-03 </forwardRate>
        <reverseRate> 0.001e-03      </reverseRate>
    </Reaction>

   <!--1a. Glu or Glu agonist Dhpg: Glu + MgluR <==> GluMgluR
    1st set of rates is for Dhpg, 2nd set of rates for Glu  -->
      <Reaction name = "Glu+MgluR--GluMgluR" id="Glu+MgluR--GluMgluR">
        <Reactant specieID="Glu"              />
        <Reactant specieID="MgluR"              />
        <Product  specieID="GluMgluR"         />

        <forwardRate> 0.001e-03 </forwardRate>
        <reverseRate> 13.2e-03      </reverseRate>
	<!-- uncomment below and comment above for Glu (opposite for Dhpg) -->
        <!--reverseRate> 0.5e-03      </reverseRate-->
    </Reaction>

    <!--2a. Gqabg + GluMgluR    <-> GluMgluRGq    -->
    <Reaction name = "Gqabg+GluMgluR--GluMgluRGq" id="Gqabg+GluMgluR--GluMgluRGq">
        <Reactant specieID="Gqabg"               />
        <Reactant specieID="GluMgluR"             />
        <Product  specieID="GluMgluRGq"            />

        <forwardRate>  0.009e-03  </forwardRate>
        <reverseRate>   1.36e-03  </reverseRate>
    </Reaction>

  <!--1b. Gqabg + MgluR <-> MgluRGq -->
  <Reaction name = "Gqabg+MgluR- -MgluRGq" id="Gqabg+MgluR- -MgluRGq">
        <Reactant specieID="Gqabg" />
        <Reactant specieID="MgluR" />
        <Product specieID="MgluRGq" />

        <forwardRate> 0.00225e-06 </forwardRate>
        <reverseRate> 0.68e-03 </reverseRate>
   </Reaction>

   <!--2b. Glu + MgluRGq <-> GluMgluRGq -->
   <Reaction name = "Glu+MgluRGq- -GluMgluRGq" id="Glu+MgluRGq- -GluMgluRGq">
        <Reactant specieID="Glu" />
        <Reactant specieID="MgluRGq" />
        <Product specieID="GluMgluRGq" />

        <forwardRate> 0.004e-03 </forwardRate>
        <reverseRate> 26.4e-03      </reverseRate>
	<!-- uncomment below and comment above for Glu (opposite for Dhpg) -->
        <!--reverseRate> 1e-03 </reverseRate-->
   </Reaction>

   <!--3. GabgGluMglu    <-> GqaGTP + GluMgluRGbg -->
    <Reaction name = "GluMgluRGq--GqaGTP+GluMgluRGbg" id="GluMgluRGq--GqaGTP+GluMgluRGbg">
        <Reactant specieID="GluMgluRGq"               />
        <Product specieID="GqaGTP"             />
        <Product specieID="GluMgluR"            /> 
        <Product specieID="Gbg"             />
 
        <forwardRate>  1.5e-03 </forwardRate>
        <reverseRate>   0  </reverseRate>
    </Reaction>

<!--IV. *************** G protein hydrolysis and regeneration  *******************-->

   <!--1. hydrolysis: GsaGTP       <-> GsaGDP             -->
    <Reaction name = "GsaGTP--GsaGDP reac" id="GsaGTP--GsaGDP_id">
        <Reactant specieID="GsaGTP"                  />
        <Product  specieID="GsaGDP"                  />

        <forwardRate> 0.01e-03        </forwardRate>
        <reverseRate> 0.0           </reverseRate>
    </Reaction>

    <!-- slow this down if depletion is significant, or to match regen of Gqa -->
    <!--2. regen: GsaGDP + Gbg       <-> Gsabg          (in xpp: k5=100), Kd=? -->
    <Reaction name = "GsaGDP+Gbg--Gs reac" id="GsaGDP+Gbg--Gs_id">
        <Reactant specieID="GsaGDP"                  />
        <Reactant specieID="Gbg"                    />
        <Product  specieID="Gsabg"                      />

        <forwardRate> 2e-03       </forwardRate>
        <reverseRate> 0.0           </reverseRate>
    </Reaction>


<!-- Hydrolysis of GqaGTP - slower than with GAP activity -->
    <!--3. GqaGTP <-> GqaGDP -->
    <Reaction name = "GqaGTP--GqaGDP" id="GqaGTP--GqaGDP">
        <Reactant specieID="GqaGTP"            />
        <Product  specieID="GqaGDP"            />

        <forwardRate>   0.1e-03   </forwardRate>
        <reverseRate>   0  </reverseRate>
    </Reaction>

<!-- 2nd order (was 1st order in Gq files) regeneration of Gqabg -->
    <!--4. GqaGDP + Gbg <-> Gqabg -->
    <Reaction name = "GqaGDP+Gbg--Gqabg" id="GqaGDP+Gbg--Gqabg">
        <Reactant specieID="GqaGDP"            />
        <Reactant specieID="Gbg"                    />
        <Product  specieID="Gqabg"            />

        <forwardRate>   2e-03   </forwardRate>
        <reverseRate>   0  </reverseRate>
    </Reaction>
    
    <!-- PLC, Dag, IP3, 2ag and PKC, from Gq RXN FILE --> 
<!-- Review these and check all molecule names -->

    <!--1a. Plc+Ca <-> PlcCa 2500 nM -->
    <Reaction name = "Plc+Ca--PlcCa" id="Plc+Ca--PlcCa">
        <Reactant specieID="Ca"           />
        <Reactant specieID="Plc"              />
        <Product  specieID="PlcCa"               />

        <forwardRate> 0.0004e-03   </forwardRate>
        <reverseRate> 1e-03        </reverseRate>
    </Reaction>

    <!--2a. PlcCa + GaGTP    <->   PlcCaGqa  200 nM-->
    <Reaction name = "PlcCa+GqaGTP--PlcCaGqa" id="PlcCa+GqaGTP--PlcCaGqa">
        <Reactant specieID="GqaGTP"           />
        <Reactant specieID="PlcCa"              />
        <Product  specieID="PlcCaGqa"               />

        <forwardRate> 0.004375e-03   </forwardRate>
        <reverseRate> 0.7e-03        </reverseRate>
    </Reaction>

    <!--1b. Plc + GqaGTP    <->   PlcGqa 1000 nM -->
<!--AB: Falkenburger 2010 uses 0.71e-3 for reverse rate --> 
    <Reaction name = "Plc+GqaGTP--PlcGqa" id="Plc+GqaGTP--PlcGqa">
        <Reactant specieID="GqaGTP"           />
        <Reactant specieID="Plc"              />
        <Product  specieID="PlcGqa"               />

        <forwardRate> 0.0007e-03   </forwardRate>
        <reverseRate> 0.7e-03        </reverseRate>
    </Reaction>

    <!--2b. PlcGqa + Ca    <->   PlcCaGqa  500 nM-->
    <Reaction name = "PlcGaGTP+Ca--PlcCaGqa" id="PlcGaGTP+Ca--PlcCaGqa">
        <Reactant specieID="Ca"           />
        <Reactant specieID="PlcGqa"              />
        <Product  specieID="PlcCaGqa"               />

        <forwardRate> 0.0025e-03   </forwardRate>
        <reverseRate> 1.0e-03        </reverseRate>
    </Reaction>


   <!--3i. PlcCa + Pip2    <-> PlcCaPip2    Possibly make these two 3x-5x faster-->
    <Reaction name = "PlcCa+Pip2--PlcCaPip2" id="PlcCa+Pip2--PlcCaPip2">
        <Reactant specieID="PlcCa"               />
        <Reactant specieID="Pip2"             />
        <Product  specieID="PlcCaPip2"            />

        <forwardRate> 0.03e-06   </forwardRate>
        <reverseRate> 1.2e-03   </reverseRate>
    </Reaction>

    <!--4i. PlcCaPip2      <-> PlcCaDag + Ip3 -->
    <Reaction name = "PlcCaPip2--PlcCa+Dag+Ip3" id="PlcCaPip2--PlcCa+Dag+Ip3">
        <Reactant specieID="PlcCaPip2"            />
        <Product  specieID="PlcCa"               />
        <Product  specieID="Ip3"            />
        <Product  specieID="Dag"            />

        <forwardRate> 0.3e-03     </forwardRate>
        <reverseRate> 0e-03    </reverseRate>
    </Reaction>
      
    <!--3j. PlcCaGqa + Pip2    <-> PlcCaGqaPip2   Possibly make these two 3x-5x faster -->
    <Reaction name = "PlcCaGqa+Pip2--PlcCaGqaPip2" id="PlcCaGqa+Pip2--PlcCaGqaPip2">
        <Reactant specieID="PlcCaGqa"               />
        <Reactant specieID="Pip2"             />
        <Product  specieID="PlcCaGqaPip2"            />

        <forwardRate>  1.665e-06   </forwardRate>
        <reverseRate>  60e-03   </reverseRate>
    </Reaction>
      
    <!--4j. PlcCaGqaPip2       <-> PlcCaGqaDag + Ip3 -->
    <Reaction name = "PlcCaGqaPip2--PlcCaGqaDag+Ip3" id="PlcCaGqaPip2--PlcCaGqaDag+Ip3">
        <Reactant specieID="PlcCaGqaPip2"            />
        <Product  specieID="PlcCaGqa"               />
        <Product  specieID="Dag"            />
        <Product  specieID="Ip3"            />

        <forwardRate> 30e-03     </forwardRate>
        <reverseRate> 0e-03    </reverseRate>
    </Reaction>
      
<!-- GAP activity - only with PLC bound not to PIP2. Make slower for stronge 2AG response?-->
    <!-- PlcGaGTP       <-> Plc + Gabg -->
    <Reaction name = "PlcGqa--Plc+GqaGDP" id="PlcGqa--Plc+GqaGDP">
        <Reactant specieID="PlcGqa"            />
        <Product  specieID="Plc"               />
        <Product  specieID="GqaGDP"            />

        <forwardRate>   12e-03   </forwardRate>
        <reverseRate>   0  </reverseRate>
    </Reaction>

<!-- Gap activity of PlcCa.  Make slower for stronge 2AG response?-->
    <Reaction name = "PlcCaGqa--PlcCa+GaGDP" id="PlcCaGqa--Plc+GaGDP">
        <Reactant specieID="PlcCaGqa"            />
        <Product  specieID="PlcCa"               />
        <Product  specieID="GqaGDP"            />

        <forwardRate>   12e-03   </forwardRate>
        <reverseRate>   0  </reverseRate>
    </Reaction>

    <!-- Ca + Dgl <-> CaDgl   Dgl is DAG lipase, which produces 2AG -->
    <!-- no source for rates.  Make 400 nM affinity -->
    <Reaction name = "Ca+Dlg--CaDgl" id="Ca+Dlg--CaDgl">
        <Reactant specieID="Ca"            />
        <Reactant specieID="Dgl"               />
        <Product  specieID="CaDgl"            />

        <forwardRate> 0.125e-03     </forwardRate>
        <reverseRate> 50e-03    </reverseRate>
    </Reaction>
 
    <!-- Dag + CaDgl <-> DagCaDgl -->
    <!--affinity dec to 2500 nM   -->
    <Reaction name = "Dag+CaDlg--DagCaDgl" id="Dag+CaDlg--DagCaDgl">
        <Reactant specieID="Dag"            />
        <Reactant specieID="CaDgl"               />
        <Product  specieID="DagCaDgl"            />

        <forwardRate> 0.0005e-03     </forwardRate>
        <reverseRate> 1.0e-03    </reverseRate>
    </Reaction>

    <!-- DagCaDgl <-> CaDgl + 2ag -->
    <!-- kcat from Rosenburger Lipids 2007 -->
    <Reaction name = "DagCaDgl--CaDgl+2ag" id="DagCaDgl--CaDgl+2ag">
        <Reactant specieID="DagCaDgl"            />
        <Product  specieID="CaDgl"               />
        <Product  specieID="2ag"            />

        <forwardRate> 0.25e-03     </forwardRate>
        <reverseRate> 0e-03    </reverseRate>
    </Reaction>

<!-- ************* degradation of IP3 and 2AG, implementing the enzymes? -->
    <!--  Ip3    <-> Ip3degrad         rate from IP3deg from Xu watras Loew J Cell science 2003 -->
    <Reaction name = "Ip3--Ip3degrad" id="Ip3--Ip3degrad">
         <Reactant specieID="Ip3"            />
        <Product  specieID="Ip3degrad"        />

        <forwardRate> 0.1e-03      </forwardRate>
        <reverseRate> 0.0e-03      </reverseRate>
    </Reaction>

   <!-- previously unlabeled IP3 degradation rxn -->
   <Reaction name = "Ip3degrad+PIkinase--Ip3degPIk" id="PIkinase1">
        <Reactant specieID="Ip3degrad"            />   
        <Reactant  specieID="PIkinase"               />
        <Product  specieID="Ip3degPIk"            />

        <forwardRate> 0.0005e-3    </forwardRate>
        <reverseRate> 0.4e-03    </reverseRate>
    </Reaction>

<!-- rate from PIP2synth from Xu watras Loew J Cell science 2003 -->
   <Reaction name = "Ip3degPIk--PIP2 + PIkinase" id="PIkinase2">
        <Reactant specieID="Ip3degPIk"            />
        <Product  specieID="PIkinase"               />
        <Product  specieID="Pip2"            />

        <forwardRate> 0.1e-3  </forwardRate>
        <reverseRate> 0e-3    </reverseRate>
    </Reaction>    

    <!--  2ag    <-> 2agDegrad       Degraded 2AG   -->
    <Reaction name = "2ag--2agDegrad" id="2ag--2agDegrad">
         <Reactant specieID="2ag"            />
        <Product  specieID="2agDegrad"        />

        <forwardRate> 0.25e-03      </forwardRate>
        <reverseRate> 0.0e-03      </reverseRate>
    </Reaction>

	<!-- ************* degradation of  DAG by DAG kinase -->
     <!--  Dag   + DagK <-> DagKdag -> PA  step 1  (Km = 2 mol% Shulga et al. FEBS letters -->
    <Reaction name = "DagKdag1" id="DagKdag1">
         <Reactant specieID="Dag"            />
         <Reactant specieID="DagK"            />
        <Product  specieID="DagKdag"        />

        <forwardRate> 0.00007e-03      </forwardRate>
        <reverseRate> 0.8e-3         </reverseRate>
    </Reaction>

    <!--  Dag   + DagK <-> DagKdag -> PA   step 2 -->
    <Reaction name = "DagKdag1" id="DagKdag1">
         <Reactant specieID="DagKdag"            />
        <Product  specieID="PA"        />
        <Product  specieID="DagK"        />

        <forwardRate> 0.2e-03      </forwardRate>
        <reverseRate> 0.0e-03      </reverseRate>
   </Reaction>


<!-- ***************************************************************************-->
<!--V. AC5 to cAMP with PDEs, from Gs RXN FILE. May need to add AC1 at some point -->
    <!--1. GsaGTP + AC5 <-> AC5Gsa(GTP) -->
    <Reaction name = "GsaGTP+AC5--AC5Gsa reac" id="GsaGTP+AC5--AC5Gsa_id">
        <Reactant specieID="GsaGTP"                  />
        <Reactant specieID="AC5"                     />
        <Product  specieID="AC5Gsa"                />

        <forwardRate> 0.0148e-03   </forwardRate>
        <reverseRate> 3.996e-03        </reverseRate>
    </Reaction>
    <!--2. AC5Gsa(GTP) + ATP    <-> AC5Gsa(GTP)ATP     -->
    <Reaction name = "AC5Gsa+ATP--AC5GsaATP reac" id="AC5Gsa+ATP--AC5GsaATP_id">
        <Reactant specieID="AC5Gsa"                />
        <!--Reactant specieID="ATP"                    /-->
        <Product  specieID="AC5GsaATP"             />

        <!--if ATP: forwardRate> 0.1276e-6    </forwardRate-->
        <forwardRate> 0.2552    </forwardRate>
        <reverseRate> 0.2612e-03    </reverseRate>
    </Reaction>
    <!--3. AC5Gsa(GTP)ATP       <-> AC5Gsa(GTP) + cAMP   -->
    <Reaction name = "AC5GsaATP--AC5Gsa+cAMP reac" id="AC5GsaATP--AC5Gsa+cAMP_id">
        <Reactant specieID="AC5GsaATP"             />
        <Product  specieID="AC5Gsa"                />
        <Product  specieID="cAMP"                   />

        <forwardRate> 28.46e-03     </forwardRate>
        <reverseRate> 0.2592e-6    </reverseRate>
    </Reaction>
    
    <Reaction name = "AC5GsaATP--AC5Gsa+cAMP reac" id="AC5GsaATP--AC5Gsa+cAMP_id">
        <Reactant specieID="AC5GsaATP"             />
        <Product  specieID="AC5"                />
        <Product  specieID="cAMP"                   />
        <Product  specieID="GsaGDP"                   />

        <forwardRate> 0.03e-03     </forwardRate>
        <reverseRate> 0.0    </reverseRate>
    </Reaction>



    
    <!--3j. PlcCaGqa + Pip2    <-> PlcCaGqaPip2   Possibly make these two 3x-5x faster -->
    <Reaction name = "PlcCaGqa+Pip2--PlcCaGqaPip2" id="PlcCaGqa+Pip2--PlcCaGqaPip2">
        <Reactant specieID="PlcGqa"               />
        <Reactant specieID="Pip2"             />
        <Product  specieID="PlcGqaPip2"            />		<!--Testing only a gq dependent form of plc-->

        <forwardRate>  1.665e-06   </forwardRate>
        <reverseRate>  60e-03   </reverseRate>
    </Reaction>
    
    <!--4j. PlcCaGqaPip2       <-> PlcCaGqaDag + Ip3 -->
    <Reaction name = "PlcCaGqaPip2--PlcCaGqaDag+Ip3" id="PlcCaGqaPip2--PlcCaGqaDag+Ip3">
        <Reactant specieID="PlcGqaPip2"            />
        <Product  specieID="PlcGqa"               />
        <Product  specieID="Dag"            />
        <Product  specieID="Ip3"            />

        <forwardRate> 0.3e-03     </forwardRate>
        <reverseRate> 0e-03    </reverseRate>
    </Reaction>

	
	
      <!--3j. PlcCaGqa + Pip2    <-> PlcCaGqaPip2   Possibly make these two 3x-5x faster -->
    <Reaction name = "PlcCaGqa+Pip2--PlcCaGqaPip2" id="PlcCaGqa+Pip2--PlcCaGqaPip2">
        <Reactant specieID="PlcGbg"               />
        <Reactant specieID="Pip2"             />
        <Product  specieID="PlcGbgPip2"            />		<!--Testing only a gq dependent form of plc-->

        <forwardRate>  1.665e-06   </forwardRate>
        <reverseRate>  60e-03   </reverseRate>
    </Reaction>
    
    <!--4j. PlcCaGqaPip2       <-> PlcCaGqaDag + Ip3 -->
    <Reaction name = "PlcCaGqaPip2--PlcCaGqaDag+Ip3" id="PlcCaGqaPip2--PlcCaGqaDag+Ip3">
        <Reactant specieID="PlcGbgPip2"            />
        <Product  specieID="PlcGbg"               />
        <Product  specieID="Dag"            />
        <Product  specieID="Ip3"            />

        <forwardRate> 0.3e-03     </forwardRate>
        <reverseRate> 0e-03    </reverseRate>
    </Reaction>
    
    
    
    <!--3j. PlcCaGqa + Pip2    <-> PlcCaGqaPip2   Possibly make these two 3x-5x faster -->
    <Reaction name = "PlcCaGbg+Pip2--PlcCaGqaPip2" id="PlcCaGqa+Pip2--PlcCaGqaPip2">
        <Reactant specieID="PlcCaGbg"               />
        <Reactant specieID="Pip2"             />
        <Product  specieID="PlcCaGbgPip2"            />

        <forwardRate>  1.665e-06   </forwardRate>
        <reverseRate>  60e-03   </reverseRate>
    </Reaction>
      
    <!--4j. PlcCaGqaPip2       <-> PlcCaGqaDag + Ip3 -->
    <Reaction name = "PlcCaGqaPip2--PlcCaGqaDag+Ip3" id="PlcCaGqaPip2--PlcCaGqaDag+Ip3">
        <Reactant specieID="PlcCaGbgPip2"            />
        <Product  specieID="PlcCaGbg"               />
        <Product  specieID="Dag"            />
        <Product  specieID="Ip3"            />

        <forwardRate> 30e-03     </forwardRate>
        <reverseRate> 0e-03    </reverseRate>
    </Reaction>
	
	
	<!--1b. Plc + GqaGTP    <->   PlcGqa 1000 nM -->
    <Reaction name = "Plc+GqaGTP--PlcGqa" id="Plc+GqaGTP--PlcGqa">
        <Reactant specieID="Gbg"           />
        <Reactant specieID="Plc"              />
        <Product  specieID="PlcGbg"               />

        <forwardRate> 0.0007e-03   </forwardRate>
        <reverseRate> 0.7e-03        </reverseRate>
    </Reaction>
      
       <!--2b. PlcGqa + Ca    <->   PlcCaGqa  500 nM-->
    <Reaction name = "PlcGaGTP+Ca--PlcCaGqa" id="PlcGaGTP+Ca--PlcCaGqa">
        <Reactant specieID="Ca"           />
        <Reactant specieID="PlcGbg"              />
        <Product  specieID="PlcCaGbg"               />

        <forwardRate> 0.0025e-03   </forwardRate>
        <reverseRate> 1.0e-03        </reverseRate>
    </Reaction>
    
    
    
    <!--2b. PlcGqa + Ca    <->   PlcCaGqa  500 nM-->
    <Reaction name = "PlcGaGTP+Ca--PlcCaGqa" id="PlcGaGTP+Ca--PlcCaGqa">
        <Reactant specieID="GqaGTP"           />
        <Reactant specieID="PlcGbg"              />
        <Product  specieID="PlcGqaGbg"               />

        <forwardRate> 0.005e-02   </forwardRate>    <!-- 20x for synergy -->
        <reverseRate> 1.0e-03        </reverseRate>
    </Reaction>
      
         <!--2b. PlcGqa + Ca    <->   PlcCaGqa  500 nM-->
    <Reaction name = "PlcGaGTP+Ca--PlcCaGqa" id="PlcGaGTP+Ca--PlcCaGqa">
        <Reactant specieID="Gbg"           />
        <Reactant specieID="PlcGqa"              />
        <Product  specieID="PlcGqaGbg"               />

        <forwardRate> 0.005e-02   </forwardRate>   <!--10x for synergy -->
        <reverseRate> 1.0e-03        </reverseRate>
    </Reaction>
      
      
       <!--2b. PlcGqa + Ca    <->   PlcCaGqa  500 nM-->
    <Reaction name = "PlcGaGTP+Ca--PlcCaGqa" id="PlcGaGTP+Ca--PlcCaGqa">
        <Reactant specieID="GqaGTP"           />
        <Reactant specieID="PlcCaGbg"              />
        <Product  specieID="PlcCaGqaGbg"               />

        <forwardRate> 0.005e-02  </forwardRate>  <!--10x for synergy -->
        <reverseRate> 1.0e-03        </reverseRate>
    </Reaction>
      
      
         <!--2b. PlcGqa + Ca    <->   PlcCaGqa  500 nM-->
    <Reaction name = "PlcGaGTP+Ca--PlcCaGqa" id="PlcGaGTP+Ca--PlcCaGqa">
        <Reactant specieID="Gbg"           />
        <Reactant specieID="PlcCaGqa"              />
        <Product  specieID="PlcCaGqaGbg"               />

        <forwardRate> 0.005e-02   </forwardRate>  <!--10x for synergy -->
        <reverseRate> 1.0e-03        </reverseRate>
    </Reaction>
      
      
       <!--2b. PlcGqa + Ca    <->   PlcCaGqa  500 nM-->
    <Reaction name = "PlcGaGTP+Ca--PlcCaGqa" id="PlcGaGTP+Ca--PlcCaGqa">
        <Reactant specieID="Ca"           />
        <Reactant specieID="PlcGqaGbg"              />
        <Product  specieID="PlcCaGqaGbg"               />

        <forwardRate> 0.005e-02   </forwardRate>       <!--10x for synergy -->
        <reverseRate> 1.0e-03        </reverseRate>
    </Reaction>
    
      
      
      <!--3j. PlcCaGqa + Pip2    <-> PlcCaGqaPip2   Possibly make these two 3x-5x faster -->
    <Reaction name = "PlcCaGqa+Pip2--PlcCaGqaPip2" id="PlcCaGqa+Pip2--PlcCaGqaPip2">
        <Reactant specieID="PlcGqaGbg"               />
        <Reactant specieID="Pip2"             />
        <Product  specieID="PlcGqaGbgPip2"            />		<!--Testing only a gq dependent form of plc-->

        <forwardRate>  1.665e-06   </forwardRate>
        <reverseRate>  60e-03   </reverseRate>
    </Reaction>
    
    <!--4j. PlcCaGqaPip2       <-> PlcCaGqaDag + Ip3 -->
    <Reaction name = "PlcCaGqaPip2--PlcCaGqaDag+Ip3" id="PlcCaGqaPip2--PlcCaGqaDag+Ip3">
        <Reactant specieID="PlcGqaGbgPip2"            />
        <Product  specieID="PlcGqaGbg"               />
        <Product  specieID="Dag"            />
        <Product  specieID="Ip3"            />

        <forwardRate> 300e-03     </forwardRate>     <!--10x for synergy-->
        <reverseRate> 0e-03    </reverseRate>
    </Reaction>
      
      
           <!--3j. PlcCaGqa + Pip2    <-> PlcCaGqaPip2   Possibly make these two 3x-5x faster -->
    <Reaction name = "PlcCaGqa+Pip2--PlcCaGqaPip2" id="PlcCaGqa+Pip2--PlcCaGqaPip2">
        <Reactant specieID="PlcCaGqaGbg"               />
        <Reactant specieID="Pip2"             />
        <Product  specieID="PlcCaGqaGbgPip2"            />		<!--Testing only a gq dependent form of plc-->

        <forwardRate>  1.665e-06   </forwardRate>
        <reverseRate>  60e-03   </reverseRate>
    </Reaction>
    
    <!--4j. PlcCaGqaPip2       <-> PlcCaGqaDag + Ip3 -->
    <Reaction name = "PlcCaGqaPip2--PlcCaGqaDag+Ip3" id="PlcCaGqaPip2--PlcCaGqaDag+Ip3">
        <Reactant specieID="PlcCaGqaGbgPip2"            />
        <Product  specieID="PlcGqaGbg"               />
        <Product  specieID="Dag"            />
        <Product  specieID="Ip3"            />

        <forwardRate> 300e-03     </forwardRate>              <!--10x for synergy-->
        <reverseRate> 0e-03    </reverseRate>
    </Reaction>
      
    
    
    
	<!--3i. PlcCa + Pip2    <-> PlcCaPip2    Possibly make these two 3x-5x faster-->
    <Reaction name = "PlcCa+Pip2--PlcCaPip2" id="PlcCa+Pip2--PlcCaPip2">
        <Reactant specieID="PlcCa"               />
        <Reactant specieID="Pip2"             />
        <Product  specieID="PlcCaPip2"            />

        <forwardRate> 0.03e-06   </forwardRate>
        <reverseRate> 1.2e-03   </reverseRate>
    </Reaction>

    <!--4i. PlcCaPip2      <-> PlcCaDag + Ip3 -->
    <Reaction name = "PlcCaPip2--PlcCa+Dag+Ip3" id="PlcCaPip2--PlcCa+Dag+Ip3">
        <Reactant specieID="PlcCaPip2"            />
        <Product  specieID="PlcCa"               />
        <Product  specieID="Ip3"            />
        <Product  specieID="Dag"            />

        <forwardRate> 0.3e-03     </forwardRate>
        <reverseRate> 0e-03    </reverseRate>
    </Reaction>
      
    <!--3j. PlcCaGqa + Pip2    <-> PlcCaGqaPip2   Possibly make these two 3x-5x faster -->
    <Reaction name = "PlcCaGqa+Pip2--PlcCaGqaPip2" id="PlcCaGqa+Pip2--PlcCaGqaPip2">
        <Reactant specieID="PlcCaGqa"               />
        <Reactant specieID="Pip2"             />
        <Product  specieID="PlcCaGqaPip2"            />

        <forwardRate>  1.665e-06   </forwardRate>
        <reverseRate>  60e-03   </reverseRate>
    </Reaction>
      
    <!--4j. PlcCaGqaPip2       <-> PlcCaGqaDag + Ip3 -->
    <Reaction name = "PlcCaGqaPip2--PlcCaGqaDag+Ip3" id="PlcCaGqaPip2--PlcCaGqaDag+Ip3">
        <Reactant specieID="PlcCaGqaPip2"            />
        <Product  specieID="PlcCaGqa"               />
        <Product  specieID="Dag"            />
        <Product  specieID="Ip3"            />

        <forwardRate> 30e-03     </forwardRate>
        <reverseRate> 0e-03    </reverseRate>
    </Reaction>
    
    
        <!--3j. PlcCaGqa + Pip2    <-> PlcCaGqaPip2   Possibly make these two 3x-5x faster -->
    <Reaction name = "PlcCaGqa+Pip2--PlcCaGqaPip2" id="PlcCaGqa+Pip2--PlcCaGqaPip2">
        <Reactant specieID="PlcGqa"               />
        <Reactant specieID="Pip2"             />
        <Product  specieID="PlcGqaPip2"            />		<!--Testing only a gq dependent form of plc-->

        <forwardRate>  1.665e-06   </forwardRate>
        <reverseRate>  60e-03   </reverseRate>
    </Reaction>
    
    <!--4j. PlcCaGqaPip2       <-> PlcCaGqaDag + Ip3 -->
    <Reaction name = "PlcCaGqaPip2--PlcCaGqaDag+Ip3" id="PlcCaGqaPip2--PlcCaGqaDag+Ip3">
        <Reactant specieID="PlcGqaPip2"            />
        <Product  specieID="PlcGqa"               />
        <Product  specieID="Dag"            />
        <Product  specieID="Ip3"            />

        <forwardRate> 0.3e-03     </forwardRate>
        <reverseRate> 0e-03    </reverseRate>
    </Reaction>

	
      <!--3j. PlcCaGqa + Pip2    <-> PlcCaGqaPip2   Possibly make these two 3x-5x faster -->
    <Reaction name = "PlcCaGbg+Pip2--PlcCaGqaPip2" id="PlcCaGqa+Pip2--PlcCaGqaPip2">
        <Reactant specieID="PlcCaGbg"               />
        <Reactant specieID="Pip2"             />
        <Product  specieID="PlcCaGbgPip2"            />

        <forwardRate>  1.665e-06   </forwardRate>
        <reverseRate>  60e-03   </reverseRate>
    </Reaction>
      
    <!--4j. PlcCaGqaPip2       <-> PlcCaGqaDag + Ip3 -->
    <Reaction name = "PlcCaGqaPip2--PlcCaGqaDag+Ip3" id="PlcCaGqaPip2--PlcCaGqaDag+Ip3">
        <Reactant specieID="PlcCaGbgPip2"            />
        <Product  specieID="PlcCaGbg"               />
        <Product  specieID="Dag"            />
        <Product  specieID="Ip3"            />

        <forwardRate> 30e-03     </forwardRate>
        <reverseRate> 0e-03    </reverseRate>
    </Reaction>               
      
      
      
    
      
  
      <!--3j. PlcCaGqa + Pip2    <-> PlcCaGqaPip2   Possibly make these two 3x-5x faster -->
    <Reaction name = "PlcCaGqa+Pip2--PlcCaGqaPip2" id="PlcCaGqa+Pip2--PlcCaGqaPip2">
        <Reactant specieID="PlcGbg"               />
        <Reactant specieID="Pip2"             />
        <Product  specieID="PlcGbgPip2"            />		<!--Testing only a gq dependent form of plc-->

        <forwardRate>  1.665e-06   </forwardRate>
        <reverseRate>  60e-03   </reverseRate>
    </Reaction>
    
    <!--4j. PlcCaGqaPip2       <-> PlcCaGqaDag + Ip3 -->
    <Reaction name = "PlcCaGqaPip2--PlcCaGqaDag+Ip3" id="PlcCaGqaPip2--PlcCaGqaDag+Ip3">
        <Reactant specieID="PlcGbgPip2"            />
        <Product  specieID="PlcGbg"               />
        <Product  specieID="Dag"  />
        <Product  specieID="Ip3"            />

        <forwardRate> 30e-03     </forwardRate>
        <reverseRate> 0e-03    </reverseRate>
    </Reaction>
                />
      <!--3j. PlcCaGqa + Pip2    <-> PlcCaGqaPip2   Possibly make these two 3x-5x faster -->
    <Reaction name = "PlcCaGbg+Pip2--PlcCaGqaPip2" id="PlcCaGqa+Pip2--PlcCaGqaPip2">
        <Reactant specieID="PlcCaGbg"               />
        <Reactant specieID="Pip2"             />
        <Product  specieID="PlcCaGbgPip2"            />

        <forwardRate>  1.665e-06   </forwardRate>
        <reverseRate>  60e-03   </reverseRate>
    </Reaction>
      
    <!--4j. PlcCaGqaPip2       <-> PlcCaGqaDag + Ip3 -->
    <Reaction name = "PlcCaGqaPip2--PlcCaGqaDag+Ip3" id="PlcCaGqaPip2--PlcCaGqaDag+Ip3">
        <Reactant specieID="PlcCaGbgPip2"            />
        <Product  specieID="PlcCaGbg"               />
        <Product  specieID="Dag"            />
        <Product  specieID="Ip3"            />

        <forwardRate> 30e-03     </forwardRate>
        <reverseRate> 0e-03    </reverseRate>
    </Reaction>
      
         
      
      
      
      
    
       <Reaction name = "CKpCamCa4+SynGap--CKpCamCa4Gap" id="CKpCamCa4+SynGap--CKpCamCa4Gap">
  <Reactant specieID="CKpCamCa4" />
  <Reactant specieID="SynGap" />
  <Product specieID="CKpCamCa4SynGap" />

  <forwardRate> 0.3067258192987457e-3</forwardRate>   
  <reverseRate> 0.058715155531797236 </reverseRate>

 </Reaction>


 <Reaction name = "CKpCamCa4Gap--CKpCamCa4+pSynGap" id="CKpCamCa4Gap--CKpCamCa4+pSynGap">
  <Reactant specieID="CKpCamCa4SynGap" />
  <Product specieID="pSynGap" />
  <Product specieID="CKpCamCa4" />

  <forwardRate> 0.0006484330410680531</forwardRate>
  <reverseRate> 0 </reverseRate>

 </Reaction>
 
 
 
 
 
  <!-- inactivation of pSynGAP) pSynGap -> SynGap -->
<Reaction name ="pSynGap--SynGap" id="pSynGap--SynGap">
	  <Reactant specieID="pSynGap"/>
	  <Product specieID="SynGap"/>

        <forwardRate> 1e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
    </Reaction>
  

<!--Syngap activity on Ras -->
<!--(Inactivation of RasGTP by SynGAP) RasGTP+SynGap <-> RasGTPGap -> SynGap + RasGDP -->

<Reaction name = "RasGTP+SynGap--RasGap" id="RasGTP+SynGap--RasGap">
  <Reactant specieID="RasGTP" />
  <Reactant specieID="SynGap" />
  <Product specieID="RasSynGap" />

 <forwardRate>0.00082e-3  </forwardRate>
 <reverseRate> 0.82e-3  </reverseRate>


</Reaction>

<Reaction name = "RasGap--SynGap+RasGDP" id = "RasGap--SynGap+RasGDP">
  <Reactant specieID="RasSynGap" />
  <Product specieID="SynGap" />
  <Product specieID="RasGDP" />

 <forwardRate> 0.205e-3 </forwardRate>
  <reverseRate> 0 </reverseRate>

</Reaction>


<!--(Inactivation of Ras by pSynGAP) RasGTP+pSynGap <-> RasGTPGap -> pSynGap + RasGDP -->

<Reaction name = "RasGTP+pSynGap--RaspGap" id="RasGTP+pSynGap--RaspGap">
  <Reactant specieID="RasGTP" />
  <Reactant specieID="pSynGap" />
  <Product specieID="RaspSynGap" />
  
  <forwardRate> 0.00112e-3 </forwardRate>
  <reverseRate> 1.112e-3  </reverseRate>

</Reaction>

<Reaction name = "RaspGap--pSynGap+RasGDP" id = "RaspGap--pSynGap+RasGDP">
  <Reactant specieID="RaspSynGap" />
  <Product specieID="pSynGap" />
  <Product specieID="RasGDP" />

  <forwardRate> 0.279e-3  </forwardRate>
  <reverseRate> 0 </reverseRate>

</Reaction>
    
    
    <Reaction name = "Rap1GTP+SynGap--Rap1Gap" id="Rap1GTP+SynGap--Rap1Gap">
  <Reactant specieID="Rap1GTP" />
  <Reactant specieID="SynGap" />
  <Product specieID="Rap1SynGap" />

  <forwardRate> 0.0032e-3 </forwardRate>
  <reverseRate> 3.2e-3 </reverseRate>
  
</Reaction>

<Reaction name = "Rap1Gap--SynGap+Rap1GDP" id = "Rap1Gap--SynGap+Rap1GDP">
  <Reactant specieID="Rap1SynGap" />
  <Product specieID="SynGap" />
  <Product specieID="Rap1GDP" />

 <forwardRate> 0.8e-3 </forwardRate>
  <reverseRate>0</reverseRate>

</Reaction>



<!--(Inactivation of Rap by SynGAP) Rap1GTP+SynGap <-> Rap1GTPGap -> SynGap + Rap1GDP -->









<!--(Inactivation of RapGTP by pSynGAP) Rap1GTP+pSynGap <-> Rap1GTPpGap -> pSynGap + Rap1GDP -->

<Reaction name = "Rap1GTP+pSynGap--Rap1pGap" id="Rap1GTP+pSynGap--Rap1pGap">
  <Reactant specieID="Rap1GTP" />
  <Reactant specieID="pSynGap" />
  <Product specieID="Rap1pSynGap"/>
  
 <forwardRate> 0.00614e-3 </forwardRate>
  <reverseRate> 6.14e-3 </reverseRate>
 
</Reaction>

<Reaction name = "Rap1pGap--pSynGap+Rap1GDP" id = "Rap1pGap--pSynGap+Rap1GDP">
  <Reactant specieID="Rap1pSynGap" />
  <Product specieID="pSynGap" />
  <Product specieID="Rap1GDP" />

   <forwardRate>1.53e-3 </forwardRate>
  <reverseRate> 0 </reverseRate>

</Reaction>

    
         <Reaction name ="SynGap+PSD95--cabuff" id="ca+cbuff--cabuff">
              <Reactant specieID="SynGap"/>
              <Reactant specieID="PSD95"/>
	      <Product specieID="SynGapPSD95"/>

        <forwardRate> 1e-6 </forwardRate> <!--4.7nM dissociation constant shown in Elife mary b kennedy-->
	<reverseRate> 4.7e-6 </reverseRate> 
</Reaction>
    
    <Reaction name = "CKpCamCa4+SynGap--CKpCamCa4Gap" id="CKpCamCa4+SynGap--CKpCamCa4Gap">
  <Reactant specieID="CKpCamCa4" />
  <Reactant specieID="SynGapPSD95" />
  <Product specieID="CKpCamCa4SynGapPSD95" />
  

 <forwardRate> 0.3067258192987457e-3</forwardRate>  
  <reverseRate> 0.058715155531797236 </reverseRate>

 </Reaction>

<Reaction name = "CKpCamCa4Gap--CKpCamCa4+pSynGap" id="CKpCamCa4Gap--CKpCamCa4+pSynGap">
  <Reactant specieID="CKpCamCa4SynGapPSD95" />
  <Product specieID="pSynGap" />
  <Product specieID="CKpCamCa4" />
<Product specieID="PSD95" />
  <forwardRate> 0.0006484330410680531</forwardRate>
  <reverseRate> 0 </reverseRate>

 </Reaction>
 
 <Reaction name = "RasGTP+SynGap--RasGap" id="RasGTP+SynGap--RasGap">
  <Reactant specieID="RasGTP" />
  <Reactant specieID="SynGapPSD95" />
  <Product specieID="RasSynGapPSD95" />

 <forwardRate>0.00082e-3  </forwardRate>
 <reverseRate> 0.82e-3  </reverseRate>


</Reaction>

<Reaction name = "RasGap--SynGap+RasGDP" id = "RasGap--SynGap+RasGDP">
  <Reactant specieID="RasSynGapPSD95" />
  <Product specieID="SynGapPSD95" />
  <Product specieID="RasGDP" />
  

 <forwardRate> 0.205e-3 </forwardRate>
  <reverseRate> 0 </reverseRate>

</Reaction>


<!--(Inactivation of Rap by SynGAP) Rap1GTP+SynGap <-> Rap1GTPGap -> SynGap + Rap1GDP -->

<Reaction name = "Rap1GTP+SynGap--Rap1Gap" id="Rap1GTP+SynGap--Rap1Gap">
  <Reactant specieID="Rap1GTP" />
  <Reactant specieID="SynGapPSD95" />
  <Product specieID="Rap1SynGapPSD95" />

  <forwardRate> 0.0032e-3 </forwardRate>
  <reverseRate> 3.2e-3 </reverseRate>
  
</Reaction>

<Reaction name = "Rap1Gap--SynGap+Rap1GDP" id = "Rap1Gap--SynGap+Rap1GDP">
  <Reactant specieID="Rap1SynGapPSD95" />
  <Product specieID="SynGapPSD95" />
  <Product specieID="Rap1GDP" />

 <forwardRate> 0.8e-3 </forwardRate>
  <reverseRate>0</reverseRate>

</Reaction>
      
        
   
    
    
    
    
    
        
    
      
	 




</ReactionScheme>












