<ReactionScheme>

    <Specie name="Raf1" 		id="Raf1"                                             kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="pRaf1"		 id="pRaf1"                                 kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="RasGTP"		 id="RasGTP"                                 kdiff="0"    kdiffunit="mu2/s"/>
    

    <Specie name="pRaf1Ras"		 id="pRaf1Ras"                                 kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="Raf1Ras"		 id="Raf1Ras"                                 kdiff="0"    kdiffunit="mu2/s"/>
   
   
    <Specie name="Ca"             id="Ca"            kdiff="174.3" kdiffunit="mu2/s"/> 
  
    



	<Specie name="dRaf1Ras" id="dRaf1Ras"                                 kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="dRaf1RasMEK" id="dRaf1RasMEK"                       kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="dRaf1RaspMEK" id="dRaf1RaspMEK"                     kdiff="0"    kdiffunit="mu2/s"/>

	
	<Specie name="dpRaf1Ras" id="dpRaf1Ras"                                 kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="dpRaf1RasMEK" id="dpRaf1RasMEK"                       kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="dpRaf1RaspMEK" id="dpRaf1RaspMEK"                     kdiff="0"    kdiffunit="mu2/s"/>

	<Specie name="bRaf"                                id="bRaf"                              kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="bRafRas" id="bRafRas"                                 kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="bRafRasMEK" id="bRafRasMEK"                       kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="bRafRaspMEK" id="bRafRaspMEK"                     kdiff="0"    kdiffunit="mu2/s"/>
	
	<Specie name="SynGap"                              id="SynGap"                kdiff="5"     kdiffunit="mu2/s"/><!--5-->
	<Specie name="pSynGap"                             id="pSynGap"               kdiff="5"     kdiffunit="mu2/s"/>
	<Specie name="pSynGapPSD95"                             id="pSynGapPSD95"               kdiff="0"     kdiffunit="mu2/s"/>
	
	
	<Specie name="CK"                                  id="CK"                    kdiff="3.6"     kdiffunit="mu2/s"/>
	<Specie name="CKp"                                 id="CKp"                   kdiff="3.6"     kdiffunit="mu2/s"/>
	<Specie name="CKpPP1"                              id="CKpPP1"                kdiff="0"     kdiffunit="mu2/s"/>
	
	<Specie name="CamCa4"                              id="CamCa4"                kdiff="0"     kdiffunit="mu2/s"/>
	<Specie name="CKCamCa4"                            id="CKCamCa4"              kdiff="3.6"     kdiffunit="mu2/s"/>
	<Specie name="CKpCamCa4"                           id="CKpCamCa4"             kdiff="3.6"     kdiffunit="mu2/s"/>	
	<Specie name="CKpCamCa4SynGap"                     id="CKpCamCa4SynGap"       kdiff="0"     kdiffunit="mu2/s"/>
	
	<Specie name="RasGRF" id="RasGRF"                             kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="CamCa4GRF" id="CamCa4GRF"                             kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="CamCa4GRFRas" id="CamCa4GRFRas"                 kdiff="0"    kdiffunit="mu2/s"/>
	
	<Specie name="RasSynGap" id="RasSynGap"                                   kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="RaspSynGap" id="RaspSynGap"                                 kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="RaspSynGapPSD95" id="RaspSynGapPSD95"                                 kdiff="0"    kdiffunit="mu2/s"/>
	
	<Specie name="RasGDP" id="RasGDP"                                         kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="rasGap" id="rasGap"                                         kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="RasGTPGap" id="RasGTPGap"                                   kdiff="0"    kdiffunit="mu2/s"/>
	
	
	
	
	
<!-- CaM from Gq files, with either C or N site binding first -->
    <Specie name="Cam"               id="Cam"               kdiff="11"    kdiffunit="mu2/s"/>
    <Specie name="CamCa2C"           id="CamCa2C"           kdiff="11"    kdiffunit="mu2/s"/>
    <Specie name="CamCa2N"           id="CamCa2N"           kdiff="11"    kdiffunit="mu2/s"/>
	
	<!-- calcium reaction subset, to adjust for proper basal calcium -->
<!-- calcium stuff first -->
    
    
    <Specie name="pmca"              id="pmca"              kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ncx"               id="ncx"               kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pmcaCa"            id="pmcaCa"            kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ncxCa" id="ncxCa" kdiff="0" kdiffunit="mu2/s"/>
<Specie name="CaOutLeak"      id="CaOutLeak"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Leak"           id="Leak"          kdiff="0"     kdiffunit="mu2/s"/>

<Specie name="CB"            id="CB"            kdiff="0"   kdiffunit="mu2/s"/>
<Specie name="CaB"      id="CaB" kdiff="0" kdiffunit="mu2/s"/>

<Specie name="CaOut"          id="CaOut"         kdiff="174.3" kdiffunit="mu2/s"/>
  <Specie name="Calbin"         id="Calbin"        kdiff="9.3"   kdiffunit="mu2/s"/>
    <Specie name="CalbinC"        id="CalbinC"       kdiff="9.3"   kdiffunit="mu2/s"/>
 
<Specie name="Cabuff"                id="Cabuff"                kdiff="0" kdiffunit="mu2/s"/>
<Specie name="Cbuff"                id="Cbuff"                kdiff="0" kdiffunit="mu2/s"/>
<Specie name="Cbuffslow"                id="Cbuffslow"                kdiff="0" kdiffunit="mu2/s"/>
<Specie name="Caextbuffslow"                id="Caextbuffslow"                kdiff="0" kdiffunit="mu2/s"/>
<Specie name="SynGapPSD95"                              id="SynGapPSD95"                kdiff="0"     kdiffunit="mu2/s"/>
	<Specie name="PSD95"                              id="PSD95"                kdiff="0"     kdiffunit="mu2/s"/>
	<Specie name="RasSynGapPSD95"     id="RasSynGapPSD95"    kdiff="0"     kdiffunit="mu2/s"/>
        <Specie name="Rap1SynGapPSD95"     id="Rap1SynGapPSD95"    kdiff="0"     kdiffunit="mu2/s"/>
        <Specie name="CKpCamCa4SynGapPSD95"                              id="CKpCamCa4SynGapPSD95"                kdiff="0"     kdiffunit="mu2/s"/>



	
<!-- control Ca back to level on time  -->
<Reaction name ="ca+cbuff--cabuff" id="ca+cbuff--cabuff">
              <Reactant specieID="Ca"/>
              <Reactant specieID="Cbuff"/>
	      <Product specieID="Cabuff"/>

        <forwardRate> 0.1e-3 </forwardRate>
	<reverseRate> 0.01e-3 </reverseRate>
</Reaction>

<Reaction name ="SynGap+PSD95--cabuff" id="ca+cbuff--cabuff">
              <Reactant specieID="SynGap"/>
              <Reactant specieID="PSD95"/>
	      <Product specieID="SynGapPSD95"/>

        <forwardRate> 1e-6 </forwardRate> <!--4.7nM dissociation constant shown in Elife mary b kennedy-->
	<reverseRate> 4.7e-6 </reverseRate> 
</Reaction>

<Reaction name ="SynGap+PSD95--cabuff" id="ca+cbuff--cabuff">
              <Reactant specieID="pSynGap"/>
              <Reactant specieID="PSD95"/>
	      <Product specieID="pSynGapPSD95"/>

        <forwardRate> 1e-6 </forwardRate> <!--47nM dissociation constant shown in Elife mary b kennedy-->
	<reverseRate> 47e-6 </reverseRate> 
</Reaction>







<Reaction name = "RasGTP+Raf1--Raf1RasGTP" id="RasGTP+Raf1--Raf1Ras">
        <Reactant specieID="RasGTP"           />
        <Reactant  specieID="Raf1"               />
        <Product  specieID="Raf1Ras"               />

	<forwardRate> 0.06e-3   </forwardRate> <!-- 0.06e-3 is Nadias Rates,but Upi uses 0.006e-3 HAVE A LOOK AT THIS RATE AGN,might hv messed up conversion,im using 0.006-->
	<reverseRate> 1e-3   </reverseRate>	<!-- 1e-3 is original rate but i modified it to 10e-3 -->
	
    </Reaction>

<Reaction name = "Ras+pRaf1--pRaf1RasGTP" id="RasGTP+pRaf1--pRaf1Ras">
        <Reactant specieID="RasGTP"           />
        <Reactant  specieID="pRaf1"               />
        <Product  specieID="pRaf1Ras"               />

        <forwardRate> 0.6e-3   </forwardRate>	<!--Upis Rates are kf= 60,Kb=0.5//My tweaked rates are Kf=1e-3 and Kb=5e-3-->
	<reverseRate> 0.5e-3   </reverseRate>    
	
    </Reaction>

<Reaction name = "Raf1Ras+Raf1Ras--2Raf1RasGTP" id="Raf1Ras+Raf1Ras--2Raf1RasGTP">
        <Reactant specieID="Raf1Ras"      n="2"     />
        <Product  specieID="dRaf1Ras"               />

        <forwardRate> 0.02e-3   </forwardRate> <!-- 0.02e-3 is nadia rate Raf1Ras dimers-->	
	<reverseRate> 0.5e-3   </reverseRate>
	
      </Reaction>

<Reaction name = "pRaf1Ras+pRaf1Ras--2pRaf1RasGTP" id="pRaf1Ras+pRaf1Ras--2pRaf1RasGTP">
        <Reactant specieID="pRaf1Ras"      n="2"     />
        <Product  specieID="dpRaf1Ras"               />

        <forwardRate> 0.02e-3   </forwardRate> <!-- pRaf1Ras dimer same rate of formation as raf1ras dimer,previously i did use 10x dimer-->
	<reverseRate> 0.5e-3   </reverseRate>
	
      </Reaction>

<Reaction name = "RasGTP+Raf1--bRafRas" id="RasGTP+bRaf--bRafRas">
        <Reactant specieID="RasGTP"           />
        <Reactant  specieID="bRaf"               />
        <Product  specieID="bRafRas"               />

        <forwardRate> 0.006e-3   </forwardRate>
	<reverseRate> 0.5e-3   </reverseRate>
    </Reaction>

<Reaction name = "RasGTP+RasGTPGAP-- RasGTPGAP" id="RasGTP+RasGTPGAP-- RasGTPGAP">
  <Reactant specieID="RasGTP" />
  <Reactant specieID="rasGap" />
  <Product specieID="RasGTPGap" />

  <forwardRate> 0.0495e-3 </forwardRate>
  <reverseRate> 40e-3 </reverseRate>

</Reaction>

<Reaction name = "RasGTPGAP--RasGAP+RasGDP" id = "RasGTPGAP--RasGAP+RasGDP">
  <Reactant specieID="RasGTPGap" />
  <Product specieID="rasGap" />
  <Product specieID="RasGDP" />

  <forwardRate> 10e-3  </forwardRate>
  <reverseRate> 0  </reverseRate>

</Reaction>


<Reaction name = "CamC_bind" id="CamC_bind">
	<Reactant specieID="Cam"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa2C"/>

	<forwardRate>6e-6</forwardRate>
	<reverseRate>9.1e-3</reverseRate>
	
    </Reaction>

<Reaction name = "CamCa2C_bind" id="CamCa2C_bind">
	<Reactant specieID="CamCa2C"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa4"/>

	<forwardRate>0.1e-3</forwardRate>
	<reverseRate>1000e-3</reverseRate>
	
    </Reaction>

<Reaction name = "CamN_bind" id="CamN_bind">
	<Reactant specieID="Cam"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa2N"/>

	<forwardRate>0.1e-3</forwardRate>
	<reverseRate>1000e-3</reverseRate>

    </Reaction>

<Reaction name = "CamCa2N_bind" id="CamCa2N_bind">
	<Reactant specieID="CamCa2N"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa4"/>

	<forwardRate>6e-6</forwardRate>
	<reverseRate>9.1e-3</reverseRate>

    </Reaction>

<Reaction name = "CK bind" id="CK-Cam_bind">
        <Reactant specieID="CamCa4"                 />
        <Reactant specieID="CK"                     />
        <Product  specieID="CKCamCa4"               />

        <forwardRate> 0.01e-3   </forwardRate>
        <reverseRate> 1.5e-3      </reverseRate>
        <!--0.8 from ode file
	    reverseRate> 0.8e-3      </reverseRate-->
    </Reaction>

<Reaction name = "CKCam bind" id="CKCam_pow2">
        <Reactant specieID="CKCamCa4"  power="2"        />
        <Product  specieID="CKCamCa4"          />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 3.83119676007e-10 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<Reaction name = "CKCam bind" id="CKCam_pow3">
        <Reactant specieID="CKCamCa4"  power="3"        />
        <Product  specieID="CKCamCa4"  power="2"         />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 3.55792141502e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<Reaction name = "CKCam bind" id="CKCam_pow4">
        <Reactant specieID="CKCamCa4"  power="4"        />
        <Product  specieID="CKCamCa4"   power="3"         />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 2.23694832822e-16 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<Reaction name = "CKCam bind" id="CK2_CKpCam_pow2">
        <Reactant specieID="CKpCamCa4"  power="2"        />
        <Reactant specieID="CKCamCa4"  power="2"        />
        <Product  specieID="CKCamCa4"           />
        <Product  specieID="CKpCamCa4" power="3"         />

        <forwardRate> 1.10450093247e-18 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<Reaction name = "CKCam bind" id="CK1_CKpCam_pow2">
        <Reactant specieID="CKpCamCa4"  power="2"        />
        <Reactant specieID="CKCamCa4"         />
        <Product  specieID="CKpCamCa4" power="3"         />

        <forwardRate> 3.0330636368e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<Reaction name = "CKCam bind" id="CK2_CKpCam_pow1">
        <Reactant specieID="CKpCamCa4"   power="2"         />
        <Reactant specieID="CKCamCa4"     power="2"     />
        <Product  specieID="CKpCamCa4" power="3"         />
        <Product  specieID="CKCamCa4"          />

        <forwardRate> 2.39399544094e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<Reaction name = "CKp auto" id="CKp_auto">
        <Reactant specieID="CKpCamCa4"              />
        <Product  specieID="CamCa4"                 />
        <Product  specieID="CKp"                    />

        <forwardRate> 0.0008e-3 </forwardRate>
        <reverseRate> 0.01e-3   </reverseRate>
    </Reaction>

<Reaction name = "CamCa4+RasGRF--CamCa4GRF" id="CamCa4+RasGRF--CamCa4GRF">
        <Reactant specieID="CamCa4"           />
        <Reactant specieID="RasGRF"              />
	<Product  specieID="CamCa4GRF"               />

        <forwardRate> 0.06e-3  </forwardRate>
        <reverseRate> 0.924e-3 </reverseRate>
        
    </Reaction>

<Reaction name = "CamCa4GRF+RasGDP--CamCa4GRFRasGDP" id="CamCa4GRF+RasGDP--CamCa4GRFRasGDP">
        <Reactant specieID="CamCa4GRF"           />
        <Reactant specieID="RasGDP"              />
        <Product  specieID="CamCa4GRFRas"               />

        <forwardRate> 0.0019e-3  </forwardRate>
        <reverseRate> 0.08e-3 </reverseRate>
        
        
    </Reaction>

<Reaction name = "CamCa4GRFRasGDP--CamCa4GRF+RasGTP" id="CamCa4GRFRasGDP--CamCa4GRF+RasGTP">
        <Reactant specieID="CamCa4GRFRas"               />
        <Product specieID="CamCa4GRF"             />
        <Product specieID="RasGTP"               />

        <forwardRate> 0.02e-3  </forwardRate> 
        <reverseRate> 0 </reverseRate>
       
</Reaction>

<Reaction name = "CKpCamCa4+SynGap--CKpCamCa4Gap" id="CKpCamCa4+SynGap--CKpCamCa4Gap">
  <Reactant specieID="CKpCamCa4" />
  <Reactant specieID="SynGapPSD95" />
  <Product specieID="CKpCamCa4SynGapPSD95" />
  

  <forwardRate> 0.3067258192987457e-3</forwardRate>   
  <reverseRate> 0.058715155531797236 </reverseRate>

 </Reaction>

<Reaction name = "CKpCamCa4Gap--CKpCamCa4+pSynGap" id="CKpCamCa4Gap--CKpCamCa4+pSynGap">
  <Reactant specieID="CKpCamCa4SynGapPSD95" />
  <Product specieID="pSynGapPSD95" />
  <Product specieID="CKpCamCa4" />
   
  <forwardRate> 0.0006484330410680531</forwardRate>
  <reverseRate> 0 </reverseRate>

 </Reaction>
 
  <Reaction name = "CKpCamCa4+SynGap--CKpCamCa4Gap" id="CKpCamCa4+SynGap--CKpCamCa4Gap">
  <Reactant specieID="CKpCamCa4" />
  <Reactant specieID="SynGap" />
  <Product specieID="CKpCamCa4SynGap" />

  <forwardRate> 0.3067258192987457e-3</forwardRate>   
  <reverseRate> 0.058715155531797236 </reverseRate>

 </Reaction>


 <Reaction name = "CKpCamCa4Gap--CKpCamCa4+pSynGap" id="CKpCamCa4Gap--CKpCamCa4+pSynGap">
  <Reactant specieID="CKpCamCa4SynGap" />
  <Product specieID="pSynGap" />
  <Product specieID="CKpCamCa4" />

  <forwardRate> 0.0006484330410680531</forwardRate>
  <reverseRate> 0 </reverseRate>

 </Reaction>
 
 
 
 
<Reaction name ="pSynGap-SynGap" id="pSynGap-SynGap">
	  <Reactant specieID="pSynGap"/>
	  <Product specieID="SynGap"/>

        <forwardRate> 1e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
    </Reaction>
    
    <Reaction name ="pSynGap-SynGap" id="pSynGap-SynGap">
	  <Reactant specieID="pSynGapPSD95"/>
	  <Product specieID="SynGapPSD95"/>

        <forwardRate> 1e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
    </Reaction>
    
    
    

<Reaction name = "RasGTP+SynGap--RasGap" id="RasGTP+SynGap--RasGap">
  <Reactant specieID="RasGTP" />
  <Reactant specieID="SynGap" />
  <Product specieID="RasSynGap" />

 <forwardRate>0.00082e-3  </forwardRate>
 <reverseRate> 0.82e-3  </reverseRate>


</Reaction>

<Reaction name = "RasGap--SynGap+RasGDP" id = "RasGap--SynGap+RasGDP">
  <Reactant specieID="RasSynGap" />
  <Product specieID="SynGap" />
  <Product specieID="RasGDP" />

 <forwardRate> 0.205e-3 </forwardRate>
  <reverseRate> 0 </reverseRate>

</Reaction>

<Reaction name = "RasGTP+pSynGap--RaspGap" id="RasGTP+pSynGap--RaspGap">
  <Reactant specieID="RasGTP" />
  <Reactant specieID="pSynGap" />
  <Product specieID="RaspSynGap" />
  
  <forwardRate> 0.00112e-3 </forwardRate>
  <reverseRate> 1.112e-3  </reverseRate>

</Reaction>

<Reaction name = "RaspGap--pSynGap+RasGDP" id = "RaspGap--pSynGap+RasGDP">
  <Reactant specieID="RaspSynGap" />
  <Product specieID="pSynGap" />
  <Product specieID="RasGDP" />

  <forwardRate> 0.279e-3  </forwardRate>
  <reverseRate> 0 </reverseRate>

</Reaction>


<Reaction name = "RasGTP+pSynGap--RaspGap" id="RasGTP+pSynGap--RaspGap">
  <Reactant specieID="RasGTP" />
  <Reactant specieID="pSynGapPSD95" />
  <Product specieID="RaspSynGapPSD95" />
  
  <forwardRate> 0.00112e-3 </forwardRate>
  <reverseRate> 1.112e-3  </reverseRate>

</Reaction>

<Reaction name = "RaspGap--pSynGap+RasGDP" id = "RaspGap--pSynGap+RasGDP">
  <Reactant specieID="RaspSynGapPSD95" />
  <Product specieID="pSynGapPSD95" />
  <Product specieID="RasGDP" />

  <forwardRate> 0.279e-3  </forwardRate>
  <reverseRate> 0 </reverseRate>

</Reaction>






<!--Syngap activity on Ras -->
<!--(Inactivation of RasGTP by SynGAP) RasGTP+SynGap <-> RasGTPGap -> SynGap + RasGDP -->

<Reaction name = "RasGTP+SynGap--RasGap" id="RasGTP+SynGap--RasGap">
  <Reactant specieID="RasGTP" />
  <Reactant specieID="SynGapPSD95" />
  <Product specieID="RasSynGapPSD95" />

 <forwardRate>0.00082e-3  </forwardRate>
 <reverseRate> 0.82e-3  </reverseRate>


</Reaction>

<Reaction name = "RasGap--SynGap+RasGDP" id = "RasGap--SynGap+RasGDP">
  <Reactant specieID="RasSynGapPSD95" />
  <Product specieID="SynGapPSD95" />
  <Product specieID="RasGDP" />
  

 <forwardRate> 0.205e-3 </forwardRate>
  <reverseRate> 0 </reverseRate>

</Reaction>




<Reaction name = "Ca_pump1a" id="Ca_pump1a">
	<Reactant specieID="Ca"/>
	<Reactant specieID="pmca"/>
	<Product specieID="pmcaCa"/>

	<forwardRate>0.05e-3</forwardRate>
	<reverseRate>9e-3</reverseRate>
    </Reaction>

<Reaction name = "Ca_pump1b" id="Ca_pump1b">
	<Reactant specieID="pmcaCa"/>
	<Product specieID="pmca"/>
	<Product specieID="CaOut"/>

	<forwardRate>3.0e-3</forwardRate>
	<reverseRate>0</reverseRate>
    </Reaction>

<Reaction name = "Ca_pump2a" id="Ca_pump2a">
	<Reactant specieID="Ca"/>
	<Reactant specieID="ncx"/>
	<Product specieID="ncxCa"/>

	<forwardRate>0.011e-3</forwardRate>
	<reverseRate>11.2e-3</reverseRate>
    </Reaction>

<Reaction name = "Ca_pump2b" id="Ca_pump2b">
	<Reactant specieID="ncxCa"/>
	<Product specieID="ncx"/>
	<Product specieID="CaOut"/>

	<forwardRate>5.6e-3</forwardRate>
	<reverseRate>0</reverseRate>
    </Reaction>

<Reaction name = "Ca_leak" id="Ca_leak">
	<Reactant specieID="CaOut"/>
	<Reactant specieID="Leak"/>
	<Product specieID="CaOutLeak"/>

        <forwardRate>0.01e-6</forwardRate>
	<reverseRate>0</reverseRate>
    </Reaction>

<Reaction name = "Ca_leak" id="Ca_leak">
	<Reactant specieID="CaOutLeak"/>
	<Product specieID="Ca"/>
	<Product specieID="Leak"/>

        <forwardRate>0.65e-3</forwardRate>  <!-- 1.1e-3 -->
	<reverseRate>0</reverseRate>
    </Reaction>


<Reaction name = "Ca_buffer" id="Ca_Buffer">
        <Reactant specieID="Ca"/>
        <Reactant specieID="Calbin"/>
        <Product specieID="CalbinC"/>

        <forwardRate>0.028e-3</forwardRate>
        <reverseRate>19.6</reverseRate>
    </Reaction>








</ReactionScheme>
