<ReactionScheme>
    <Specie name="ERK"                                 id="ERK"                 kdiff="7"    kdiffunit="mu2/s"/>
<Specie name="ERKpY"                                id="ERKpY"                kdiff="7"    kdiffunit="mu2/s"/>
<Specie name="ERKpT"                                id="ERKpT"                kdiff="7"    kdiffunit="mu2/s"/>
    <Specie name="ppERK"                               id="ppERK"                kdiff="7"    kdiffunit="mu2/s"/>
    <Specie name="Pkc"          	  id="Pkc"           kdiff="6.61"    kdiffunit="mu2/s"/>
    <Specie name="PkcCa"      	 	   id="PkcCa"         kdiff="6.61"    kdiffunit="mu2/s"/>
   
    <Specie name="PkcCaDagAA"   	    id="PkcCaDagAA"      kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="PkcCaDagAARaf1"       id="PkcCaDagAARaf1"      kdiff="0"     kdiffunit="mu2/s"/>
    
    <Specie name="Pla2"          	  id="Pla2"           kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="Pla2ac"            id="Pla2ac"           kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="Pla2acAPC"            id="Pla2acAPC"           kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="Pla2Ca"            id="Pla2Ca"           kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="pPla2acAPC"            id="pPla2acAPC"           kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="pPla2ac"            id="pPla2ac"           kdiff="0"    kdiffunit="mu2/s"/>
    
    
    <Specie name="ppERKPla2"            id="ppERKPla2"           kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="ppERKPla2ac"            id="ppERKPla2ac"           kdiff="0"    kdiffunit="mu2/s"/>
    
    <Specie name="APC"            id="APC"           kdiff="0"    kdiffunit="mu2/s"/>
  
    
    <Specie name="Dag"            id="Dag"           kdiff="0"     kdiffunit="mu2/s"/>  
    <Specie name="AA"            id="AA"           kdiff="0"    kdiffunit="mu2/s"/>
      
    <Specie name="PkcCaDag"   		    id="PkcCaDag"      kdiff="0"     kdiffunit="mu2/s"/>

    <Specie name="Raf1" 		id="Raf1"                                             kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="pRaf1"		 id="pRaf1"                                 kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="RasGTP"		 id="RasGTP"                                 kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="pRaf1Ras"		 id="pRaf1Ras"                                 kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="Raf1Ras"		 id="Raf1Ras"                                 kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="PP2A"            id="PP2A"           kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="pPla2acPP2A"            id="pPla2acPP2A"           kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="pMEKPP2A"                          id="pMEKPP2A"                kdiff="7"    kdiffunit="mu2/s"/>
    <Specie name="ppMEKPP2A"                         id="ppMEKPP2A"                kdiff="7"    kdiffunit="mu2/s"/>

    <Specie name="PkcCaDagRaf1"       id="PkcCaDagRaf1"      kdiff="0"     kdiffunit="mu2/s"/>
   

   
    <Specie name="Ca"             id="Ca"            kdiff="174.3" kdiffunit="mu2/s"/>
   
    <Specie name="MEK"                               id="MEK"                kdiff="7"    kdiffunit="mu2/s"/>
    <Specie name="pMEK"                              id="pMEK"                kdiff="7"    kdiffunit="mu2/s"/>
    <Specie name="ppMEK"                             id="ppMEK"                kdiff="7"    kdiffunit="mu2/s"/>
    <Specie name="MKP1"                                id="MKP1"                kdiff="7"    kdiffunit="mu2/s"/>
	<Specie name="pERKMKP1"                            id="pERKMKP1"                kdiff="7"    kdiffunit="mu2/s"/>
	<Specie name="ppERKMKP1"                           id="ppERKMKP1"                kdiff="7"    kdiffunit="mu2/s"/>
	
	<Specie name="ppMEKERK"                          id="ppMEKERK"                kdiff="7"    kdiffunit="mu2/s"/>
	<Specie name="ppMEKpERK"                         id="ppMEKpERK"                kdiff="7"    kdiffunit="mu2/s"/>


	
	<Specie name="STEP"				                 id="STEP"		            kdiff="0"	kdiffunit="mu2/s"/>  
	<Specie name="ppERKSTEP"			    id="ppERKSTEP"		         kdiff="0"       kdiffunit="mu2/s"/>
	<Specie name="pERKSTEP"			             id="pERKSTEP"		         kdiff="0"       kdiffunit="mu2/s"/>
	<Specie name="pERKSTEPp"			             id="pERKSTEPp"		         kdiff="0"       kdiffunit="mu2/s"/>
	<Specie name="STEPp"                             id="STEPp"               kdiff="0"       kdiffunit="mu2/s"/>
	<Specie name="ppERKSTEPp"                        id="ppERKSTEPp"           kdiff="0"       kdiffunit="mu2/s"/>




	<Specie name="dRaf1Ras" id="dRaf1Ras"                                 kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="dRaf1RasMEK" id="dRaf1RasMEK"                       kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="dRaf1RaspMEK" id="dRaf1RaspMEK"                     kdiff="0"    kdiffunit="mu2/s"/>

	
	<Specie name="dpRaf1Ras" id="dpRaf1Ras"                                 kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="dpRaf1RasMEK" id="dpRaf1RasMEK"                       kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="dpRaf1RaspMEK" id="dpRaf1RaspMEK"                     kdiff="0"    kdiffunit="mu2/s"/>

	<Specie name="bRaf"                                id="bRaf"                              kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="bRafRas" id="bRafRas"                                 kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="bRafRasMEK" id="bRafRasMEK"                       kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="bRafRaspMEK" id="bRafRaspMEK"                     kdiff="0"    kdiffunit="mu2/s"/>


<Specie name="SynGap"                              id="SynGap"                kdiff="0"     kdiffunit="mu2/s"/>
	<Specie name="pSynGap"                             id="pSynGap"               kdiff="0"     kdiffunit="mu2/s"/>
	
	<Specie name="CK"                                  id="CK"                    kdiff="0"     kdiffunit="mu2/s"/>
	<Specie name="CKp"                                 id="CKp"                   kdiff="0"     kdiffunit="mu2/s"/>
	<Specie name="CamCa4"                              id="CamCa4"                kdiff="0"     kdiffunit="mu2/s"/>
	<Specie name="CKCamCa4"                            id="CKCamCa4"              kdiff="0"     kdiffunit="mu2/s"/>
	<Specie name="CKpCamCa4"                           id="CKpCamCa4"             kdiff="0"     kdiffunit="mu2/s"/>	
	<Specie name="CKpCamCa4SynGap"                        id="CKpCamCa4SynGap"       kdiff="0"     kdiffunit="mu2/s"/>
	
	<Specie name="RasGRF" id="RasGRF"                             kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="CamCa4GRF" id="CamCa4GRF"                             kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="CamCa4GRFRas" id="CamCa4GRFRas"                 kdiff="0"    kdiffunit="mu2/s"/>
	
	<Specie name="RasSynGap" id="RasSynGap"                                   kdiff="0"    kdiffunit="mu2/s"/>
	<Specie name="RaspSynGap" id="RaspSynGap"                                 kdiff="0"    kdiffunit="mu2/s"/>
	
	<Specie name="RasGDP" id="RasGDP"                                         kdiff="0"    kdiffunit="mu2/s"/>
<!-- CaM from Gq files, with either C or N site binding first -->
    <Specie name="Cam"               id="Cam"               kdiff="11"    kdiffunit="mu2/s"/>
    <Specie name="CamCa2C"           id="CamCa2C"           kdiff="11"    kdiffunit="mu2/s"/>
    <Specie name="CamCa2N"           id="CamCa2N"           kdiff="11"    kdiffunit="mu2/s"/>
	
	
  <!-- calcium reaction subset, to adjust for proper basal calcium -->
<!-- calcium stuff first -->
    
    <Specie name="Caext"             id="Caext"             kdiff="174.3" kdiffunit="mu2/s"/>
    <Specie name="CaextLeak"         id="CaextLeak"         kdiff="0"     kdiffunit="mu2/s"/>
  
    <Specie name="pmca"              id="pmca"              kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ncx"               id="ncx"               kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pmcaCa"            id="pmcaCa"            kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="ncxCa" id="ncxCa" kdiff="0" kdiffunit="mu2/s"/>
<Specie name="CaOutLeak"      id="CaOutLeak"     kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="Leak"           id="Leak"          kdiff="0"     kdiffunit="mu2/s"/>

<Specie name="CB"            id="CB"            kdiff="9.3"   kdiffunit="mu2/s"/>
<Specie name="CaB"      id="CaB" kdiff="9.3" kdiffunit="mu2/s"/>

<Specie name="CaOut"          id="CaOut"         kdiff="174.3" kdiffunit="mu2/s"/>
  <Specie name="Calbin"         id="Calbin"        kdiff="9.3"   kdiffunit="mu2/s"/>
    <Specie name="CalbinC"        id="CalbinC"       kdiff="9.3"   kdiffunit="mu2/s"/>
 
<Specie name="Cabuff"                id="Cabuff"                kdiff="174.3" kdiffunit="mu2/s"/>
<Specie name="Cbuff"                id="Cbuff"                kdiff="174.3" kdiffunit="mu2/s"/>
<Specie name="Cbuffslow"                id="Cbuffslow"                kdiff="174.3" kdiffunit="mu2/s"/>
<Specie name="Caextbuffslow"                id="Caextbuffslow"                kdiff="174.3" kdiffunit="mu2/s"/>

	
<!--Adding the PKC loop of ERK activation from Bhallas paper

The rxns added are PKC activation of Raf1,ppERK activating pla2 which in turn activates apc to arichadonic acid.Now AA activates pkc-->
           
	<!-- (Raf1 binds to Ras, step 1) RasGTP + Raf1 <-> RasGTPRaf1 -->
    
    
	 <Reaction name = "APC+Pla2ac--Pla2acAPC" id="RasGTP+Raf1--Raf1Ras">
        <Reactant specieID="Pla2ac"           />
        <Reactant  specieID="APC"               />
        <Product  specieID="Pla2acAPC"               />

        <forwardRate> 0.001e-3  </forwardRate>
	<reverseRate> 0.002   </reverseRate>
		
    </Reaction>

     <Reaction name = "Pla2acAPC--AA+pla2ac" id="RasGTP+Raf1--Raf1Ras">
        <Reactant specieID="Pla2acAPC"           />
        <Product  specieID="AA"               />
        <Product  specieID="Pla2ac"               />

        <forwardRate>  0.003  </forwardRate>
	<reverseRate> 0   </reverseRate>
		
    </Reaction>
    

    


    <Reaction name = "APC+Pla2ac--Pla2acAPC" id="RasGTP+Raf1--Raf1Ras">
        <Reactant specieID="pPla2ac"           />
        <Reactant  specieID="APC"               />
        <Product  specieID="pPla2acAPC"               />

        <forwardRate> 0  </forwardRate>
	<reverseRate> 0  </reverseRate>
		
    </Reaction>

     <Reaction name = "Pla2acAPC--AA+pla2ac" id="RasGTP+Raf1--Raf1Ras">
        <Reactant specieID="pPla2acAPC"           />
        <Product  specieID="AA"               />
        <Product  specieID="pPla2ac"               />

        <forwardRate>  0  </forwardRate>
	<reverseRate> 0   </reverseRate>
		
    </Reaction>
    
    <!-- These are values from Hellgren Kotaleski PKC paper. 2.5 uM affinity -->
    <!-- Pkc + Ca    <->   PkcCa  -->
    <Reaction name = "Pkc+Ca--PkcCa" id="Pkc+Ca--PkcCa">
        <Reactant specieID="Ca"           />
        <Reactant specieID="Pkc"              />
        <Product  specieID="PkcCa"               />

        <forwardRate> 0.020e-03   </forwardRate>
        <reverseRate> 50e-03        </reverseRate>
    </Reaction>
 
<!-- THese are values from Hellgren Kotaleski PKC paper. 10 uM affinity
MUCH slower binding compared to CaDgl  -->
   <!-- PkcCa + Dag    <-> PkcCaDag    -->
    <Reaction name = "PkcCa+Dag--PkcCaDag" id="PkcCa+Dag--PkcCaDag">
        <Reactant specieID="PkcCa"               />
        <Reactant specieID="Dag"             />
        <Product  specieID="PkcCaDag"            />

        <forwardRate> 0.015e-06   </forwardRate>
        <reverseRate>  0.15e-03   </reverseRate>
    </Reaction>

    
    <Reaction name = "PkcCaDag+Raf1--PkcCaDagRaf1" id="PkcCaDag+Raf1--PkcCaDagRaf1">
        <Reactant specieID="PkcCaDag"           />
        <Reactant  specieID="Raf1"               />
        <Product  specieID="PkcCaDagRaf1"               />

        <forwardRate> 0.02e-6   </forwardRate>
	<reverseRate> 1.068e-3   </reverseRate>
		
    </Reaction>

	<Reaction name = "PkcCaDagRaf1--PkcCaDag+Raf1Ras" id="PkcCaDagRaf1--PkcCaDag--Raf1Ras">
        <Reactant specieID="PkcCaDagRaf1"           />
        <Product  specieID="pRaf1"               />
        <Product  specieID="PkcCaDag"               />

        <forwardRate>  0.267e-3  </forwardRate>
	<reverseRate> 0   </reverseRate>
		
    </Reaction>							CHANGE ID OF ALL REACTIONS ------ALSO MY KM IS IN MICROMOLARS SO CHANGE RATE CONSTANTS
    



     <Reaction name = "PkcCaDagAA+Raf1--PkcCaDagRaf1" id="PkcCaDag+Raf1--PkcCaDagRaf1">
        <Reactant specieID="PkcCaDagAA"           />
        <Reactant  specieID="Raf1"               />
        <Product  specieID="PkcCaDagAARaf1"               />

        <forwardRate> 0.02e-6   </forwardRate>
	<reverseRate> 1.068e-3   </reverseRate>
		
    </Reaction>

	<Reaction name = "PkcCaDagRaf1--PkcCaDag+Raf1Ras" id="PkcCaDagRaf1--PkcCaDag--Raf1Ras">
        <Reactant specieID="PkcCaDagAARaf1"           />
        <Product  specieID="pRaf1"               />
        <Product  specieID="PkcCaDagAA"               />

        <forwardRate>  0.267e-3  </forwardRate>
	<reverseRate> 0   </reverseRate>






    </Reaction>	
    
     <Reaction name = "ppERK+Pla2--ppERKpla2" id="ppERK+Pla2--ppERKpla2">
        <Reactant specieID="ppERK"           />
        <Reactant  specieID="Pla2ac"               />
        <Product  specieID="ppERKPla2ac"               />

        <forwardRate> 0.260e-3   </forwardRate>
	<reverseRate> 5.33   </reverseRate>
		
    </Reaction>

     <Reaction name = "ppERKpla2--ppERK+pla2ac" id="ppERKpla2--ppERK+pla2ac">
        <Reactant specieID="ppERKPla2ac"           />
        <Product  specieID="ppERK"               />
        <Product  specieID="pPla2ac"               />

        <forwardRate>  1.33  </forwardRate>
	<reverseRate> 0   </reverseRate>
		
    </Reaction>
    
    <Reaction name = "AA+PkcCa--PkcCaAA" id="RasGTP+Raf1--Raf1Ras">
        <Reactant specieID="PkcCaDag"           />
        <Reactant  specieID="AA"               />
        <Product  specieID="PkcCaDagAA"               />     <!--Jeanette persistentPKC-->

        <forwardRate> 0.001e-6   </forwardRate>
	<reverseRate> 0.02e-3   </reverseRate>
		
    </Reaction>

     <Reaction name = "Pla2+Ca--Pla2Ca" id="Pla2+Ca--Pla2Ca">
        <Reactant specieID="Pla2"           />
        <Reactant  specieID="Ca"               />
        <Product  specieID="Pla2Ca"               />     <!--Ca binding to Pla2 ,Gallimore Cell report-->

        <forwardRate> 0.0177e-3   </forwardRate>
	<reverseRate> 0.1545   </reverseRate>
		
    </Reaction>

    <Reaction name = "Pla2Ca+Ca--Pla2Ca" id="Pla2Ca+Ca--Pla2Ca">
        <Reactant specieID="Pla2Ca"           />
        <Reactant  specieID="Ca"               />
        <Product  specieID="Pla2ac"               />     <!--Ca binding to Pla2 ,Gallimore Cell report-->

        <forwardRate> 0.0163e-3   </forwardRate>
	<reverseRate> 0.101   </reverseRate>
	
	
    </Reaction>
	<!-- RasGTP activates Raf1 -->
    
    <!-- (Raf1 binds to Ras, step 1) RasGTP + Raf1 <-> RasGTPRaf1 -->
    <Reaction name = "Ras+Raf1--Raf1RasGTP" id="RasGTP+Raf1--Raf1Ras">
        <Reactant specieID="RasGTP"           />
        <Reactant  specieID="Raf1"               />
        <Product  specieID="Raf1Ras"               />

        <forwardRate> 0.06e-3   </forwardRate>
	<reverseRate> 1e-3   </reverseRate>
	
    </Reaction>

    <!-- RasGTP activates pRaf1 -->
    
    <!-- (Raf1 binds to Ras, step 1) RasGTP + Raf1 <-> RasGTPRaf1 -->
    <Reaction name = "Ras+pRaf1--pRaf1RasGTP" id="RasGTP+Raf1--Raf1Ras">
        <Reactant specieID="RasGTP"           />
        <Reactant  specieID="pRaf1"               />
        <Product  specieID="pRaf1Ras"               />

        <forwardRate> 0.6e-3   </forwardRate>
	<reverseRate> 0.5e-3   </reverseRate>
	
    </Reaction>
    
    <Reaction name = "AA -> " id = "AA -> NULL">
    	<Reactant specieID="AA"		/>
	
	<forwardRate> 0.3e-6 </forwardRate>  <!-- 10e-7 last run value-->
	
	
    </Reaction>
       
     
     <Reaction name="PP2A+pPla2ac--Pla2ac" id="PP2A+pPla2ac--Pla2ac">
   <Reactant specieID="pPla2ac"/>
   <Reactant specieID="PP2A"/>
   <Product specieID="pPla2acPP2A"/>

   <forwardRate>1e-6</forwardRate>
   <reverseRate>1.4e-3</reverseRate>
   </Reaction>

 <Reaction name="PP2A+pPla2ac--Pla2ac" id="PP2A+pPla2ac--Pla2ac">
  <Reactant specieID="pPla2acPP2A"/>
  <Product specieID="PP2A"/>
  <Product specieID="Pla2ac"/>

  <forwardRate>0.8e-3</forwardRate>
  <reverseRate>0</reverseRate>
  </Reaction>

     
     
     
      


     
     
     
     
     
     
     
      <!--ERK ACTIVATION BY ppMAPKK-->


    <!--ERK ACTIVATION BY ppMAPKK (Included two sites for ERK phosphorylation Y and T)-->


    <!--(ERK phos by ppMAPKK) ppMAPKK+ERK <-> ppMAPKKERK <-> pERK+ppMAPKK-->
    <Reaction name = "ppMAPKK+ERK--ppMAPKKERK" id="ppMAPKK+ERK--ppMAPKKERK">
        <Reactant specieID="ppMEK"           />
        <Reactant specieID="ERK"              />
        <Product  specieID="ppMEKERK"               />

        <forwardRate> 0.032e-3   </forwardRate>
        <reverseRate> 1.200e-3   </reverseRate>
      
    </Reaction>
    
    <Reaction name = "ppMEKERK--pERK+ppMAPKK" id="ppMAPKKERK--pERK+ppMAPKK">
        <Reactant specieID="ppMEKERK"           />
        <Product  specieID="ERKpY"               />
        <Product  specieID="ppMEK"               />

        <forwardRate> 0.3e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
      
    </Reaction>
    
    <!--(ERK phos by ppMAPKK) ppMAPKK+ERK <-> ppMAPKKERK <-> pERK+ppMAPKK-->
    <Reaction name = "ppMAPKK+ERK--ppMAPKKERK" id="ppMAPKK+ERK--ppMAPKKERK">
        <Reactant specieID="ppMEK"           />
        <Reactant specieID="ERK"              />
        <Product  specieID="ppMEKERK"               />

        <forwardRate> 0.032e-3   </forwardRate>
        <reverseRate> 1.200e-3   </reverseRate>
      
    </Reaction>
    
    <Reaction name = "ppMEKERK--pERK+ppMAPKK" id="ppMAPKKERK--pERK+ppMAPKK">
        <Reactant specieID="ppMEKERK"           />
        <Product  specieID="ERKpT"               />
        <Product  specieID="ppMEK"               />

        <forwardRate> 0.3e-3   </forwardRate>
        <reverseRate> 0        </reverseRate>
      
    </Reaction>




    
<!--(pERK phos by ppMAPKK) ppMAPKK+pERK <-> ppMAPKKpERK <-> ppERK+ppMAPKK-->
    <Reaction name = "ppMAPKK+pERK--ppMAPKKpERK" id="ppMAPKK+pERK--ppMAPKKpERK">
        <Reactant specieID="ppMEK"           />
        <Reactant specieID="ERKpY"              />
        <Product  specieID="ppMEKpERK"               />

       <forwardRate> 0.032e-3   </forwardRate>
       <reverseRate> 1.200e-3   </reverseRate>
      
    </Reaction>
    <Reaction name = "ppMAPKKpERK--ppERK+ppMAPKK" id="ppMAPKKpERK--ppERK+ppMAPKK">
        <Reactant specieID="ppMEKpERK"           />
        <Product specieID="ppERK"              />
        <Product  specieID="ppMEK"               />

       <forwardRate> 0.3e-3   </forwardRate>
       <reverseRate> 0        </reverseRate>
      
    </Reaction>
    

<!--(pERK phos by ppMAPKK) ppMAPKK+pERK <-> ppMAPKKpERK <-> ppERK+ppMAPKK-->
    <Reaction name = "ppMAPKK+pERK--ppMAPKKpERK" id="ppMAPKK+pERK--ppMAPKKpERK">
        <Reactant specieID="ppMEK"           />
        <Reactant specieID="ERKpT"              />
        <Product  specieID="ppMEKpERK"               />

       <forwardRate> 0.032e-3   </forwardRate>
       <reverseRate> 1.200e-3   </reverseRate>
      
    </Reaction>
    <Reaction name = "ppMAPKKpERK--ppERK+ppMAPKK" id="ppMAPKKpERK--ppERK+ppMAPKK">
        <Reactant specieID="ppMEKpERK"           />
        <Product specieID="ppERK"              />
        <Product  specieID="ppMEK"               />

       <forwardRate> 0.3e-3   </forwardRate>
       <reverseRate> 0        </reverseRate>
      
    </Reaction>
    
    
<!--ERK INACTIVATION BY MKP1 and STEP -->

<!--(ppERK dephos by MKP1) ppERK+MKP1<-> ppERKMKP1 <-> pERK+MKP1-->
    <Reaction name = "ppERK+MKP1--ppERKMKP1" id="ppERK+MKP1--ppERKMKP1">
        <Reactant specieID="ppERK"           />
        <Reactant specieID="MKP1"              />
        <Product  specieID="ppERKMKP1"               />

        <forwardRate> 0.150e-3  </forwardRate>
        <reverseRate> 16e-3  </reverseRate>
        
    </Reaction>
    <Reaction name = "ppERKMKP1--pERK+MKP1" id="ppERKMKP1--pERK+MKP1">
        <Reactant specieID="ppERKMKP1"           />
        <Product  specieID="ERKpY"               />
        <Product  specieID="MKP1"               />

        <forwardRate> 4e-3  </forwardRate>
        <reverseRate> 0  </reverseRate>
        
    </Reaction>
<!--(ppERK dephos by MKP1) ppERK+MKP1<-> ppERKMKP1 <-> pERK+MKP1-->
    <Reaction name = "ppERK+MKP1--ppERKMKP1" id="ppERK+MKP1--ppERKMKP1">
        <Reactant specieID="ppERK"           />
        <Reactant specieID="MKP1"              />
        <Product  specieID="ppERKMKP1"               />

        <forwardRate> 0.150e-3  </forwardRate>
        <reverseRate> 16e-3  </reverseRate>
        
    </Reaction>
    <Reaction name = "ppERKMKP1--pERK+MKP1" id="ppERKMKP1--pERK+MKP1">
        <Reactant specieID="ppERKMKP1"           />
        <Product  specieID="ERKpT"               />
        <Product  specieID="MKP1"               />

        <forwardRate> 4e-3  </forwardRate>
        <reverseRate> 0  </reverseRate>
        
    </Reaction>





<!--(pERK dephos by MKP1) pERK+MKP1<-> pERKMKP1 <-> ERK+MKP1-->
    <Reaction name = "pERK+MKP1--pERKMKP1" id="pERK+MKP1--pERKMKP1">
        <Reactant specieID="ERKpY"           />
        <Reactant specieID="MKP1"              />
        <Product  specieID="pERKMKP1"               />

        <forwardRate> 0.150e-3  </forwardRate>
        <reverseRate> 16e-3  </reverseRate>
        
       
    </Reaction>
    <Reaction name = "pERKMKP1--ERK+MKP1" id="pERKMKP1--ERK+MKP1">
        <Reactant specieID="pERKMKP1"           />
        <Product  specieID="ERK"               />
        <Product  specieID="MKP1"               />

        <forwardRate> 4e-3   </forwardRate>
        <reverseRate> 0   </reverseRate>
       
       </Reaction>

    <!--(pERK dephos by MKP1) pERK+MKP1<-> pERKMKP1 <-> ERK+MKP1-->
    <Reaction name = "pERK+MKP1--pERKMKP1" id="pERK+MKP1--pERKMKP1">
        <Reactant specieID="ERKpT"           />
        <Reactant specieID="MKP1"              />
        <Product  specieID="pERKMKP1"               />

        <forwardRate> 0.150e-3  </forwardRate>
        <reverseRate> 16e-3  </reverseRate>
        
       
    </Reaction>
    <Reaction name = "pERKMKP1--ERK+MKP1" id="pERKMKP1--ERK+MKP1">
        <Reactant specieID="pERKMKP1"           />
        <Product  specieID="ERK"               />
        <Product  specieID="MKP1"               />

        <forwardRate> 4e-3   </forwardRate>
        <reverseRate> 0   </reverseRate>
       
       </Reaction>

       
      <!-- (Raf1Ras dimerize) RasGTPRaf1*2 <-> dRasGTPRaf1 -->
    <Reaction name = "Raf1Ras+Raf1Ras--2Raf1RasGTP" id="Raf1Ras+Raf1Ras--2Raf1RasGTP">
        <Reactant specieID="Raf1Ras"      n="2"     />
        <Product  specieID="dRaf1Ras"               />

        <forwardRate> 0.02e-3   </forwardRate>
	<reverseRate> 0.5e-3   </reverseRate>
	
      </Reaction>
      
      
      <!-- (pRaf1Ras dimerize) RasGTPpRaf1*2 <-> dpRasGTPRaf1 -->
    <Reaction name = "Raf1Ras+Raf1Ras--2Raf1RasGTP" id="Raf1Ras+Raf1Ras--2Raf1RasGTP">
        <Reactant specieID="pRaf1Ras"      n="2"     />
        <Product  specieID="dpRaf1Ras"               />

        <forwardRate> 0.02e-3   </forwardRate>
	<reverseRate> 0.5e-3   </reverseRate>
	
      </Reaction>




     
     
     
      <!--MAPKK ACTIVATION BY dRaf1RasGTP and dpraf1rasgtp (dimer)-->
    
<!--(MAPKK phos by Raf1RasGTP) MAPKK + Raf1RasGTP <-> Raf1RasGTPMAPKK <-> pMAPKK + Raf1RasGTP-->
    <Reaction name = "MAPKK+dRaf1Ras--dRaf1RasMAPKK" id="MAPKK+dRaf1Ras--dRaf1RasMAPKK">
        <Reactant specieID="MEK"           />
        <Reactant specieID="dRaf1Ras"              />
        <Product  specieID="dRaf1RasMEK"               />

        <forwardRate> 0.018857251e-3  </forwardRate>
        <reverseRate> 2.4e-3  </reverseRate>
      
    </Reaction>
    <Reaction name = "dRaf1RasMAPKK--pMAPKK+dRaf1Ras" id="dRaf1RasMAPKK--pMAPKK+dRaf1Ras">
        <Reactant specieID="dRaf1RasMEK"           />
        <Product  specieID="pMEK"               />
        <Product  specieID="dRaf1Ras"               />

        <forwardRate> 0.6e-3 </forwardRate>
        <reverseRate> 0  </reverseRate>
      
    </Reaction>
    
    <!--(pMAPKK phos by Raf1RasGTP) pMAPKK + Raf1RasGTP <-> Raf1RasGTPMAPKK <-> ppMAPKK + Raf1RasGTP-->
    
    <Reaction name = "pMAPKK+Raf1Ras--Raf1RaspMAPKK" id="pMAPKK+Raf1Ras--Raf1RaspMAPKK">
        <Reactant specieID="pMEK"           />
        <Reactant specieID="dRaf1Ras"              />
        <Product  specieID="dRaf1RaspMEK"               />

      <forwardRate> 0.018857251e-3  </forwardRate>
        <reverseRate> 2.4e-3  </reverseRate>
      
    </Reaction>
    <Reaction name = "Raf1RaspMAPKK--ppMAPKK+Raf1Ras" id="Raf1RaspMAPKK--ppMAPKK+Raf1Ras">
        <Reactant specieID="dRaf1RaspMEK"           />
        <Product  specieID="ppMEK"               />
        <Product  specieID="dRaf1Ras"               />

        <forwardRate> 0.6e-3   </forwardRate>
        <reverseRate> 0  </reverseRate>
      
    </Reaction>


<!--(MAPKK phos by pRaf1RasGTP) MAPKK + pRaf1RasGTP <-> paf1RasGTPMAPKK <-> pMAPKK + pRaf1RasGTP-->
    <Reaction name = "MAPKK+dRaf1Ras--dRaf1RasMAPKK" id="MAPKK+dRaf1Ras--dRaf1RasMAPKK">
        <Reactant specieID="MEK"           />
        <Reactant specieID="dpRaf1Ras"              />
        <Product  specieID="dpRaf1RasMEK"               />

        <forwardRate> 0.018857251e-3  </forwardRate>
        <reverseRate> 2.4e-3  </reverseRate>
      
    </Reaction>
    <Reaction name = "dRaf1RasMAPKK--pMAPKK+dRaf1Ras" id="dRaf1RasMAPKK--pMAPKK+dRaf1Ras">
        <Reactant specieID="dpRaf1RasMEK"           />
        <Product  specieID="pMEK"               />
        <Product  specieID="dpRaf1Ras"               />

        <forwardRate> 0.6e-3 </forwardRate>
        <reverseRate> 0  </reverseRate>
      
    </Reaction>
    
    <!--(pMAPKK phos by Raf1RasGTP) pMAPKK + Raf1RasGTP <-> Raf1RasGTPMAPKK <-> ppMAPKK + Raf1RasGTP-->
    
    <Reaction name = "pMAPKK+Raf1Ras--Raf1RaspMAPKK" id="pMAPKK+Raf1Ras--Raf1RaspMAPKK">
        <Reactant specieID="pMEK"           />
        <Reactant specieID="dpRaf1Ras"              />
        <Product  specieID="dpRaf1RaspMEK"               />

      <forwardRate> 0.018857251e-3  </forwardRate>
        <reverseRate> 2.4e-3  </reverseRate>
      
    </Reaction>
    <Reaction name = "Raf1RaspMAPKK--ppMAPKK+Raf1Ras" id="Raf1RaspMAPKK--ppMAPKK+Raf1Ras">
        <Reactant specieID="dpRaf1RaspMEK"           />
        <Product  specieID="ppMEK"               />
        <Product  specieID="dRaf1Ras"               />

        <forwardRate> 0.6e-3   </forwardRate>
        <reverseRate> 0  </reverseRate>
      
    </Reaction>

	 <!--MAPKK ACTIVATION BY bRafRasGTP-->
    
<!--(MAPKK phos by bRafRasGTP) MAPKK + bRafRasGTP <-> bRafRasGTPMAPKK <-> pMAPKK + bRafRasGTP-->
    <Reaction name = "MAPKK+bRafRas--bRafRasMAPKK" id="MAPKK+bRafRas--bRafRasMAPKK">
        <Reactant specieID="MEK"           />
        <Reactant specieID="bRafRas"              />
        <Product  specieID="bRafRasMEK"               />

        <forwardRate> 0.00628575e-3  </forwardRate>
        <reverseRate> 0.8e-3  </reverseRate>
      
    </Reaction>
    <Reaction name = "bRafRasMAPKK--pMAPKK+bRafRas" id="bRafRasMAPKK--pMAPKK+bRafRas">
        <Reactant specieID="bRafRasMEK"           />
        <Product  specieID="pMEK"               />
        <Product  specieID="bRafRas"               />

        <forwardRate> 0.2e-3   </forwardRate>
        <reverseRate> 0  </reverseRate>
      
    </Reaction>
    
    <!--(pMAPKK phos by bRaf1RasGTP) pMAPKK + bRafRasGTP <-> bRafRasGTPMAPKK <-> ppMAPKK + bRafRasGTP-->
    
    <Reaction name = "pMAPKK+bRafRas--bRaf1RaspMAPKK" id="pMAPKK+bRafRasGTP--bRafRaspMAPKK">
        <Reactant specieID="pMEK"           />
        <Reactant specieID="bRafRas"              />
        <Product  specieID="bRafRaspMEK"               />

     <forwardRate> 0.00628575e-3  </forwardRate>
        <reverseRate> 0.8e-3  </reverseRate>
      
      
    </Reaction>
    <Reaction name = "bRafRaspMAPKK--ppMAPKK+bRafRas" id="bRafRaspMAPKK--ppMAPKK+bRafRas">
        <Reactant specieID="bRafRaspMEK"           />
        <Product  specieID="ppMEK"               />
        <Product  specieID="bRafRas"               />

        <forwardRate> 0.2e-3   </forwardRate>
        <reverseRate> 0  </reverseRate>
      
    </Reaction>

<!--MAPKK INACTIVATION BY PP2A-->
    
<!--(ppMAPKK dephos by PP2A) ppMAPKK+PP2A <-> ppMAPKKPP2A <-> pMAPKK+PP2A-->
    <Reaction name = "ppMAPKK+PP2A--ppMAPKKPP2A" id="ppMAPKK+PP2A--ppMAPKKPP2A">
        <Reactant specieID="ppMEK"           />
        <Reactant specieID="PP2A"              />
        <Product  specieID="ppMEKPP2A"               />
                    

        <forwardRate> 0.0019168e-3  </forwardRate>
        <reverseRate> 24.000000e-3  </reverseRate>
       
    </Reaction>
    <Reaction name = "ppMAPKKPP2A--pMAPKK+PP2A" id="ppMAPKKPP2A--pMAPKK+PP2A">
        <Reactant specieID="ppMEKPP2A"           />
        <Product  specieID="pMEK"               />
        <Product  specieID="PP2A"               />

        <forwardRate> 6e-3   </forwardRate>
        <reverseRate> 0  </reverseRate>
       
    </Reaction>

<!--(pMAPKK dephos by PP2A) pMAPKK+PP2A <-> pMAPKKPP2A <-> MAPKK+PP2A-->
    <Reaction name = "pMAPKK+PP2A--pMAPKKPP2A" id="pMAPKK+PP2A--pMAPKKPP2A">
        <Reactant specieID="pMEK"           />
        <Reactant specieID="PP2A"              />
        <Product  specieID="pMEKPP2A"               />

       <forwardRate> 0.0019168e-3  </forwardRate>
        <reverseRate> 24.000000e-3  </reverseRate>
       
    </Reaction>
    <Reaction name = "pMAPKKPP2A--MAPKK+PP2A" id="pMAPKKPP2A--pMAPKK+PP2A">
        <Reactant specieID="pMEKPP2A"           />
        <Product  specieID="MEK"               />
        <Product  specieID="PP2A"               />

        <forwardRate> 6e-3   </forwardRate>
        <reverseRate> 0  </reverseRate>
       
    </Reaction>


   
   
  <!-- RasGTP binding to bRaf -->
   
  <!-- (bRaf bind to  RasGTP) RasGTP + bRaf <-> bRafRasGTP -->
    <Reaction name = "RasGTP+Raf1--bRafRas" id="RasGTP+bRaf--bRafRas">
        <Reactant specieID="RasGTP"           />
        <Reactant  specieID="bRaf"               />
        <Product  specieID="bRafRas"               />

        <forwardRate> 0.006e-3   </forwardRate>
	<reverseRate> 0.5e-3   </reverseRate>
    </Reaction>


    
    
    
    
    <!-- Calcium binding -->

<!-- control Ca back to level on time  -->
<Reaction name ="ca+cbuff--cabuff" id="ca+cbuff--cabuff">
              <Reactant specieID="Ca"/>
              <Reactant specieID="Cbuff"/>
	      <Product specieID="Cabuff"/>

        <forwardRate> 0.1e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
</Reaction>
    
    
    
     


<!--Calmodulin binding to calcium rxns-->

<!--1A) Cam  + 2Ca <-> CamCa2C GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamC_bind" id="CamC_bind">
	<Reactant specieID="Cam"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa2C"/>

	<forwardRate>6e-6</forwardRate>
	<reverseRate>9.1e-3</reverseRate>
	
    </Reaction>
  
<!--2A) CamCa2C  + 2Ca <-> CamCa4 GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamCa2C_bind" id="CamCa2C_bind">
	<Reactant specieID="CamCa2C"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa4"/>

	<forwardRate>0.1e-3</forwardRate>
	<reverseRate>1000e-3</reverseRate>
	
    </Reaction>

<!--1B) Cam  + 2Ca <-> CamCa2N GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamN_bind" id="CamN_bind">
	<Reactant specieID="Cam"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa2N"/>

	<forwardRate>0.1e-3</forwardRate>
	<reverseRate>1000e-3</reverseRate>

    </Reaction>

<!--2B) CamCa2N  + 2Ca <-> CamCa4 GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CamCa2N_bind" id="CamCa2N_bind">
	<Reactant specieID="CamCa2N"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CamCa4"/>

	<forwardRate>6e-6</forwardRate>
	<reverseRate>9.1e-3</reverseRate>

    </Reaction>
    
    <!-- New CamKII part -->

  <!--1) CamCa4 + CK <-> CKCamCa4  -->
    <Reaction name = "CK bind" id="CK-Cam_bind">
        <Reactant specieID="CamCa4"                 />
        <Reactant specieID="CK"                     />
        <Product  specieID="CKCamCa4"               />

        <forwardRate> 0.01e-3   </forwardRate>
        <reverseRate> 1.5e-3      </reverseRate>
        <!--0.8 from ode file
	    reverseRate> 0.8e-3      </reverseRate-->
    </Reaction>

<!--2a) 2 CKCamCa4  <-> 1  CKCamCa4 + 1 CKpCamCa4 -->
    <Reaction name = "CKCam bind" id="CKCam_pow2">
        <Reactant specieID="CKCamCa4"  power="2"        />
        <Product  specieID="CKCamCa4"          />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 3.83119676007e-10 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2b)  3 CKCamCa4  <-> 2 CKCamCa4 + 1 CKpCamCa4 -->
    <Reaction name = "CKCam bind" id="CKCam_pow3">
        <Reactant specieID="CKCamCa4"  power="3"        />
        <Product  specieID="CKCamCa4"  power="2"         />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 3.55792141502e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2c) 4 CKCamCa4  <-> 3  CKCamCa4 + 1 CKpCamCa4 -->
    <Reaction name = "CKCam bind" id="CKCam_pow4">
        <Reactant specieID="CKCamCa4"  power="4"        />
        <Product  specieID="CKCamCa4"   power="3"         />
        <Product  specieID="CKpCamCa4"           />

        <forwardRate> 2.23694832822e-16 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2d)  2 CKpCamCa4 + 2 CKCamCa4 <-> 3 CKpCamCa4 + 1 CKCamCa4-->
    <Reaction name = "CKCam bind" id="CK2_CKpCam_pow2">
        <Reactant specieID="CKpCamCa4"  power="2"        />
        <Reactant specieID="CKCamCa4"  power="2"        />
        <Product  specieID="CKCamCa4"           />
        <Product  specieID="CKpCamCa4" power="3"         />

        <forwardRate> 1.10450093247e-18 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2e)  2 CKpCamCa4 + 2 CKCamCa4 <-> 3 CKpCamCa4 + 1 CKCamCa4-->
    <Reaction name = "CKCam bind" id="CK1_CKpCam_pow2">
        <Reactant specieID="CKpCamCa4"  power="2"        />
        <Reactant specieID="CKCamCa4"         />
        <Product  specieID="CKpCamCa4" power="3"         />

        <forwardRate> 3.0330636368e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

<!--2f)  2 CKpCamCa4 + 2 CKCamCa4 <-> 3 CKpCamCa4 + 1 CKCamCa4-->
    <Reaction name = "CKCam bind" id="CK2_CKpCam_pow1">
        <Reactant specieID="CKpCamCa4"   power="2"         />
        <Reactant specieID="CKCamCa4"     power="2"     />
        <Product  specieID="CKpCamCa4" power="3"         />
        <Product  specieID="CKCamCa4"          />

        <forwardRate> 2.39399544094e-13 </forwardRate>
        <reverseRate> 0e-3     </reverseRate>
    </Reaction>

    <!-- CKpCamCa4 <-> CKp + CamCa4 -->
    <Reaction name = "CKp auto" id="CKp_auto">
        <Reactant specieID="CKpCamCa4"              />
        <Product  specieID="CamCa4"                 />
        <Product  specieID="CKp"                    />

        <forwardRate> 0.0008e-3 </forwardRate>
        <reverseRate> 0.01e-3   </reverseRate>
    </Reaction>



<!-- Calmodulin pathway to activate Ras -->
   

    <!--(activaton of RasGRF) CamCa4+RasGRF->CamCa4RasGRF -->
    <Reaction name = "CamCa4+RasGRF--CamCa4GRF" id="CamCa4+RasGRF--CamCa4GRF">
        <Reactant specieID="CamCa4"           />
        <Reactant specieID="RasGRF"              />
	<Product  specieID="CamCa4GRF"               />

        <forwardRate> 0.06e-3  </forwardRate>
        <reverseRate> 0.924e-3 </reverseRate>
        
    </Reaction>

<!--(active RasGRF activates Ras)CamCa4GRF +RasGDP <-> CamCa4GRFRasGDP <-> CamCa4GRF + RasGTP-->
    <Reaction name = "CamCa4GRF+RasGDP--CamCa4GRFRasGDP" id="CamCa4GRF+RasGDP--CamCa4GRFRasGDP">
        <Reactant specieID="CamCa4GRF"           />
        <Reactant specieID="RasGDP"              />
        <Product  specieID="CamCa4GRFRas"               />

        <forwardRate> 0.0019e-3  </forwardRate>
        <reverseRate> 0.08e-3 </reverseRate>
        
        
    </Reaction>

    <Reaction name = "CamCa4GRFRasGDP--CamCa4GRF+RasGTP" id="CamCa4GRFRasGDP--CamCa4GRF+RasGTP">
        <Reactant specieID="CamCa4GRFRas"               />
        <Product specieID="CamCa4GRF"             />
        <Product specieID="RasGTP"               />

        <forwardRate> 0.02e-3  </forwardRate>
        <reverseRate> 0 </reverseRate>
       
</Reaction>
<!-- (Phosphorylation of SynGAP by CaMKII) CKpCamCa4+SynGap <-> CKpCamCa4Gap -> CKpCamCa4+pSynGap -->
    
  <Reaction name = "CKpCamCa4+SynGap--CKpCamCa4Gap" id="CKpCamCa4+SynGap--CKpCamCa4Gap">
  <Reactant specieID="CKpCamCa4" />
  <Reactant specieID="SynGap" />
  <Product specieID="CKpCamCa4SynGap" />

  <forwardRate> 0.3067258192987457e-3</forwardRate>
  <reverseRate> 0.058715155531797236 </reverseRate>

 </Reaction>

 <Reaction name = "CKpCamCa4Gap--CKpCamCa4+pSynGap" id="CKpCamCa4Gap--CKpCamCa4+pSynGap">
  <Reactant specieID="CKpCamCa4SynGap" />
  <Product specieID="pSynGap" />
  <Product specieID="CKpCamCa4" />

  <forwardRate> 0.0006484330410680531</forwardRate>
  <reverseRate> 0 </reverseRate>

 </Reaction>
 
  <!-- inactivation of pSynGAP) pSynGap -> SynGap -->
<Reaction name ="pSynGap--SynGap" id="pSynGap--SynGap">
	  <Reactant specieID="pSynGap"/>
	  <Product specieID="SynGap"/>

        <forwardRate> 1e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
    </Reaction>
  

<!--Syngap activity on Ras -->
<!--(Inactivation of RasGTP by SynGAP) RasGTP+SynGap <-> RasGTPGap -> SynGap + RasGDP -->

<Reaction name = "RasGTP+SynGap--RasGap" id="RasGTP+SynGap--RasGap">
  <Reactant specieID="RasGTP" />
  <Reactant specieID="SynGap" />
  <Product specieID="RasSynGap" />

 <forwardRate>0.00082e-3  </forwardRate>
 <reverseRate> 0.82e-3  </reverseRate>


</Reaction>

<Reaction name = "RasGap--SynGap+RasGDP" id = "RasGap--SynGap+RasGDP">
  <Reactant specieID="RasSynGap" />
  <Product specieID="SynGap" />
  <Product specieID="RasGDP" />

 <forwardRate> 0.205e-3 </forwardRate>
  <reverseRate> 0 </reverseRate>

</Reaction>


<!--(Inactivation of Ras by pSynGAP) RasGTP+pSynGap <-> RasGTPGap -> pSynGap + RasGDP -->

<Reaction name = "RasGTP+pSynGap--RaspGap" id="RasGTP+pSynGap--RaspGap">
  <Reactant specieID="RasGTP" />
  <Reactant specieID="pSynGap" />
  <Product specieID="RaspSynGap" />
  
  <forwardRate> 0.00112e-3 </forwardRate>
  <reverseRate> 1.112e-3  </reverseRate>

</Reaction>

<Reaction name = "RaspGap--pSynGap+RasGDP" id = "RaspGap--pSynGap+RasGDP">
  <Reactant specieID="RaspSynGap" />
  <Product specieID="pSynGap" />
  <Product specieID="RasGDP" />

  <forwardRate> 0.279e-3  </forwardRate>
  <reverseRate> 0 </reverseRate>

</Reaction>
<!--ppERK inactivation by STEP(2 separate sites and no order dependance.Earlier STEP only acted on ppERK)-->
       <Reaction name = "ppERK+STEP--ppERKSTEP" id="ppERK+STEP--ppERKSTEP">
	       <Reactant specieID="STEP"		/>
	       <Reactant specieID="ppERK"		/>
	       <Product  specieID="ppERKSTEP"		/>

	       <forwardRate> 0.01e-3   </forwardRate>
               <reverseRate> 2.4e-3   </reverseRate>
	
	</Reaction>

	 <Reaction name = "ppERKSTEP--pERK+STEP" id="ppERKSTEP--pERK+STEP">
               <Reactant specieID="ppERKSTEP"                />
               <Product specieID="ERKpT"               />
               <Product  specieID="STEP"           />

               <forwardRate> 0.6e-3   </forwardRate>
               <reverseRate> 0   </reverseRate>

        </Reaction>





<!--ERKpY inactivation by STEP(2 separate sites and no order dependance.Earlier STEP only acted on ppERK)-->
       <Reaction name = "pERK+STEP--pERKSTEP" id="pERK+STEP--pERKSTEP">
	       <Reactant specieID="STEP"		/>
	       <Reactant specieID="ERKpY"		/>
	       <Product  specieID="pERKSTEP"		/>

	       <forwardRate> 0.01e-3   </forwardRate>
               <reverseRate> 2.4e-3   </reverseRate>
	
	</Reaction>

	 <Reaction name = "pERKSTEP--pERK+STEP" id="pERKSTEP--ERK+STEP">
               <Reactant specieID="pERKSTEP"                />
               <Product specieID="ERK"               />
               <Product  specieID="STEP"           />

               <forwardRate> 0.6e-3   </forwardRate>
               <reverseRate> 0   </reverseRate>

        </Reaction>

 <!--I. *********** Ca pump and buffer rxns  ************* -->
<!-- i: Ca pump high affinity -    Ca + pmca <-> pmcaCa  SAME-->
    <Reaction name = "Ca_pump1a" id="Ca_pump1a">
	<Reactant specieID="Ca"/>
	<Reactant specieID="pmca"/>
	<Product specieID="pmcaCa"/>

	<forwardRate>0.05e-3</forwardRate>
	<reverseRate>9e-3</reverseRate>
    </Reaction>

<!-- ii: Ca pump high affinity -    pmcaCa <-> pmca + CaOut   SAME-->
    <Reaction name = "Ca_pump1b" id="Ca_pump1b">
	<Reactant specieID="pmcaCa"/>
	<Product specieID="pmca"/>
	<Product specieID="CaOut"/>

	<forwardRate>3.0e-3</forwardRate>
	<reverseRate>0</reverseRate>
    </Reaction>

<!-- iii: Ca pump low affinity -    Ca + ncx <-> ncxCa  SAME-->
    <Reaction name = "Ca_pump2a" id="Ca_pump2a">
	<Reactant specieID="Ca"/>
	<Reactant specieID="ncx"/>
	<Product specieID="ncxCa"/>

	<forwardRate>0.011e-3</forwardRate>
	<reverseRate>11.2e-3</reverseRate>
    </Reaction>

<!-- iv: Ca pump low affinity -    ncxCa <-> ncx + CaOut   SAME-->
    <Reaction name = "Ca_pump2b" id="Ca_pump2b">
	<Reactant specieID="ncxCa"/>
	<Product specieID="ncx"/>
	<Product specieID="CaOut"/>

	<forwardRate>5.6e-3</forwardRate>
	<reverseRate>0</reverseRate>
    </Reaction>
<!-- v: Ca leak -    CaOut + Leak <-> CaOutLeak  GQ RXN FILE, Leak is sm only-->
    <Reaction name = "Ca_leak" id="Ca_leak">
	<Reactant specieID="CaOut"/>
	<Reactant specieID="Leak"/>
	<Product specieID="CaOutLeak"/>

        <forwardRate>0.01e-6</forwardRate>
	<reverseRate>1.1e-3</reverseRate>
    </Reaction>

<!-- vi: Ca leak -    CaOutLeak <-> Ca (inside) + Leak  -->
    <Reaction name = "Ca_leak" id="Ca_leak">
	<Reactant specieID="CaOutLeak"/>
	<Product specieID="Ca"/>
	<Product specieID="Leak"/>

        <forwardRate>1.1e-3</forwardRate>
	<reverseRate>0</reverseRate>
    </Reaction>

<!-- vii: Ca Buffer    Ca + Calbindin <-> calbinC  SAME-->
    <Reaction name = "Ca_buffer" id="Ca_Buffer">
        <Reactant specieID="Ca"/>
        <Reactant specieID="Calbin"/>
        <Product specieID="CalbinC"/>

        <forwardRate>0.028e-3</forwardRate>
        <reverseRate>19.6</reverseRate>
    </Reaction>

</ReactionScheme>







     	
















    
    





























